PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL PROTOCOLS
  EMERGENCY
    BODY
      MRAPPY
        FastViewLocalizer
        COR T2
        COR T2 SPAIR
        AX T2 AP
        AX T2 SPAIR AP
        SAG T2
        AX TRUFISP
        COR MRCP
        AX IN AND OPP
        AX MRCP

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\FastViewLocalizer
TA: 0:17 PM: ISO Voxel size: 5.0×5.0×5.0 mmRel. SNR: 1.00  : flct
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H147.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 3.31 ms
  TE: 2.19 ms
  Filter: Distortion Corr.(2D)
  Coil elements: BC
Contrast - Common
  TR: 3.31 ms
  TE: 2.19 ms
Resolution - Common
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  Base resolution: 96
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H147.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 3.31 ms
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 A25.0 H147.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Table position: H
  Table position: 147 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: On
  Range start: H
  Range start: 150 mm
  Total FoV: H >> F
  Total FoV: 600 mm
  Slices: 1
  Slice thickness: 5 mm
  Dist. factor: 100 %
  FoV read: 480 mm
  FoV phase: 87.5 %
  Perform CTM adjustments: On
  Table Speed: 36 mm/s
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 147 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adj. water suppr.: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Perform CTM adjustments: On
  Adjustment Tolerance: Maximum
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Img. Scale Cor.: 1.000
Sequence - Part 1
  Dimension: 2D
  Bandwidth: 801.282051 Hz/Px
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\COR T2
TA: 0:42 PM: ISO Voxel size: 1.5×1.5×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
Properties
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  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L21.7 P13.9 F59.1 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 92 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO3;BO1-3;SP5-8
Contrast - Common
  TR: 1200.0 ms
  TE: 92 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 42
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L21.7 P13.9 F59.1 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L21.7 P13.9 F59.1 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 59 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 59 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L21.7 P13.9 F59.1 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 269 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1200.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 380 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.28 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Turbo factor: 256
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\COR T2
TA: 0:42 PM: ISO Voxel size: 1.5×1.5×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L18.7 P13.9 F189.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 92 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO2,3;BO1,2;SP4-7
Contrast - Common
  TR: 1200.0 ms
  TE: 92 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Position: L18.7 P13.9 F189.0 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L18.7 P13.9 F189.0 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 189 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 189 mm
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System - Adjust Volume
  Position: L18.7 P13.9 F189.0 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\COR T2 SPAIR
TA: 0:42 PM: ISO Voxel size: 1.5×1.5×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L21.7 P13.9 F59.1 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 92 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO3;BO1-3;SP5-8
Contrast - Common
  TR: 1200.0 ms
  TE: 92 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Position: L21.7 P13.9 F59.1 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L21.7 P13.9 F59.1 mm
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 59 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 59 mm
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System - Adjust Volume
  Position: L21.7 P13.9 F59.1 mm
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Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\COR T2 SPAIR
TA: 0:42 PM: ISO Voxel size: 1.5×1.5×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L18.7 P13.9 F189.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 92 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO2,3;BO1,2;SP4-7
Contrast - Common
  TR: 1200.0 ms
  TE: 92 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Position: L18.7 P13.9 F189.0 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L18.7 P13.9 F189.0 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 189 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 189 mm
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System - Adjust Volume
  Position: L18.7 P13.9 F189.0 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX T2 AP
TA: 0:44 PM: ISO Voxel size: 1.6×1.6×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 85 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1200.0 ms
  TE: 85 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  Base resolution: 256
  Phase resolution: 95 %
  Phase partial Fourier: 5/8
  Interpolation: Off
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Geometry - Common
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  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 87.5 %
  Phase resolution: 95 %
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.28 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Turbo factor: 213
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX T2 AP
TA: 0:44 PM: ISO Voxel size: 1.6×1.6×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L0.0 P0.0 F249.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 85 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F249.5 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F249.5 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX T2 SPAIR AP
TA: 0:44 PM: ISO Voxel size: 1.6×1.6×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 85 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1200.0 ms
  TE: 85 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Position: Isocenter
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 269 mm
  Reset: Off
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Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX T2 SPAIR AP
TA: 0:44 PM: ISO Voxel size: 1.6×1.6×7.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L0.0 P0.0 F249.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  TR: 1200.0 ms
  TE: 85 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F249.5 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F249.5 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F249.5 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\SAG T2
TA: 0:49 PM: ISO Voxel size: 1.0×1.0×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: L14.1 P28.4 F286.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 320 mm
  FoV phase: 90.6 %
  Slice thickness: 7.0 mm
  TR: 1300.0 ms
  TE: 87 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;BO1;SP3-6
Contrast - Common
  TR: 1300.0 ms
  TE: 87 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 320 mm
  FoV phase: 90.6 %
  Slice thickness: 7.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: L14.1 P28.4 F286.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 320 mm
  FoV phase: 90.6 %
  Slice thickness: 7.0 mm
  TR: 1300.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L14.1 P28.4 F286.7 mm
  Orientation: Sagittal
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel R/L
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 287 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 287 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1300.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 320 mm
  FoV phase: 90.6 %
  Phase resolution: 80 %
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.36 ms
  Bandwidth: 710 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Turbo factor: 232
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX TRUFISP
TA: 0:22 PM: ISO Voxel size: 0.7×0.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 380 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 3.84 ms
  TE: 1.92 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 3.84 ms
  TE: 1.92 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 380 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 380 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 3.84 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjust Volume
  ! Position: Isocenter
  ! Orientation: Transversal
  ! Rotation: 0.00 deg
  ! A >> P: 263 mm
  ! R >> L: 350 mm
  ! F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.84 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX TRUFISP
TA: 0:22 PM: ISO Voxel size: 0.7×0.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\COR MRCP
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 746 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 746 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 9.1 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX IN AND OPP
TA: 0:17 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Flip angle: 10.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 6.60 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 7.5 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Off
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: In phase
  Multi-slice mode: Sequential
  Bandwidth 1: 500 Hz/Px
  Bandwidth 2: 500 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX IN AND OPP
TA: 0:17 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F150.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F150.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F150.1 mm
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  F: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 150 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 150 mm
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System - Adjust Volume
  Position: L10.1 P17.4 F150.1 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\MR APPY (ADULT)\AX MRCP
TA: 0:45 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1800.0 ms
  TE: 779 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1800.0 ms
  TE: 779 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1800.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1800.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 9.16 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s
