PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL PROTOCOLS
  EMERGENCY
    BODY
      PE WWO
        FastViewLocalizer
        AX T2
        AX T2 SPAIR
        COR PRE
        AX PRE
        COR TRUFISP ECG
        AX TRUFISP ECG
        MRA MASK CHEST
        Care Bolus STOP@SUBCLAVIAN VEIN
        MRA SOURCE 1
        MRA SOURCE 2
        AX IN AND OPP
        AX POST FS
        COR POST
        3PL LOC (OPTIONAL)
        AX POST LOWER

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\FastViewLocalizer
TA: 0:18 PM: ISO Voxel size: 5.0×5.0×5.0 mmRel. SNR: 1.00  : flct
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 3.31 ms
  TE: 2.19 ms
  Filter: Distortion Corr.(2D)
  Coil elements: BC
Contrast - Common
  TR: 3.31 ms
  TE: 2.19 ms
Resolution - Common
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  Base resolution: 96
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 3.31 ms
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Table position: H
  Table position: 97 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: On
  Range start: H
  Range start: 100 mm
  Total FoV: H >> F
  Total FoV: 650 mm
  Slices: 1
  Slice thickness: 5 mm
  Dist. factor: 100 %
  FoV read: 480 mm
  FoV phase: 87.5 %
  Perform CTM adjustments: On
  Table Speed: 36 mm/s
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 97 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adj. water suppr.: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Perform CTM adjustments: On
  Adjustment Tolerance: Maximum
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Img. Scale Cor.: 1.000
Sequence - Part 1
  Dimension: 2D
  Bandwidth: 801.282051 Hz/Px
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX T2
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  TE: 85 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 85 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  Base resolution: 256
  Phase resolution: 95 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 42
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 269 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 87.5 %
  Phase resolution: 95 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.28 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Turbo factor: 213
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX T2 SPAIR
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Contrast - Common
  TR: 1500.0 ms
  TE: 85 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
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Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\COR PRE
TA: 0:17 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.80 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 3.80 ms
  TE: 2.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.80 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 350 mm
  F >> H: 350 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.1 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.80 ms
  TE: 2.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX PRE
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 4.40 ms
  TE: 2.30 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 4.40 ms
  TE: 2.30 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Geometry - Common
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  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 4.40 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 8 mm
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  Transversal: H >> F
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System - Adjust Volume
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 9.5 s
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Inline - MapIt
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  TR: 4.40 ms
  TE: 2.30 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\COR TRUFISP ECG
TA: 0:40 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 354.71 ms
  TE: 1.22 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 354.71 ms
  TE: 1.22 ms
  Magn. preparation: None
  Flip angle: 80 deg
  Fat suppr.: None
  Wrap-up Magn.: Restore
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Resolution - Common
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 65 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: GRE/separate
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 354.71 ms
  Multi-slice mode: Sequential
  Series: Descending
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Wrap-up Magn.: Restore
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Cardiac
  Adjust with body coil: On
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System - Adjust Volume
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 340 mm
  F >> H: 340 mm
  A >> P: 180 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: ECG/Trigger
  Average cycle: 504 ± 65 ms
  Average cycle: No Signal ms
  Captured cycle: 504 ± 65 ms
  Acquisition window: 655 ms
  Trigger pulse: 1
  Trigger delay: 300 ms
  TR: 354.71 ms
  Concatenations: 2
  Segments: 108
  Phases: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 100.0 %
  Phase resolution: 65 %
  Cine: Off
  Trajectory: Cartesian
  Dummy heartbeats: 0
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - Cardiac
  Inline Evaluation: Off
  Magn. preparation: None
  Contrasts: 1
  TE: 1.22 ms
  TR: 354.71 ms
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Echo spacing: 3 ms
  Sequence type: Trufi
  Bandwidth: 888 Hz/Px
Sequence - Part 2
  Define: Shots
  Shots per slice: 1
  Segments: 108
  Trufi delta freq.: 0 Hz
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  Flip angle mode: Constant
  Cine: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX TRUFISP ECG
TA: 0:40 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 340 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 236.71 ms
  TE: 1.22 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 236.71 ms
  TE: 1.22 ms
  Magn. preparation: None
  Flip angle: 80 deg
  Fat suppr.: None
  Wrap-up Magn.: Restore
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Resolution - Common
  FoV read: 340 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 65 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 236.71 ms
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Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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System - Adjust Volume
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 277 mm
  R >> L: 340 mm
  F >> H: 180 mm
  Reset: Off
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Physio - Signal1
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  Acquisition window: 600 ms
  Trigger pulse: 1
  Trigger delay: 300 ms
  TR: 236.71 ms
  Concatenations: 2
  Segments: 68
  Phases: 1
Physio - Cardiac
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  FoV phase: 81.3 %
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Inline - Cardiac
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  TR: 236.71 ms
  Save original images: On
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Sequence - Part 2
  Define: Shots
  Shots per slice: 1
  Segments: 68
  Trufi delta freq.: 0 Hz
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  Flip angle mode: Constant
  Cine: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\MRA MASK CHEST
TA: 0:18 PM: ISO Voxel size: 1.0×1.0×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: Off
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 106.3 %
  Slice thickness: 1.20 mm
  TR: 3.14 ms
  TE: 1.07 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.14 ms
  TE: 1.07 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 106.3 %
  Slice thickness: 1.20 mm
  Base resolution: 352
  Phase resolution: 70 %
  Slice resolution: 60 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 106.3 %
  Slice thickness: 1.20 mm
  TR: 3.14 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
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  MSMA: C - T - S
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.14 ms
  Segments: 1
Angio - Common
  Flip angle: 30 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 410 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\Care Bolus STOP@SUBCLAVIAN VEIN
TA: 1:16 PM: FIX Voxel size: 1.4×1.4×40.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: L53.0 P19.0 H63.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  TR: 35.03 ms
  TE: 1.34 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 35.03 ms
  TE: 1.34 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 60
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Pause after meas. 40: 0.0 s
  Pause after meas. 41: 0.0 s
  Pause after meas. 42: 0.0 s
  Pause after meas. 43: 0.0 s
  Pause after meas. 44: 0.0 s
  Pause after meas. 45: 0.0 s
  Pause after meas. 46: 0.0 s
  Pause after meas. 47: 0.0 s
  Pause after meas. 48: 0.0 s
  Pause after meas. 49: 0.0 s
  Pause after meas. 50: 0.0 s
  Pause after meas. 51: 0.0 s
  Pause after meas. 52: 0.0 s
  Pause after meas. 53: 0.0 s
  Pause after meas. 54: 0.0 s
  Pause after meas. 55: 0.0 s
  Pause after meas. 56: 0.0 s
  Pause after meas. 57: 0.0 s
  Pause after meas. 58: 0.0 s
  Pause after meas. 59: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  Base resolution: 256
  Phase resolution: 96 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: L53.0 P19.0 H63.5 mm
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  FoV phase: 100.0 %
  Slice thickness: 40 mm
  TR: 35.03 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L53.0 P19.0 H63.5 mm
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: Parallel A/P
  Gap: 5.0 mm
  Thickness: 50 mm
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System - Miscellaneous
  Positioning mode: FIX
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
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Physio - Signal1
  1st Signal/Mode: None
  TR: 35.03 ms
  Segments: 7
Angio - Common
  Flip angle: 30 deg
  Measurements: 60
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Pause after meas. 40: 0.0 s
  Pause after meas. 41: 0.0 s
  Pause after meas. 42: 0.0 s
  Pause after meas. 43: 0.0 s
  Pause after meas. 44: 0.0 s
  Pause after meas. 45: 0.0 s
  Pause after meas. 46: 0.0 s
  Pause after meas. 47: 0.0 s
  Pause after meas. 48: 0.0 s
  Pause after meas. 49: 0.0 s
  Pause after meas. 50: 0.0 s
  Pause after meas. 51: 0.0 s
  Pause after meas. 52: 0.0 s
  Pause after meas. 53: 0.0 s
  Pause after meas. 54: 0.0 s
  Pause after meas. 55: 0.0 s
  Pause after meas. 56: 0.0 s
  Pause after meas. 57: 0.0 s
  Pause after meas. 58: 0.0 s
  Pause after meas. 59: 0.0 s
Angio - Inline
  Subtract: Off
  Measurements: 60
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  Segments: 7
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\MRA SOURCE 1
TA: 0:18 PM: ISO Voxel size: 1.0×1.0×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
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  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 106.3 %
  Slice thickness: 1.20 mm
  TR: 3.14 ms
  TE: 1.07 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.14 ms
  TE: 1.07 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 106.3 %
  Slice thickness: 1.20 mm
  Base resolution: 352
  Phase resolution: 70 %
  Slice resolution: 60 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 106.3 %
  Slice thickness: 1.20 mm
  TR: 3.14 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P20.0 H0.0 mm
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: C - T - S
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  Coil Select Mode: Off - All
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.14 ms
  Segments: 1
Angio - Common
  Flip angle: 30 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 410 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\MRA SOURCE 2
TA: 0:18 PM: ISO Voxel size: 1.0×1.0×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX IN AND OPP
TA: 0:17 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Flip angle: 10.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 6.60 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  MSMA: S - C - T
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 7.5 s
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Inline - MapIt
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  Contrasts: 2
  TR: 6.60 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Off
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: In phase
  Multi-slice mode: Sequential
  Bandwidth 1: 500 Hz/Px
  Bandwidth 2: 500 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX POST FS
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 4.40 ms
  TE: 2.30 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 4.40 ms
  TE: 2.30 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
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Geometry - Common
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  Position: L10.1 P17.4 H8.5 mm
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  TR: 4.40 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H8.5 mm
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 8 mm
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L10.1 P17.4 H8.5 mm
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Inline - Common
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  Time to center: 9.5 s
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Inline - MapIt
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  Contrasts: 1
  TR: 4.40 ms
  TE: 2.30 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\COR POST
TA: 0:17 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.80 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 3.80 ms
  TE: 2.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 4
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Geometry - Common
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  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.80 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 350 mm
  F >> H: 350 mm
  A >> P: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 9.1 s
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Inline - MapIt
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  TR: 3.80 ms
  TE: 2.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\3PL LOC (OPTIONAL)
TA: 0:16 PM: ISO Voxel size: 0.8×0.8×8.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 5.6 ms
  TE: 2.45 ms
  Averages: 1
  Concatenations: 27
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 5.6 ms
  TE: 2.45 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 5.6 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 27
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 15
  Slice thickness: 8.0 mm
  Dist. factor: 10 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
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System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5.6 ms
  Concatenations: 27
  Segments: 1
Physio - Cardiac
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  FoV read: 430 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 27
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 5.6 ms
  TE: 2.45 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 450 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX POST LOWER
TA: 0:15 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F299.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 4.47 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 4.47 ms
  TE: 2.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F299.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 4.47 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F299.5 mm
  Orientation: Transversal
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F299.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642160 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.4 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.47 ms
  TE: 2.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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\\CLINICAL PROTOCOLS\EMERGENCY\BODY\PE W/WO\AX POST LOWER
TA: 0:15 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F575.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 4.47 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F575.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F575.1 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 575 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 575 mm
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System - Adjust Volume
  Position: L10.1 P17.4 F575.1 mm
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