PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL PROTOCOLS
  MSK
    TUMOR ADD-ON SEQUENCES
      UPPER EXT LONG BONE (1-STATION <300 FOV)
        OUT OF PHASE AX
        in PHASE AX
        AX DIFF
        AX 3D VIBE PRE
        DYN SAG OR COR
        AX  3D VIBE POST
      PELVISHIP_
        OUT OF PHASE AX 
        IN PHASE AX
        AX DIFF
        AX  VIBE PRE
        DYN SAG OR COR 
        AX VIBE Post
      LOWER EXT TUMOR COMPLETE
        LOC
        LOC SPECFIC SIDE
        COR STIR_TWO_STATION_SCREEN
        SAG STIR
        COR T1
        AX T2 FS
        AX T1
        OUT OF PHASE AX
        IN PHASE AX
        AX DIFF
        AX  VIBE PRE
        DYN SAG OR COR 
        AX VIBE Post
      SMALL PARTS
        OUT OF PHASE AX
        iN PHASE AX
        AX DIFF
        AX VIBE PRE
        DYN SAG OR COR
        AX VIBE POST
      KNEE_FOOTANKLE
        OUT OF PHASE AX
        iN PHASE AX
        AX DIFF
        AX VIBE PRE
        DYN SAG OR COR
        AX VIBE POST
      DEVELOPMENT SEQ
        DCE 400 fov 20 measurements
        DCE COR 400 FOV 40
        DIFF Ax
        Vibe Coro PRE
        DCE
        Vibe Coro Post

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\UPPER EXT LONG BONE (1-STATION <300 FOV)\OUT OF PHASE AX
TA: 1:36 PM: ISO Voxel size: 1.0×1.0×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 153 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 280.0 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 280.0 ms
  TE: 2.38 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 153 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 160
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  FoV read: 153 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 280.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  Initial Position: L32.9 P17.6 H85.5
  L: 32.9 mm
  P: 17.6 mm
  H: 85.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 13.0
  > S: 9.9
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 86 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 153 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 86 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Rotation: 0.00 deg
  A >> P: 153 mm
  R >> L: 153 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642269 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 280.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 153 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 65 deg
  Measurements: 1
  Contrasts: 1
  TR: 280.0 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 480 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\UPPER EXT LONG BONE (1-STATION <300 FOV)\in PHASE AX
TA: 1:36 PM: ISO Voxel size: 1.0×1.0×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 153 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 280.0 ms
  TE: 4.76 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 280.0 ms
  TE: 4.76 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Inline - MapIt
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  TE: 4.76 ms
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\UPPER EXT LONG BONE (1-STATION <300 FOV)\AX DIFF
TA: 3:29 PM: ISO Voxel size: 1.0×1.0×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 57.4 %
  Slice thickness: 5.0 mm
  TR: 5100 ms
  TE: 72.0 ms
  Concatenations: 1
  Filter: Dynamic Field Corr., Distortion Corr.(2D)
  Coil elements: FS;FS
Contrast - Common
  TR: 5100 ms
  TE: 72.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 220 mm
  FoV phase: 57.4 %
  Slice thickness: 5.0 mm
  Base resolution: 108
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 57.4 %
  Slice thickness: 5.0 mm
  TR: 5100 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  Initial Position: R41.0 P19.2 H34.4
  R: 41.0 mm
  P: 19.2 mm
  H: 34.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: 14.5
  > C: -2.9
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 34 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 34 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Advanced
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Rotation: 0.00 deg
  A >> P: 127 mm
  R >> L: 220 mm
  F >> H: 165 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 5.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 5100 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Bipolar
  Diff. weightings: 3
  b-value 1: 50 s/mm²
  b-value 2: 400 s/mm²
  b-value 3: 800 s/mm²
  b-value 1: 2
  b-value 2: 2
  b-value 3: 5
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Bipolar
  Diff. weightings: 3
  b-value 1: 50 s/mm²
  b-value 2: 400 s/mm²
  b-value 3: 800 s/mm²
  b-value 1: 2
  b-value 2: 2
  b-value 3: 5
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.64 ms
  Bandwidth: 1852 Hz/Px
Sequence - Part 2
  EPI factor: 56
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\UPPER EXT LONG BONE (1-STATION <300 FOV)\AX 3D VIBE PRE
TA: 4:22 PM: ISO Voxel size: 0.5×0.5×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  Slice oversampling: 62.5 %
  Slices per slab: 128
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.55 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 6.55 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Flip angle: 13.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 62.5 %
  Slices per slab: 128
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.55 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L40.7 A13.1 H82.2
  L: 40.7 mm
  A: 13.1 mm
  H: 82.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 82 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 82 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 250 mm
  R >> L: 250 mm
  F >> H: 128 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642269 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
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Inline - Common
  View sharing: Off
  Flip angle: 13.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 131.2 s
Inline - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 13.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.55 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: Opp/In
  Multi-slice mode: Sequential
  Bandwidth 1: 700 Hz/Px
  Bandwidth 2: 700 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\UPPER EXT LONG BONE (1-STATION <300 FOV)\DYN SAG OR COR
TA: 2:22 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 0.0 %
  Slices per slab: 36
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3.69 ms
  TE: 1.43 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
Contrast - Common
  TR: 3.69 ms
  TE: 1.43 ms
  Flip angle: 12.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 33 %
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reference scan mode: GRE/separate
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 36
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3.69 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: R11.6 A67.5 F1.5
  R: 11.6 mm
  A: 67.5 mm
  F: 1.5 mm
  Initial Rotation: -22.60 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 2 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
  Composing Group: 1
  Last Step: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 2 mm
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System - Adjust Volume
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Rotation: -22.60 deg
  R >> L: 200 mm
  F >> H: 200 mm
  A >> P: 144 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 33 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 12.0 deg
  Temporal resolution: 4.4649 s
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
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  Time to center: 9.1 s
Inline - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 2
  Offset: 0
  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 30
  StdDev: Off
  Liver registration: Off
  Save original images: Off
Inline - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: Off
Inline - Soft Tissue
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  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Composing Group: 1
  Last Step: Off
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: Off
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 30
  Contrasts: 1
  TR: 3.69 ms
  TE: 1.43 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 500 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\UPPER EXT LONG BONE (1-STATION <300 FOV)\AX  3D VIBE POST
TA: 4:22 PM: ISO Voxel size: 0.5×0.5×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  Slice oversampling: 62.5 %
  Slices per slab: 128
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.55 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 6.55 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Flip angle: 13.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
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  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 62.5 %
  Slices per slab: 128
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.55 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L40.7 A13.1 H82.2
  L: 40.7 mm
  A: 13.1 mm
  H: 82.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 82 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 82 mm
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L40.7 A13.1 H82.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 250 mm
  R >> L: 250 mm
  F >> H: 128 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 13.0 deg
  Measurements: 1
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  Time to center: 131.2 s
Inline - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 13.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.55 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: Opp/In
  Multi-slice mode: Sequential
  Bandwidth 1: 700 Hz/Px
  Bandwidth 2: 700 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\PELVIS/HIP_\OUT OF PHASE AX
TA: 1:52 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 230.0 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 230.0 ms
  TE: 2.38 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 230.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  Initial Position: L32.9 P17.6 H85.5
  L: 32.9 mm
  P: 17.6 mm
  H: 85.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 13.0
  > S: 9.9
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 86 mm
  Inline Composing: Off
Geometry - Tim CT
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  FoV read: 200 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 86 mm
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Rotation: 0.00 deg
  A >> P: 200 mm
  R >> L: 200 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642269 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 230.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
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  FoV read: 200 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 65 deg
  Measurements: 1
  Contrasts: 1
  TR: 230.0 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 480 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\PELVIS/HIP_\IN PHASE AX
TA: 1:52 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 230.0 ms
  TE: 4.76 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 230.0 ms
  TE: 4.76 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Inline - MapIt
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  TE: 4.76 ms
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\PELVIS/HIP_\AX DIFF
TA: 4:10 PM: ISO Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 250 mm
  FoV phase: 70.4 %
  Slice thickness: 5.0 mm
  TR: 6100 ms
  TE: 68.0 ms
  Concatenations: 1
  Filter: Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP3-5
Contrast - Common
  TR: 6100 ms
  TE: 68.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 250 mm
  FoV phase: 70.4 %
  Slice thickness: 5.0 mm
  Base resolution: 108
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  FoV read: 250 mm
  FoV phase: 70.4 %
  Slice thickness: 5.0 mm
  TR: 6100 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  Initial Position: R41.0 P19.2 H34.4
  R: 41.0 mm
  P: 19.2 mm
  H: 34.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: 14.5
  > C: -2.9
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 34 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 34 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Advanced
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Rotation: 0.00 deg
  A >> P: 176 mm
  R >> L: 250 mm
  F >> H: 165 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 5.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6100 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.62 ms
  Bandwidth: 1852 Hz/Px
Sequence - Part 2
  EPI factor: 68
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\PELVIS/HIP_\AX  VIBE PRE
TA: 4:30 PM: ISO Voxel size: 0.9×0.9×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(3D), Prescan Normalize
  Coil elements: BO1,2;SP4-6
Contrast - Common
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Flip angle: 15.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Read & Phase
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: R51.9 P22.7 F5.2
  R: 51.9 mm
  P: 22.7 mm
  F: 5.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 5 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 5 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 208 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642269 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
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Inline - Common
  View sharing: Off
  Flip angle: 15.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 120.4 s
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth 1: 850 Hz/Px
  Bandwidth 2: 850 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\PELVIS/HIP_\DYN SAG OR COR
TA: 2:10 PM: ISO Voxel size: 1.3×1.3×5.0 mmPAT: 4 Rel. SNR: 1.00  : fldyn
Properties
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  Auto open inline display: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 34 %
  Slice oversampling: 28.6 %
  Slices per slab: 56
  FoV read: 420 mm
  FoV phase: 79.4 %
  Slice thickness: 5.0 mm
  TR: 3.32 ms
  TE: 1.21 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 3.32 ms
  TE: 1.21 ms
  Flip angle: 15.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 35
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 420 mm
  FoV phase: 79.4 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 30 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 35
  Accel. factor 3D: 2
  Ref. lines 3D: 36
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 4
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 28.6 %
  Slices per slab: 56
  FoV read: 420 mm
  FoV phase: 79.4 %
  Slice thickness: 5.0 mm
  TR: 3.32 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 30 %
  Sampling density B: 33 %
  Dynamic recon mode: Forward share
  Flip angle: 15.0 deg
  Temporal resolution: 3.5192 s
  Measurements: 35
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  Compress Acquisition: Off
  Time to center: 7.9 s
Inline - Inline
  Subtract: On
  Save images: Off
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  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 35
  StdDev: Off
  Liver registration: Off
  Save original images: Off
Inline - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: Off
Inline - Soft Tissue
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  Measurements: 35
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: Off
  MapIt: None
  Flip angle: 15.0 deg
  Measurements: 35
  Contrasts: 1
  TR: 3.32 ms
  TE: 1.21 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Equidistant
  Multi-slice mode: Sequential
  Bandwidth: 490 Hz/Px
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Sequence - Special
  MDixon Mode: LPCA Off
  Dixon Mode: Normal
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\PELVIS/HIP_\AX VIBE Post
TA: 4:30 PM: ISO Voxel size: 0.9×0.9×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(3D), Prescan Normalize
  Coil elements: BO1,2;SP4-6
Contrast - Common
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Flip angle: 15.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Read & Phase
Geometry - Common
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  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: R51.9 P22.7 F5.2
  R: 51.9 mm
  P: 22.7 mm
  F: 5.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 5 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 5 mm
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 208 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 15.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 120.4 s
Inline - Inline
  Subtract: On
  Save images: On
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  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth 1: 850 Hz/Px
  Bandwidth 2: 850 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\LOC
TA: 0:18 PM: ISO Voxel size: 1.8×1.8×8.0 mmPAT: Off Rel. SNR: 1.00  : h
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 97 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
Contrast - Common
  TR: 1500.0 ms
  TE: 97 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: 4/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 7
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 7 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 7 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642269 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 7
Physio - Cardiac
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  FoV read: 450 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 7
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 4.64 ms
  Bandwidth: 399 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Turbo factor: 256
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\LOC SPECFIC SIDE
TA: 0:18 PM: ISO Voxel size: 1.8×1.8×8.0 mmPAT: Off Rel. SNR: 1.00  : h
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: R141.7 P90.2 H12.5 mm
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: R139.9 P86.8 H6.8 mm
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: R141.4 P77.1 H5.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 97 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
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Geometry - Common
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  Position: R141.7 P90.2 H12.5 mm
  Orientation: C > T-1.7 > S-0.2
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  Position: R139.9 P86.8 H6.8 mm
  Orientation: S > T9.9
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  Position: R141.4 P77.1 H5.9 mm
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Geometry - AutoAlign
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  Position: R141.4 P77.1 H5.9 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 9 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 9 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\COR STIR_TWO_STATION_SCREEN
TA: 2:12 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir  | Substep: 1/2
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 4200.0 ms
  TE: 42.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 4200.0 ms
  TE: 42.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 4200.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 350 mm
  FoV phase: 115.6 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4200.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 115.6 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.48 ms
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 30
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
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\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\COR STIR_TWO_STATION_SCREEN
TA: 2:12 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\SAG STIR
TA: 2:58 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  TR: 4200.0 ms
  TE: 42.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: PA2-4;SP6-8
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 27
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
  FoV read: 300 mm
  FoV phase: 121.9 %
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
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  FoV read: 300 mm
  FoV phase: 121.9 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 121.9 %
  Phase resolution: 70 %
  Trajectory: Cartesian
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.32 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 41
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\COR T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.7 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 650.0 ms
  TE: 9.7 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Navigator
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Geometry - Tim CT
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  FoV read: 350 mm
  FoV phase: 115.6 %
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 350 mm
  R >> L: 405 mm
  A >> P: 191 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 115.6 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.68 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 70
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\AX T2 FS
TA: 2:02 PM: ISO Voxel size: 0.3×0.3×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: L102.7 P32.3 H12.5 mm
  Orientation: T > C5.7
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 4300.0 ms
  TE: 65.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: PA3,4;SP1,2
Contrast - Common
  TR: 4300.0 ms
  TE: 65.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: L102.7 P32.3 H12.5 mm
  Orientation: T > C5.7
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 4300.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L102.7 P32.3 H12.5 mm
  Orientation: T > C5.7
  Phase enc. dir.: A >> P
  Initial Position: L102.7 P32.3 H12.5
  L: 102.7 mm
  P: 32.3 mm
  H: 12.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 5.7
  > S: 0.0
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 12 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 5.0 mm
  Dist. factor: 0 %
  FoV read: 220 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 12 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  ! Position: L98.7 P35.3 H13.5 mm
  ! Orientation: T > C5.7 > S4.7
  ! Rotation: 0.00 deg
  ! A >> P: 105 mm
  ! R >> L: 112 mm
  ! F >> H: 174 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4300.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 81.3 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.12 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 13
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\AX T1
TA: 1:41 PM: ISO Voxel size: 0.3×0.3×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: L102.7 P32.3 H12.5 mm
  Orientation: T > C5.7
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 750.0 ms
  TE: 9.7 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: PA3,4;SP1,2
Contrast - Common
  TR: 750.0 ms
  TE: 9.7 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
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  TR: 750.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 750.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.66 ms
  Bandwidth: 182 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 43
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\OUT OF PHASE AX
TA: 1:51 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 228.0 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 228.0 ms
  TE: 2.38 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 228.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  Initial Position: L32.9 P17.6 H85.5
  L: 32.9 mm
  P: 17.6 mm
  H: 85.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 13.0
  > S: 9.9
Geometry - Saturation
  Saturation mode: Standard
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  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 86 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 6.0 mm
  Dist. factor: 20 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 86 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Rotation: 0.00 deg
  A >> P: 200 mm
  R >> L: 200 mm
  F >> H: 179 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 228.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
  Tagging: None
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  FoV read: 200 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 65 deg
  Measurements: 1
  Contrasts: 1
  TR: 228.0 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 480 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\IN PHASE AX
TA: 1:51 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L32.9 P17.6 H85.5 mm
  Orientation: T > C13.0 > S9.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 228.0 ms
  TE: 4.76 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 228.0 ms
  TE: 4.76 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Inline - MapIt
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  TE: 4.76 ms
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\AX DIFF
TA: 4:10 PM: ISO Voxel size: 1.2×1.2×6.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 250 mm
  FoV phase: 70.4 %
  Slice thickness: 6.0 mm
  TR: 6100 ms
  TE: 68.0 ms
  Concatenations: 1
  Filter: Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP3-5
Contrast - Common
  TR: 6100 ms
  TE: 68.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 250 mm
  FoV phase: 70.4 %
  Slice thickness: 6.0 mm
  Base resolution: 108
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  FoV read: 250 mm
  FoV phase: 70.4 %
  Slice thickness: 6.0 mm
  TR: 6100 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  Initial Position: R41.0 P19.2 H34.4
  R: 41.0 mm
  P: 19.2 mm
  H: 34.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: 14.5
  > C: -2.9
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 34 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 34 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Advanced
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Rotation: 0.00 deg
  A >> P: 176 mm
  R >> L: 250 mm
  F >> H: 198 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 5.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6100 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.62 ms
  Bandwidth: 1852 Hz/Px
Sequence - Part 2
  EPI factor: 68
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\AX  VIBE PRE
TA: 4:30 PM: ISO Voxel size: 0.9×0.9×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(3D), Prescan Normalize
  Coil elements: BO1,2;SP4-6
Contrast - Common
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Flip angle: 15.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Read & Phase
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: R51.9 P22.7 F5.2
  R: 51.9 mm
  P: 22.7 mm
  F: 5.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 5 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 5 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 208 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642311 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
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Inline - Common
  View sharing: Off
  Flip angle: 15.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 120.4 s
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth 1: 850 Hz/Px
  Bandwidth 2: 850 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\DYN SAG OR COR
TA: 2:12 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: 4 Rel. SNR: 1.00  : fldyn
Properties
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  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  Slice oversampling: 30.0 %
  Slices per slab: 40
  FoV read: 420 mm
  FoV phase: 79.2 %
  Slice thickness: 5.0 mm
  TR: 3.54 ms
  TE: 1.30 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 3.54 ms
  TE: 1.30 ms
  Flip angle: 15.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 35
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 420 mm
  FoV phase: 79.2 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 30 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 35
  Accel. factor 3D: 2
  Ref. lines 3D: 36
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 4
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 30.0 %
  Slices per slab: 40
  FoV read: 420 mm
  FoV phase: 79.2 %
  Slice thickness: 5.0 mm
  TR: 3.54 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 30 %
  Sampling density B: 33 %
  Dynamic recon mode: Forward share
  Flip angle: 15.0 deg
  Temporal resolution: 3.59664 s
  Measurements: 35
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  Compress Acquisition: Off
  Time to center: 7.1 s
Inline - Inline
  Subtract: On
  Save images: Off
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  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 35
  StdDev: Off
  Liver registration: Off
  Save original images: Off
Inline - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: Off
Inline - Soft Tissue
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  Measurements: 35
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: Off
  MapIt: None
  Flip angle: 15.0 deg
  Measurements: 35
  Contrasts: 1
  TR: 3.54 ms
  TE: 1.30 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Equidistant
  Multi-slice mode: Sequential
  Bandwidth: 480 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\LOWER EXT TUMOR COMPLETE\AX VIBE Post
TA: 4:30 PM: ISO Voxel size: 0.9×0.9×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(3D), Prescan Normalize
  Coil elements: BO1,2;SP4-6
Contrast - Common
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
  Flip angle: 15.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Read & Phase
Geometry - Common
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  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 6.53 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: R51.9 P22.7 F5.2
  R: 51.9 mm
  P: 22.7 mm
  F: 5.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 5 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 5 mm
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R51.9 P22.7 F5.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 208 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 15.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 120.4 s
Inline - Inline
  Subtract: On
  Save images: On
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  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 6.53 ms
  TE 1: 2.38 ms
  TE 2: 4.75 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth 1: 850 Hz/Px
  Bandwidth 2: 850 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\SMALL PARTS\OUT OF PHASE AX
TA: 1:37 PM: ISO Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 225.0 ms
  TE: 2.38 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: HW1-3
Contrast - Common
  TR: 225.0 ms
  TE: 2.38 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 160
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 225.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  Initial Position: R38.5 P57.4 H0.9
  R: 38.5 mm
  P: 57.4 mm
  H: 0.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: -17.0
  > C: 1.2
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 1 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 1 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Rotation: 0.00 deg
  A >> P: 120 mm
  R >> L: 120 mm
  F >> H: 100 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642311 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 225.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
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  FoV read: 120 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 65 deg
  Measurements: 1
  Contrasts: 1
  TR: 225.0 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\SMALL PARTS\iN PHASE AX
TA: 1:37 PM: ISO Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 225.0 ms
  TE: 4.76 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: HW1-3
Contrast - Common
  TR: 225.0 ms
  TE: 4.76 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Inline - MapIt
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  TE: 4.76 ms
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\SMALL PARTS\AX DIFF
TA: 4:06 PM: ISO Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 58.0 %
  Slice thickness: 4.0 mm
  TR: 6000 ms
  TE: 76.0 ms
  Concatenations: 1
  Filter: Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: HW1-3
Contrast - Common
  TR: 6000 ms
  TE: 76.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 150 mm
  FoV phase: 58.0 %
  Slice thickness: 4.0 mm
  Base resolution: 100
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 58.0 %
  Slice thickness: 4.0 mm
  TR: 6000 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  Initial Position: R41.0 P19.2 H34.4
  R: 41.0 mm
  P: 19.2 mm
  H: 34.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: 14.5
  > C: -2.9
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 34 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 34 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Advanced
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Rotation: 0.00 deg
  A >> P: 87 mm
  R >> L: 150 mm
  F >> H: 132 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 5.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6000 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.94 ms
  Bandwidth: 1220 Hz/Px
Sequence - Part 2
  EPI factor: 52
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\SMALL PARTS\AX VIBE PRE
TA: 3:49 PM: ISO Voxel size: 0.3×0.3×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 85 %
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
  TE: 2.12 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HW1-3
Contrast - Common
  TR: 5.08 ms
  TE: 2.12 ms
  Flip angle: 13.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 176
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 288
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L52.9 P43.2 H28.9
  L: 52.9 mm
  P: 43.2 mm
  H: 28.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 29 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 29 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 145 mm
  R >> L: 145 mm
  F >> H: 112 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642311 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
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Inline - Common
  View sharing: Off
  Flip angle: 13.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 98.0 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 13.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 5.08 ms
  TE: 2.12 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\SMALL PARTS\DYN SAG OR COR
TA: 2:14 PM: ISO Voxel size: 0.6×0.6×2.5 mmPAT: 2 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 0.0 %
  Slices per slab: 44
  FoV read: 120 mm
  FoV phase: 78.1 %
  Slice thickness: 2.5 mm
  TR: 4.70 ms
  TE: 1.81 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
Contrast - Common
  TR: 4.70 ms
  TE: 1.81 ms
  Flip angle: 12.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 120 mm
  FoV phase: 78.1 %
  Slice thickness: 2.5 mm
  Base resolution: 192
  Phase resolution: 100 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reference scan mode: GRE/separate
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 44
  FoV read: 120 mm
  FoV phase: 78.1 %
  Slice thickness: 2.5 mm
  TR: 4.70 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: R11.6 A67.5 F1.5
  R: 11.6 mm
  A: 67.5 mm
  F: 1.5 mm
  Initial Rotation: -22.60 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 2 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
  Composing Group: 1
  Last Step: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 2 mm
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Rotation: -22.60 deg
  R >> L: 94 mm
  F >> H: 120 mm
  A >> P: 110 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 33 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 12.0 deg
  Temporal resolution: 4.2112 s
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
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  Time to center: 8.5 s
Inline - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 2
  Offset: 0
  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 30
  StdDev: Off
  Liver registration: Off
  Save original images: Off
Inline - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: Off
Inline - Soft Tissue
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  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Composing Group: 1
  Last Step: Off
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: Off
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 30
  Contrasts: 1
  TR: 4.70 ms
  TE: 1.81 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\SMALL PARTS\AX VIBE POST
TA: 3:49 PM: ISO Voxel size: 0.3×0.3×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 85 %
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
  TE: 2.12 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HW1-3
Contrast - Common
  TR: 5.08 ms
  TE: 2.12 ms
  Flip angle: 13.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 176
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 288
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
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  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L52.9 P43.2 H28.9
  L: 52.9 mm
  P: 43.2 mm
  H: 28.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 29 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 29 mm
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 145 mm
  R >> L: 145 mm
  F >> H: 112 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 13.0 deg
  Measurements: 1
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  Time to center: 98.0 s
Inline - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 13.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 5.08 ms
  TE: 2.12 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\KNEE_FOOT/ANKLE\OUT OF PHASE AX
TA: 1:37 PM: ISO Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Auto open inline display: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 225.0 ms
  TE: 2.38 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: HW1-3
Contrast - Common
  TR: 225.0 ms
  TE: 2.38 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 160
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 225.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  Initial Position: R38.5 P57.4 H0.9
  R: 38.5 mm
  P: 57.4 mm
  H: 0.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: -17.0
  > C: 1.2
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 1 mm
  Inline Composing: Off
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 1 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Rotation: 0.00 deg
  A >> P: 120 mm
  R >> L: 120 mm
  F >> H: 100 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642311 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 225.0 ms
  Concatenations: 2
  Segments: 1
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 65 deg
  Measurements: 1
  Contrasts: 1
  TR: 225.0 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\KNEE_FOOT/ANKLE\iN PHASE AX
TA: 1:37 PM: ISO Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R38.5 P57.4 H0.9 mm
  Orientation: T > S-17.0 > C1.2
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 225.0 ms
  TE: 4.76 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), B1 filter
  Coil elements: HW1-3
Contrast - Common
  TR: 225.0 ms
  TE: 4.76 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 65 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Inline - MapIt
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  TE: 4.76 ms
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\KNEE_FOOT/ANKLE\AX DIFF
TA: 4:06 PM: ISO Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 58.0 %
  Slice thickness: 4.0 mm
  TR: 6000 ms
  TE: 76.0 ms
  Concatenations: 1
  Filter: Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: HW1-3
Contrast - Common
  TR: 6000 ms
  TE: 76.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 150 mm
  FoV phase: 58.0 %
  Slice thickness: 4.0 mm
  Base resolution: 100
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 58.0 %
  Slice thickness: 4.0 mm
  TR: 6000 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Phase enc. dir.: A >> P
  Initial Position: R41.0 P19.2 H34.4
  R: 41.0 mm
  P: 19.2 mm
  H: 34.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: 14.5
  > C: -2.9
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 34 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 34 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Advanced
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: R41.0 P19.2 H34.4 mm
  Orientation: T > S14.5 > C-2.9
  Rotation: 0.00 deg
  A >> P: 87 mm
  R >> L: 150 mm
  F >> H: 132 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 5.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6000 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.94 ms
  Bandwidth: 1220 Hz/Px
Sequence - Part 2
  EPI factor: 52
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\KNEE_FOOT/ANKLE\AX VIBE PRE
TA: 3:49 PM: ISO Voxel size: 0.3×0.3×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 85 %
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
  TE: 2.12 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HW1-3
Contrast - Common
  TR: 5.08 ms
  TE: 2.12 ms
  Flip angle: 13.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 176
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 288
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L52.9 P43.2 H28.9
  L: 52.9 mm
  P: 43.2 mm
  H: 28.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 29 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 29 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 145 mm
  R >> L: 145 mm
  F >> H: 112 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642311 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
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Inline - Common
  View sharing: Off
  Flip angle: 13.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 98.0 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 13.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 5.08 ms
  TE: 2.12 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\KNEE_FOOT/ANKLE\DYN SAG OR COR
TA: 2:14 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 4 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 33.3 %
  Slices per slab: 36
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4.96 ms
  TE: 1.84 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
Contrast - Common
  TR: 4.96 ms
  TE: 1.84 ms
  Flip angle: 12.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reference scan mode: GRE/separate
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 36
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4.96 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: R11.6 A67.5 F1.5
  R: 11.6 mm
  A: 67.5 mm
  F: 1.5 mm
  Initial Rotation: -22.60 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 2 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
  Composing Group: 1
  Last Step: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 2 mm
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: R11.6 A67.5 F1.5 mm
  Orientation: Coronal
  Rotation: -22.60 deg
  R >> L: 150 mm
  F >> H: 150 mm
  A >> P: 144 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 33 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 12.0 deg
  Temporal resolution: 4.15648 s
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
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  Time to center: 10.3 s
Inline - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 2
  Offset: 0
  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 30
  StdDev: Off
  Liver registration: Off
  Save original images: Off
Inline - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: Off
Inline - Soft Tissue
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  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Composing Group: 1
  Last Step: Off
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: Off
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 30
  Contrasts: 1
  TR: 4.96 ms
  TE: 1.84 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 470 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\KNEE_FOOT/ANKLE\AX VIBE POST
TA: 3:49 PM: ISO Voxel size: 0.3×0.3×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 85 %
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
  TE: 2.12 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HW1-3
Contrast - Common
  TR: 5.08 ms
  TE: 2.12 ms
  Flip angle: 13.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 176
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 288
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
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  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 57.1 %
  Slices per slab: 112
  FoV read: 145 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 5.08 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L52.9 P43.2 H28.9
  L: 52.9 mm
  P: 43.2 mm
  H: 28.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 29 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 29 mm
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L52.9 P43.2 H28.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 145 mm
  R >> L: 145 mm
  F >> H: 112 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642308 MHz
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Inline - Common
  View sharing: Off
  Flip angle: 13.0 deg
  Measurements: 1
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  Time to center: 98.0 s
Inline - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 13.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 5.08 ms
  TE: 2.12 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\DCE 400 fov 20 measurements
TA: 3:08 PM: ISO Voxel size: 1.6×1.6×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L40.9 P78.3 H83.8 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 0.0 %
  Slices per slab: 56
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  TR: 2.24 ms
  TE: 0.85 ms
  Averages: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1,2;SP5-8
Contrast - Common
  TR: 2.24 ms
  TE: 0.85 ms
  Magn. preparation: None
  Flip angle: 19 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 20
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 64 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  Position: L40.9 P78.3 H83.8 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 56
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  TR: 2.24 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L40.9 P78.3 H83.8 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 84 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 84 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.24 ms
  Segments: 1
Angio - Common
  Flip angle: 19 deg
  Measurements: 20
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  3D centric reordering: Off
  Time to center: 3.7 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 20
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: On
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 980 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\DCE COR 400 FOV 40
TA: 3:37 PM: ISO Voxel size: 1.4×1.4×5.0 mmPAT: 4 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R2.7 A16.0 H28.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 31 %
  Slice oversampling: 30.0 %
  Slices per slab: 40
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6.28 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 6.28 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
  Flip angle: 20.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 26
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 288
  Phase resolution: 100 %
  Slice resolution: 65 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: R2.7 A16.0 H28.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 30.0 %
  Slices per slab: 40
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6.28 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R2.7 A16.0 H28.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: R2.7 A16.0 H28.0
  R: 2.7 mm
  A: 16.0 mm
  H: 28.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 28 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 28 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: R2.7 A16.0 H28.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 400 mm
  F >> H: 400 mm
  A >> P: 200 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 33 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 20.0 deg
  Temporal resolution: 7.85 s
  Measurements: 26
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 15.1 s
Inline - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 2
  Offset: 0
  Subtrahend: 2
  Subtraction indices:
  Subtraction group: 1
  Measurements: 26
  StdDev: Off
  Liver registration: Off
  Save original images: Off
Inline - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: Off
Inline - Soft Tissue
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  Measurements: 26
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
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Inline - MapIt
  Save original images: Off
  MapIt: None
  Flip angle: 20.0 deg
  Measurements: 26
  Contrasts: 2
  TR: 6.28 ms
  TE 1: 2.39 ms
  TE 2: 4.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: Opp/In
  Multi-slice mode: Sequential
  Bandwidth 1: 1090 Hz/Px
  Bandwidth 2: 1090 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\DIFF Ax
TA: 2:14 PM: ISO Voxel size: 1.8×1.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse  | Substep: 1/2
Properties
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  Auto open inline display: On
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 234 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  TE: 73.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;FL;SP2-4
Contrast - Common
  TR: 6300 ms
  TE: 73.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 234 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 128
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 234 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Combine Mode: Sum of Squares
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 234 mm
  R >> L: 234 mm
  F >> H: 143 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642308 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6300 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
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  b-value 3: 2
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  Noise level: 10
Diff - Body
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
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  b-value 3: 2
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  Exponential ADC Maps: On
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  Noise level: 10
Diff - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.79 ms
  Bandwidth: 1860 Hz/Px
Sequence - Part 2
  EPI factor: 128
  RF pulse type: Low SAR
  Gradient mode: Fast
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\DIFF Ax
TA: 2:14 PM: ISO Voxel size: 1.8×1.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 94 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 94 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\Vibe Coro PRE
TA: 2:50 PM: ISO Voxel size: 0.8×0.8×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to graphic segments: On
  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 4.16 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
Contrast - Common
  TR: 4.16 ms
  TE: 1.65 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 86
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 480
  Phase resolution: 100 %
  Slice resolution: 90 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 4.16 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: R >> L
  Initial Position: R11.8 A67.4 F0.4
  R: 11.8 mm
  A: 67.4 mm
  F: 0.4 mm
  Initial Rotation: -22.60 deg
  Initial Orientation: C > T
  C > T: 1.0
  > S: -0.2
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjust Volume
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Rotation: -22.60 deg
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 96 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.642308 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 12.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 84.9 s
Inline - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.16 ms
  TE: 1.65 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\Vibe Coro PRE
TA: 2:50 PM: ISO Voxel size: 0.8×0.8×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 4.16 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
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Geometry - Common
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  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: F >> H
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: F >> H
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 330 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 330 mm
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System - Adjust Volume
  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Rotation: 67.40 deg
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\DCE
TA: 2:23 PM: ISO Voxel size: 1.1×1.1×2.0 mmPAT: 3 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to graphic segments: Off
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: L9.5 P61.7 F29.0 mm
  Orientation: C > S1.2
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 80
  FoV read: 440 mm
  FoV phase: 68.8 %
  Slice thickness: 2.00 mm
  TR: 2.80 ms
  TE: 1.04 ms
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO2;BO2,3;SP2-5
Contrast - Common
  TR: 2.80 ms
  TE: 1.04 ms
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Reconstruction: Magnitude
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 440 mm
  FoV phase: 68.8 %
  Slice thickness: 2.00 mm
  Base resolution: 384
  Phase resolution: 100 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 20 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L9.5 P61.7 F29.0 mm
  Orientation: C > S1.2
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 80
  FoV read: 440 mm
  FoV phase: 68.8 %
  Slice thickness: 2.00 mm
  TR: 2.80 ms
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L9.5 P61.7 F29.0 mm
  Orientation: C > S1.2
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 29 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 29 mm
  MSMA: C - T - S
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Angio - Common
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 20 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 25 deg
  Temporal resolution: 4.21 s
  Measurements: 30
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  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Burn time-to-center: Off
  Temporal interpolation: 1
  Time to center: 10.6 s
Angio - Inline
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  Subtrahend: 1
  Subtraction indices:
  Subtraction group: 1
  Measurements: 30
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: On
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Sequence - Part 1
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Optimization: Min. TE TR
  Bandwidth: 650 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\Vibe Coro Post
TA: 2:50 PM: ISO Voxel size: 0.8×0.8×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to graphic segments: On
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 4.16 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
Contrast - Common
  TR: 4.16 ms
  TE: 1.65 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 86
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  Base resolution: 480
  Phase resolution: 100 %
  Slice resolution: 90 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 4.16 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: R >> L
  Initial Position: R11.8 A67.4 F0.4
  R: 11.8 mm
  A: 67.4 mm
  F: 0.4 mm
  Initial Rotation: -22.60 deg
  Initial Orientation: C > T
  C > T: 1.0
  > S: -0.2
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: R11.8 A67.4 F0.4 mm
  Orientation: C > T1.0 > S-0.2
  Rotation: -22.60 deg
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 96 mm
  Reset: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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\\CLINICAL PROTOCOLS\MSK\TUMOR ADD-ON SEQUENCES\DEVELOPMENT SEQ\Vibe Coro Post
TA: 2:50 PM: ISO Voxel size: 0.8×0.8×1.0 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 0.0 %
  Slices per slab: 96
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 1.0 mm
  TR: 4.16 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3
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Geometry - Common
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  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: F >> H
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Phase enc. dir.: F >> H
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 330 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 330 mm
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System - Adjust Volume
  Position: R11.8 A67.4 F330.4 mm
  Orientation: C > T1.0 > S-0.2
  Rotation: 67.40 deg
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