PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL PROTOCOLS
  BRAIN
    BRN MS
      B5 - BRAIN MS W WO
        AAHScout
        AX DWI
        SAG SPACE FLAIR
        AX SWI
        AX GRE
        SAG T1
        AX T1
        SAG FLAIR
        AX FLAIR
        AX T2_
        SAG T1 SPACE POST FS
        AX T1 FS POST
      OPTIONS
        AX FLAIR
        PD T2 AX
        COR EPI HEMO
        AX T2
        AX T1 POST

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AAHScout
TA: 0:19 PM: ISO Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4.52 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  Phase: 0.0 mm
  Read: 0.0 mm
  Shift: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 8.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.52 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX DWI
TA: 1:41 PM: ISO Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 30 %
  Position: L6.6 P1.6 F21.9 mm
  Orientation: T > C7.5 > S0.2
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6600 ms
  TE: 89.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE1-4
Contrast - Common
  TR: 6600 ms
  TE: 89.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 30 %
  Position: L6.6 P1.6 F21.9 mm
  Orientation: T > C7.5 > S0.2
  Phase enc. dir.: A >> P
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6600 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L6.6 P1.6 F21.9 mm
  Orientation: T > C7.5 > S0.2
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 22 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 22 mm
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  AutoAlign: Head > Brain
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L6.6 P1.6 F21.9 mm
  Orientation: T > C7.5 > S0.2
  Rotation: 0.00 deg
  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 155 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6600 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Bipolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Bipolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.98 ms
  Bandwidth: 1132 Hz/Px
Sequence - Part 2
  EPI factor: 192
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\SAG SPACE FLAIR
TA: 5:27 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcir
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Basis
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 160
  FoV read: 260 mm
  FoV phase: 87.5 %
  Slice thickness: 1.00 mm
  TR: 5000 ms
  TE: 333 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 5000 ms
  TE: 333 ms
  MTC: Off
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 260 mm
  FoV phase: 87.5 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 97 %
  Slice resolution: 80 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 160
  FoV read: 260 mm
  FoV phase: 87.5 %
  Slice thickness: 1.00 mm
  TR: 5000 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Basis
  Position: Isocenter
  Orientation: Sagittal
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: Head > Basis
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 5000 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 260 mm
  FoV phase: 87.5 %
  Phase resolution: 97 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.58 ms
  Bandwidth: 592 Hz/Px
Sequence - Part 2
  Echo train duration: 763 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T2 var
  Turbo factor: 242
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX SWI
TA: 4:19 PM: REF Voxel size: 0.9×0.9×2.0 mmPAT: 2 Rel. SNR: 1.00  : swi_r
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 72
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 49.0 ms
  TE: 40.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 49.0 ms
  TE: 40.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  Base resolution: 256
  Phase resolution: 80 %
  Slice resolution: 69 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 72
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 49.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slabs: 1
  Slices per slab: 72
  Slice thickness: 2.00 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 90.6 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 209 mm
  A >> P: 230 mm
  F >> H: 144 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 49.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 90.6 %
  Phase resolution: 80 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 49.0 ms
  TE: 40.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 80 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slab-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX GRE
TA: 2:39 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: Off Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 730.0 ms
  TE: 22.50 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 730.0 ms
  TE: 22.50 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 730.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 730.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
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  FoV phase: 100.0 %
  Phase resolution: 85 %
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 25 deg
  Measurements: 1
  Contrasts: 1
  TR: 730.0 ms
  TE: 22.50 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 100 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\SAG T1
TA: 1:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 37 %
  Slice oversampling: 33.3 %
  Slices per slab: 72
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  TR: 600 ms
  TE: 17.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 600 ms
  TE: 17.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 94 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 72
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  TR: 600 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 40 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 40 mm
  MSMA: S - C - T
  Sagittal: R >> L
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  Matrix Optimization: Performance
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 600 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 240 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.34 ms
  Bandwidth: 751 Hz/Px
Sequence - Part 2
  Echo train duration: 164 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 44
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX T1
TA: 2:14 PM: ISO Voxel size: 0.5×0.5×3.3 mmPAT: 4 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 37 %
  Slice oversampling: 33.3 %
  Slices per slab: 48
  FoV read: 240 mm
  FoV phase: 85.9 %
  Slice thickness: 3.30 mm
  TR: 600 ms
  TE: 25 ms
  Averages: 2.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 600 ms
  TE: 25 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 2.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 240 mm
  FoV phase: 85.9 %
  Slice thickness: 3.30 mm
  Base resolution: 256
  Phase resolution: 80 %
  Slice resolution: 94 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 48
  FoV read: 240 mm
  FoV phase: 85.9 %
  Slice thickness: 3.30 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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Physio - Cardiac
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  FoV phase: 85.9 %
  Phase resolution: 80 %
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.2 ms
  Bandwidth: 751 Hz/Px
Sequence - Part 2
  Echo train duration: 154 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: T1 var
  Turbo factor: 43
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\SAG FLAIR
TA: 2:10 PM: REF Voxel size: 1.0×1.0×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A13.5 F17.0 mm
  Orientation: S > T1.7 > C1.4
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 250 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 8000.0 ms
  TE: 87.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 8000.0 ms
  TE: 87.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2370 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 38
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A13.5 F17.0 mm
  Orientation: S > T1.7 > C1.4
  Phase enc. dir.: A >> P
  FoV read: 250 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 8000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A13.5 F17.0 mm
  Orientation: S > T1.7 > C1.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
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  FoV read: 250 mm
  FoV phase: 96.9 %
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.2 A13.5 F17.0 mm
  Orientation: S > T1.7 > C1.4
  Rotation: -4.52 deg
  A >> P: 243 mm
  F >> H: 250 mm
  R >> L: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2370 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 250 mm
  FoV phase: 96.9 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.62 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 7
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX FLAIR
TA: 3:38 PM: REF Voxel size: 0.9×0.9×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 50
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  TR: 9000.0 ms
  TE: 88 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 88 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 50
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  TR: 9000.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 50
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 230 mm
  FoV phase: 87.5 %
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 202 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 87.5 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 11 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 11
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX T2_
TA: 1:54 PM: ISO Voxel size: 0.6×0.6×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  TE: 82 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4500.0 ms
  TE: 82 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
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  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
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System - Adjust Volume
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  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 12
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\SAG T1 SPACE POST FS
TA: 6:36 PM: ISO Voxel size: 0.6×0.6×1.0 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 43 %
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  TR: 700 ms
  TE: 18.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 700 ms
  TE: 18.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  Base resolution: 192
  Phase resolution: 129 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  TR: 700 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 215 mm
  A >> P: 256 mm
  R >> L: 176 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 700 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 215 mm
  FoV phase: 118.8 %
  Phase resolution: 129 %
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.52 ms
  Bandwidth: 704 Hz/Px
Sequence - Part 2
  Echo train duration: 162 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 41
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\B5 - BRAIN MS W WO\AX T1 FS POST
TA: 1:37 PM: FIX Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 355.0 ms
  TE: 3.25 ms
  Averages: 2
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 355.0 ms
  TE: 3.25 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 355.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
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  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 150 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 355.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 90 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 355.0 ms
  TE: 3.25 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 280 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\OPTIONS\AX FLAIR
TA: 3:42 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 50
  Dist. factor: 0 %
  Position: R0.4 A2.7 H0.1 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 10000.0 ms
  TE: 96.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 10000.0 ms
  TE: 96.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2600 ms
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 50
  Dist. factor: 0 %
  Position: R0.4 A2.7 H0.1 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 10000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: R0.4 A2.7 H0.1 mm
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F
  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 50
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 230 mm
  FoV phase: 75.0 %
System - Miscellaneous
  Positioning mode: ISO
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  Coil Combine Mode: Adaptive Combine
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System - Adjust Volume
  Position: R0.4 A2.7 H0.1 mm
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 173 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 10000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2600 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 75.0 %
  Phase resolution: 100 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.58 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 10
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 20
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\OPTIONS\PD T2 AX
TA: 3:34 PM: ISO Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 27
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  TE 1: 11 ms
  TE 2: 95 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4000.0 ms
  TE 1: 11 ms
  TE 2: 95 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 27
  Dist. factor: 25 %
  Position: Isocenter
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  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
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  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 27
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
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  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 2
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.5 ms
  Bandwidth: 163 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 26
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 5
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\OPTIONS\COR EPI HEMO
TA: 1:05 PM: ISO Voxel size: 0.6×0.6×5.0 mmRel. SNR: 1.00  : epse
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2500 ms
  TE: 32.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 2500 ms
  TE: 32.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Fat sat.
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 98 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
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  Slice thickness: 5.0 mm
  TR: 2500 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 56 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 56 mm
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 230 mm
  F >> H: 230 mm
  A >> P: 179 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2500 ms
  Concatenations: 1
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 1.18 ms
  Bandwidth: 1002 Hz/Px
Sequence - Part 2
  EPI factor: 17
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\OPTIONS\AX T2
TA: 3:06 PM: FIX Voxel size: 0.5×0.5×5.0 mmPAT: Off Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  TE: 89.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4500.0 ms
  TE: 89.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  Base resolution: 448
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 90.6 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV phase: 90.6 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.92 ms
  Bandwidth: 192 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 20
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN MS\OPTIONS\AX T1 POST
TA: 2:48 PM: ISO Voxel size: 0.7×0.7×5.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 550.0 ms
  TE: 10 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 550.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  B1 filter: Off
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Geometry - Common
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  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Navigator
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Geometry - Tim CT
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  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 230 mm
  A >> P: 230 mm
  F >> H: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV phase: 100.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 75
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s
