PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL PROTOCOLS
  BRAIN
    BRN TUMOR
      B3 - BRN TUMOR- MASS/TUMOR/ METS LESION
        AAHScout
        SAG MPRAGE
        AX DWI 12 DIR DTI
        AX FLAIR
        AX SWI
        AX T1 FS PRE
        AX DCE RADIAL 2 Degree
        AX DCE RADIAL 9 Degree
        AX DCE RADIAL 15 Degree
        DYN RADIAL DCE 
        AX T2_
        AX PERFUSION
        SAG T1 SPACE POST FS
        AX T1 FS POST
      NRG-CC001 STUDY
        AAHScout
        AX DWI
        AX FLAIR
        AX GRE
        SAG T1 SPC
        AX MPRAGE PRE
        AX DCE RADIAL 2 Degree
        AX DCE RADIAL 9 Degree
        AX DCE RADIAL 15 Degree
        DYN RADIAL DCE 
        AX T2_
        AX T1 FS POST
        AX PERFUSION
        AX MPRAGE POST
      MOTION
        localizer
        AX DWI
        AX EPI HEMO
        AX FLAIR BLADE
        SAG T1 BLADE
        AX T1 BLADE
        COR EPI HEMO
        AX T1 BLADE +-C
        AX T2 BLADE
        AX PERFUSION
        SAG T1 BLADE +-C
        COR T1 BLADE +-C

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AAHScout
TA: 0:19 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4.52 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  Phase: 0.0 mm
  Read: 0.0 mm
  Shift: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 8.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.52 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\SAG MPRAGE
TA: 4:57 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
Properties
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  Load images to stamp segments: Off
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 25.0 %
  Slices per slab: 192
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 2200.0 ms
  TE: 2.67 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 2200.0 ms
  TE: 2.67 ms
  Magn. preparation: Non-sel. IR
  TI: 900 ms
  Flip angle: 8 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 96 %
  Slice resolution: 90 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  ! Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 2
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 192
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 2200.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  Initial Orientation: Sagittal
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2200.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 900 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 96 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
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  TR: 2200.0 ms
  TE: 2.67 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 7.9 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Non-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 216
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX DWI 12 DIR DTI
TA: 4:22 PM: REF Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 6400 ms
  TE: 80.0 ms
  Concatenations: 1
  Filter: Raw filter
  Coil elements: HE1-4
Contrast - Common
  TR: 6400 ms
  TE: 80.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: Off
  Prescan Normalize: Off
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 6400 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 189 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6400 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: MDDW
  Diff. directions: 12
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: On
  Trace weighted images: On
  ADC maps: On
  Mosaic: On
  Noise level: 40
Diff - Body
  Diffusion mode: MDDW
  Diff. directions: 12
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: On
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.77 ms
  Bandwidth: 1628 Hz/Px
Sequence - Part 2
  EPI factor: 115
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX FLAIR
TA: 3:02 PM: REF Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 56 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  TE: 91.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 91.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 42
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 3.5 mm
  Dist. factor: 25 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 230 mm
  A >> P: 230 mm
  F >> H: 140 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.12 ms
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX SWI
TA: 3:59 PM: REF Voxel size: 0.9×0.9×2.5 mmPAT: 2 Rel. SNR: 1.00  : swi_r
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 64
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 2.50 mm
  TR: 49.0 ms
  TE: 40.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 49.0 ms
  TE: 40.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 2.50 mm
  Base resolution: 256
  Phase resolution: 79 %
  Slice resolution: 75 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
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  Slice oversampling: 0.0 %
  Slices per slab: 64
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 2.50 mm
  TR: 49.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slabs: 1
  Slices per slab: 64
  Slice thickness: 2.50 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 87.5 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
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  R >> L: 202 mm
  A >> P: 230 mm
  F >> H: 160 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 49.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 87.5 %
  Phase resolution: 79 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 49.0 ms
  TE: 40.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 80 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slab-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX T1 FS PRE
TA: 1:39 PM: REF Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 20 %
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  TR: 350.0 ms
  TE: 3.18 ms
  Averages: 2
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 350.0 ms
  TE: 3.18 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
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  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  TR: 350.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
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  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 96.9 %
  Segments: 1
System - Miscellaneous
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
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  R >> L: 223 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 350.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 96.9 %
  Phase resolution: 80 %
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 350.0 ms
  TE: 3.18 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX DCE RADIAL 2 Degree
TA: 0:51 PM: REF Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 23.1 %
  Slices per slab: 52
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.68 ms
  TE: 1.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: BO2,3;BO1;SP3-5
Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 2.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 224
  Radial views: 300
  Slice resolution: 59 %
  Slice partial Fourier: Off
  Trajectory: Radial
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 23.1 %
  Slices per slab: 52
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.68 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L1.4 P19.6 F190.2
  Phase: 19.6 mm
  Read: -1.4 mm
  Shift: -190.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 190 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 190 mm
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 156 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  Flip angle: 2.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 25.3 s
Inline - Inline
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 2.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.68 ms
  TE: 1.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Simulated motion: Off
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Special
  Radial view sharing: Off
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX DCE RADIAL 9 Degree
TA: 0:51 PM: FIX Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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System - Miscellaneous
  Positioning mode: FIX
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Inline - Common
  Flip angle: 9.0 deg
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX DCE RADIAL 15 Degree
TA: 0:53 PM: FIX Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 15.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Inline - Common
  Flip angle: 15.0 deg
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  Time to center: 26.4 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15.0 deg
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\DYN RADIAL DCE
TA: 2:21 PM: FIX Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 224
  Radial views: 800
  Slice resolution: 59 %
  Slice partial Fourier: Off
  Trajectory: Radial
  Interpolation: Off
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Inline - Common
  Flip angle: 12.0 deg
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  Time to center: 70.3 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12.0 deg
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Sequence - Special
  Radial view sharing: Golden angle
  Temporal resolution: 34
  # Subframe intervals: 1
  Subframe interval: 1
  Start 1: 0.0 s
  Duration 1: 125.5 s
  Temporal spacing 1: 6.0 s
  Outer angular coverage: 131.1 %
  Inner radius: 23.6 %
  Adapt temp. resolution: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX T2_
TA: 2:41 PM: FIX Voxel size: 0.3×0.3×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 45 %
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  TR: 3800.0 ms
  TE: 89.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 3800.0 ms
  TE: 89.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  Base resolution: 320
  Phase resolution: 88 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  Phase: 0.0 mm
  Read: 0.0 mm
  Shift: 0.0 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 3.5 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 193 mm
  A >> P: 220 mm
  F >> H: 140 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 87.5 %
  Phase resolution: 88 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.9 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 10
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 18
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX PERFUSION
TA: 1:36 PM: REF Voxel size: 1.7×1.7×5.0 mmPAT: 2 Rel. SNR: 1.00  : epfid
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1820 ms
  TE: 40.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 1820 ms
  TE: 40.0 ms
  MTC: Off
  Flip angle: 90 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 50
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 128
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: Off
  Prescan Normalize: On
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1820 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
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  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Water excit. normal
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 26 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 26 mm
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  Coil Combine Mode: Sum of Squares
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System - Adjust Volume
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Rotation: 0.00 deg
  A >> P: 214 mm
  R >> L: 220 mm
  F >> H: 143 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.400
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1820 ms
  Concatenations: 1
Perf
  GBP: On
  PBP: Off
  TTP: On
  relCBV: Off
  relCBF: Off
  relMTT: Off
  relCBVCorr: Off
  Measurements: 50
  Motion correction: Off
  Spatial filter: Off
Sequence - Part 1
  Introduction: Off
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.77 ms
  Bandwidth: 1502 Hz/Px
Sequence - Part 2
  EPI factor: 124
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\SAG T1 SPACE POST FS
TA: 6:36 PM: REF Voxel size: 0.6×0.6×1.0 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 43 %
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  TR: 700 ms
  TE: 18.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 700 ms
  TE: 18.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  Base resolution: 192
  Phase resolution: 129 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  TR: 700 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Sagittal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 215 mm
  A >> P: 256 mm
  R >> L: 176 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 700 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 215 mm
  FoV phase: 118.8 %
  Phase resolution: 129 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.52 ms
  Bandwidth: 704 Hz/Px
Sequence - Part 2
  Echo train duration: 162 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 41
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\B3 - BRN TUMOR- MASS/TUMOR/ METS LESION\AX T1 FS POST
TA: 1:39 PM: FIX Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 20 %
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  TR: 350.0 ms
  TE: 3.18 ms
  Averages: 2
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 350.0 ms
  TE: 3.18 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  TR: 350.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 96.9 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
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  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 223 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 350.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 96.9 %
  Phase resolution: 80 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 350.0 ms
  TE: 3.18 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AAHScout
TA: 0:19 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
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  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4.52 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 8.2 s
Inline - Inline
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.52 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX DWI
TA: 1:50 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4700 ms
  TE: 95.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE1-4
Contrast - Common
  TR: 4700 ms
  TE: 95.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 140
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4700 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4700 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Bipolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 2
  b-value 2: 2
  b-value 3: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Bipolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 2
  b-value 2: 2
  b-value 3: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: On
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Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.77 ms
  Bandwidth: 1488 Hz/Px
Sequence - Part 2
  EPI factor: 126
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX FLAIR
TA: 1:30 PM: FIX Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 36
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 17 %
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  TE: 97.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Prescan Normalize, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 97.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  Base resolution: 192
  Phase resolution: 92 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 36
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 36
  Slice thickness: 4.0 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 179 mm
  A >> P: 220 mm
  F >> H: 186 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 81.3 %
  Phase resolution: 92 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.68 ms
  Bandwidth: 334 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 4
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 24
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX GRE
TA: 1:46 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
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Routine
  Slice group: 1
  Slices: 27
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 790.0 ms
  TE: 25.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 790.0 ms
  TE: 25.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 27
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 790.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 27
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
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  Sagittal: R >> L
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 790.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 790.0 ms
  TE: 25.00 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\SAG T1 SPC
TA: 1:33 PM: ISO Voxel size: 0.6×0.6×3.2 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: L2.7 A4.1 F10.8 mm
  Orientation: S > T-1.4 > C-1.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 20.0 %
  Slices per slab: 60
  FoV read: 220 mm
  FoV phase: 111.5 %
  Slice thickness: 3.20 mm
  TR: 700 ms
  TE: 13.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 700 ms
  TE: 13.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 111.5 %
  Slice thickness: 3.20 mm
  Base resolution: 192
  Phase resolution: 110 %
  Slice resolution: 89 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L2.7 A4.1 F10.8 mm
  Orientation: S > T-1.4 > C-1.0
  Phase enc. dir.: A >> P
  Slice oversampling: 20.0 %
  Slices per slab: 60
  FoV read: 220 mm
  FoV phase: 111.5 %
  Slice thickness: 3.20 mm
  TR: 700 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L2.7 A4.1 F10.8 mm
  Orientation: S > T-1.4 > C-1.0
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 11 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 11 mm
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  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L2.7 A4.1 F10.8 mm
  Orientation: S > T-1.4 > C-1.0
  Rotation: 90.50 deg
  F >> H: 220 mm
  A >> P: 246 mm
  R >> L: 192 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 700 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 220 mm
  FoV phase: 111.5 %
  Phase resolution: 110 %
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Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.16 ms
  Bandwidth: 789 Hz/Px
Sequence - Part 2
  Echo train duration: 152 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 44
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX MPRAGE PRE
TA: 4:35 PM: REF Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
Properties
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  Load images to stamp segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 27.3 %
  Slices per slab: 176
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1970.0 ms
  TE: 3 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 1970.0 ms
  TE: 3 ms
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Flip angle: 12 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 90 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 27.3 %
  Slices per slab: 176
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1970.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1970.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 256 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12 deg
  Measurements: 1
  TR: 1970.0 ms
  TE: 3 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 8.6 ms
  Bandwidth: 160 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
  Turbo factor: 202
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX DCE RADIAL 2 Degree
TA: 0:51 PM: ISO Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 23.1 %
  Slices per slab: 52
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.68 ms
  TE: 1.77 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO2,3;BO1;SP3-5
Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 2.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 224
  Radial views: 300
  Slice resolution: 59 %
  Slice partial Fourier: Off
  Trajectory: Radial
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 23.1 %
  Slices per slab: 52
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.68 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L1.4 P19.6 F190.2
  Phase: 19.6 mm
  Read: -1.4 mm
  Shift: -190.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 190 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 190 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.4 P19.6 F190.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 156 mm
  Reset: Off
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Inline - Common
  Flip angle: 2.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 25.3 s
Inline - Inline
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 2.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.68 ms
  TE: 1.77 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Simulated motion: Off
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Special
  Radial view sharing: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX DCE RADIAL 9 Degree
TA: 0:51 PM: ISO Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Inline - Common
  Flip angle: 9.0 deg
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX DCE RADIAL 15 Degree
TA: 0:53 PM: ISO Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 15.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Inline - Common
  Flip angle: 15.0 deg
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  Time to center: 26.4 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15.0 deg
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\DYN RADIAL DCE
TA: 2:21 PM: ISO Voxel size: 1.0×1.0×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Contrast - Common
  TR: 3.68 ms
  TE: 1.77 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 38
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 224
  Radial views: 800
  Slice resolution: 59 %
  Slice partial Fourier: Off
  Trajectory: Radial
  Interpolation: Off
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Inline - Common
  Flip angle: 12.0 deg
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  Time to center: 70.3 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12.0 deg
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Sequence - Special
  Radial view sharing: Golden angle
  Temporal resolution: 34
  # Subframe intervals: 1
  Subframe interval: 1
  Start 1: 0.0 s
  Duration 1: 125.5 s
  Temporal spacing 1: 6.0 s
  Outer angular coverage: 131.1 %
  Inner radius: 23.6 %
  Adapt temp. resolution: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX T2_
TA: 1:54 PM: ISO Voxel size: 0.6×0.6×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  TE: 82 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4500.0 ms
  TE: 82 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  Phase: 0.0 mm
  Read: 0.0 mm
  Shift: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
  Trajectory: Cartesian
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 12
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX T1 FS POST
TA: 1:39 PM: FIX Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 20 %
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  TR: 350.0 ms
  TE: 3.18 ms
  Averages: 2
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 350.0 ms
  TE: 3.18 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
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  FoV read: 230 mm
  FoV phase: 96.9 %
  Slice thickness: 3.5 mm
  TR: 350.0 ms
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Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 96.9 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
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  R >> L: 223 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 350.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 96.9 %
  Phase resolution: 80 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 350.0 ms
  TE: 3.18 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX PERFUSION
TA: 1:36 PM: ISO Voxel size: 1.7×1.7×5.0 mmPAT: 2 Rel. SNR: 1.00  : epfid
Properties
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  Load images to stamp segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1820 ms
  TE: 40.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 1820 ms
  TE: 40.0 ms
  MTC: Off
  Flip angle: 90 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 50
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 128
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1820 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Water excit. normal
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 26 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 26 mm
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Rotation: 0.00 deg
  A >> P: 214 mm
  R >> L: 220 mm
  F >> H: 143 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.400
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1820 ms
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.77 ms
  Bandwidth: 1502 Hz/Px
Sequence - Part 2
  EPI factor: 124
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\NRG-CC001 STUDY\AX MPRAGE POST
TA: 4:35 PM: FIX Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 27.3 %
  Slices per slab: 176
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1970.0 ms
  TE: 3 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 1970.0 ms
  TE: 3 ms
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Flip angle: 12 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 90 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 27.3 %
  Slices per slab: 176
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1970.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: FIX
  Table position: H
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1970.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 256 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - Common
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12 deg
  Measurements: 1
  TR: 1970.0 ms
  TE: 3 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 8.6 ms
  Bandwidth: 160 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
  Turbo factor: 202
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\localizer
TA: 9.6 s PM: REF Voxel size: 0.5×0.5×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  TE: 2.95 ms
  Averages: 2
  Concatenations: 3
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 7.0 ms
  TE: 2.95 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
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  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 1
  Slice thickness: 8.0 mm
  Dist. factor: 20 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  Coil Select Mode: Off - AutoCoilSelect
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System - Tx/Rx
  Frequency 1H: 63.643339 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 260 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 2.95 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX DWI
TA: 1:36 PM: REF Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
  Prio recon: Off
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  TE: 89.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE1-4
Contrast - Common
  TR: 6300 ms
  TE: 89.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 20
  Dist. factor: 30 %
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 129 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6300 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
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  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
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Diff - Body
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  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
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Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.98 ms
  Bandwidth: 1132 Hz/Px
Sequence - Part 2
  EPI factor: 192
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX EPI HEMO
TA: 1:05 PM: ISO Voxel size: 0.6×0.6×5.0 mmRel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 226 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2500 ms
  TE: 32.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2500 ms
  TE: 32.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Fat sat.
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 226 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 98 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 226 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2500 ms
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Geometry - AutoAlign
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  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 226 mm
  A >> P: 226 mm
  F >> H: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2500 ms
  Concatenations: 1
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 1.23 ms
  Bandwidth: 1002 Hz/Px
Sequence - Part 2
  EPI factor: 17
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX FLAIR BLADE
TA: 3:46 PM: REF Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 8000.0 ms
  TE: 98 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 8000.0 ms
  TE: 98 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2370 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 108.3 %
  Trajectory: BLADE
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 8000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2370 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  BLADE coverage: 108.3 %
  Trajectory: BLADE
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.44 ms
  Bandwidth: 362 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 13
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: On
  Red. EC sensitivity: Off
  Turbo factor: 35
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\SAG T1 BLADE
TA: 5:32 PM: REF Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
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Routine
  Slice group: 1
  Slices: 23
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: Head > Basis
  Phase oversampling: 100.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  TE: 44 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2000.0 ms
  TE: 44 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 860 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 100.0 %
  Trajectory: BLADE
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 23
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  TR: 2000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Basis
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 70 mm
  Position: L0.0 P0.0 F138.9 mm
  Orientation: Transversal
  Shape: Standard
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 23
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System - Miscellaneous
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  AutoAlign: Head > Basis
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 860 ms
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  BLADE coverage: 100.0 %
  Trajectory: BLADE
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 54
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 15
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX T1 BLADE
TA: 4:45 PM: FIX Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2200.0 ms
  TE: 54 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2200.0 ms
  TE: 54 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 190.9 %
  Trajectory: BLADE
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  TR: 2200.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
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System - Miscellaneous
  Positioning mode: FIX
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2200.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
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  BLADE coverage: 190.9 %
  Trajectory: BLADE
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 42
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\COR EPI HEMO
TA: 1:05 PM: ISO Voxel size: 0.6×0.6×5.0 mmRel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2500 ms
  TE: 32.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 2500 ms
  TE: 32.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Fat sat.
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 98 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
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  TR: 2500 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 56 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 56 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.1 P9.8 H56.3 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 230 mm
  F >> H: 230 mm
  A >> P: 179 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2500 ms
  Concatenations: 1
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 1.18 ms
  Bandwidth: 1002 Hz/Px
Sequence - Part 2
  EPI factor: 17
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX T1 BLADE +-C
TA: 4:45 PM: FIX Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2200.0 ms
  TE: 54 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2200.0 ms
  TE: 54 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 190.9 %
  Trajectory: BLADE
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
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  TR: 2200.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
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System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2200.0 ms
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.44 ms
  Bandwidth: 362 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 42
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX T2 BLADE
TA: 2:10 PM: FIX Voxel size: 0.7×0.7×5.0 mmPAT: Off Rel. SNR: 1.00  : tseB
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  TE: 99 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4000.0 ms
  TE: 99 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  BLADE coverage: 100.0 %
  Trajectory: BLADE
  Interpolation: Off
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Geometry - Common
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  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  BLADE coverage: 100.0 %
  Trajectory: BLADE
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.5 ms
  Bandwidth: 363 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: On
  Red. EC sensitivity: Off
  Turbo factor: 35
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\AX PERFUSION
TA: 1:36 PM: REF Voxel size: 1.7×1.7×5.0 mmPAT: 2 Rel. SNR: 1.00  : epfid
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1820 ms
  TE: 40.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 1820 ms
  TE: 40.0 ms
  MTC: Off
  Flip angle: 90 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 50
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 128
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1820 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Water excit. normal
  Special sat.: None
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  Coil Combine Mode: Sum of Squares
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Rotation: 0.00 deg
  A >> P: 214 mm
  R >> L: 220 mm
  F >> H: 143 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.400
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1820 ms
  Concatenations: 1
Perf
  GBP: On
  PBP: On
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  Motion correction: On
  Spatial filter: Off
Sequence - Part 1
  Introduction: Off
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.77 ms
  Bandwidth: 1502 Hz/Px
Sequence - Part 2
  EPI factor: 124
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\SAG T1 BLADE +-C
TA: 5:32 PM: FIX Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 23
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: Head > Basis
  Phase oversampling: 100.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  TE: 44 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2000.0 ms
  TE: 44 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 860 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 100.0 %
  Trajectory: BLADE
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 23
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Basis
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 70 mm
  Position: L0.0 P0.0 F138.9 mm
  Orientation: Transversal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 23
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System - Miscellaneous
  Positioning mode: FIX
  Table position: F
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Basis
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 860 ms
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.44 ms
  Bandwidth: 362 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 54
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 15
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
SIEMENS MAGNETOM Aera
\\CLINICAL PROTOCOLS\BRAIN\BRN TUMOR\MOTION\COR T1 BLADE +-C
TA: 4:45 PM: FIX Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2200.0 ms
  TE: 54 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2200.0 ms
  TE: 54 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 190.9 %
  Trajectory: BLADE
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  TR: 2200.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2200.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
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  BLADE coverage: 190.9 %
  Trajectory: BLADE
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 42
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
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