PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    ANKLE
      ANKLE WO
        localizer_tra
        localizer_sag+cor+tra
        AX T1
        AX T2 FS
        SAG STIR
        SAG T1
        COR T1
        COR PD FS
        COR DESS
        AX-O PD FS

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
Contrast - Common
  TR: 6.9 ms
  TE: 2.99 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651811 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.9 ms
  TE: 2.99 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 11
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 11
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P18.0 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 11
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\AX T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 0 %
  Position: L0.3 P4.1 F20.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 531.0 ms
  TE: 8.8 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 531.0 ms
  TE: 8.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 0 %
  Position: L0.3 P4.1 F20.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 531.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.3 P4.1 F20.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel H
  Gap: 11 mm
  Thickness: 50 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 21 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 150 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 21 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.3 P4.1 F20.6 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 150 mm
  R >> L: 150 mm
  F >> H: 140 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 531.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.84 ms
  Bandwidth: 256 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 86
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\AX T2 FS
TA: 4:04 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 0 %
  Position: L0.3 P4.1 F20.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 5500.0 ms
  TE: 66.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter, Image Filter
  Coil elements: FA;TO
Contrast - Common
  TR: 5500.0 ms
  TE: 66.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
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  TR: 5500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Foot/Ankle
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 21
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\SAG STIR
TA: 2:58 PM: ISO Voxel size: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 3600.0 ms
  TE: 44.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3600.0 ms
  TE: 44.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 20
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 3600.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 20
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Rotation: 0.00 deg
  A >> P: 160 mm
  F >> H: 160 mm
  R >> L: 110 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3600.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 24
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 11
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\SAG T1
TA: 3:19 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 575.0 ms
  TE: 8.8 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 575.0 ms
  TE: 8.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
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  Slice thickness: 4.0 mm
  TR: 575.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P0.0 H75.0 mm
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 160 mm
  FoV phase: 100.0 %
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 575.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.84 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 171
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\COR T1
TA: 3:58 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: L1.5 P8.7 F1.5 mm
  Orientation: C > S-8.0 > T-3.7
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 90 %
  FoV read: 140 mm
  FoV phase: 118.8 %
  Slice thickness: 4.0 mm
  TR: 650.0 ms
  TE: 9.3 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 650.0 ms
  TE: 9.3 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 140 mm
  FoV phase: 118.8 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: L1.5 P8.7 F1.5 mm
  Orientation: C > S-8.0 > T-3.7
  Phase enc. dir.: F >> H
  FoV read: 140 mm
  FoV phase: 118.8 %
  Slice thickness: 4.0 mm
  TR: 650.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.5 P8.7 F1.5 mm
  Orientation: C > S-8.0 > T-3.7
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 140 mm
  FoV phase: 118.8 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 140 mm
  FoV phase: 118.8 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.26 ms
  Bandwidth: 170 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 181
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\COR PD FS
TA: 4:02 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 0 %
  Position: L1.5 P8.7 F1.5 mm
  Orientation: C > S-8.0 > T-3.7
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 140 mm
  FoV phase: 118.8 %
  Slice thickness: 4.0 mm
  TR: 2000.0 ms
  TE: 25.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter, Image Filter
  Coil elements: FA;TO
Contrast - Common
  TR: 2000.0 ms
  TE: 25.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
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  TR: 2000.0 ms
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Foot/Ankle
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: L1.5 P8.7 F1.5 mm
  Orientation: C > S-8.0 > T-3.7
  Rotation: 180.00 deg
  R >> L: 140 mm
  F >> H: 167 mm
  A >> P: 132 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 29
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\COR DESS
TA: 5:05 PM: ISO Voxel size: 0.6×0.6×0.6 mmPAT: 2 Rel. SNR: 1.00  : de_rr
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  Slice oversampling: 15.4 %
  Slices per slab: 104
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 0.60 mm
  TR: 19.50 ms
  TE: 7.10 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP5-7
Contrast - Common
  TR: 19.50 ms
  TE: 7.10 ms
  Flip angle: 25 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 0.60 mm
  Base resolution: 256
  Phase resolution: 91 %
  Slice resolution: 83 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 15.4 %
  Slices per slab: 104
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 0.60 mm
  TR: 19.50 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: -40.10 deg
  R >> L: 160 mm
  F >> H: 160 mm
  A >> P: 63 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651811 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Off
  Flow comp.: Read
  Multi-slice mode: Sequential
  Bandwidth: 195 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ANKLE\ANKLE WO\AX-O PD FS
TA: 4:26 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 22
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 130 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  TE: 28 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: FL
Contrast - Common
  TR: 4000.0 ms
  TE: 28 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 130 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 22
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 130 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: SPAIR
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 22
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 130 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 130 mm
  R >> L: 130 mm
  F >> H: 88 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 130 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 13.8 ms
  Bandwidth: 105 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 32
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 6
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
