PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    BRN PITUITARY_NEW
      B11 - BRN PITUITARY_NEW
        AAHScout
        AX DWI
        AX T2
        SAG T1 SPC PRE
        COR T2 SELLA (SPC)
        t1 vibe cor dyn
        SAG T1 SPC POST FS
        AX T1 FS POST
        COR T2 SELLA_OPT

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\AAHScout
TA: 0:19 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4.52 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 8.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.52 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\AX DWI
TA: 1:42 PM: REF Voxel size: 0.8×0.8×4.0 mmPAT: 2 Rel. SNR: 1.00  : epse
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 6000 ms
  TE: 85.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 6000 ms
  TE: 85.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 144
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 60
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 6000 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 174 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6000 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.78 ms
  Bandwidth: 1446 Hz/Px
Sequence - Part 2
  EPI factor: 144
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\AX T2
TA: 2:32 PM: FIX Voxel size: 0.3×0.3×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 93.8 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  TE: 99.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4000.0 ms
  TE: 99.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 93.8 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
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  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 93.8 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Phase enc. dir.: R >> L
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 93.8 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
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  Save uncombined: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 207 mm
  A >> P: 220 mm
  F >> H: 174 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 93.8 %
  Phase resolution: 100 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.9 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 17
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\SAG T1 SPC PRE
TA: 6:44 PM: ISO Voxel size: 0.5×0.5×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 60 %
  Slice oversampling: 60.0 %
  Slices per slab: 60
  FoV read: 130 mm
  FoV phase: 121.9 %
  Slice thickness: 1.00 mm
  TR: 625 ms
  TE: 29 ms
  Averages: 1.7
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE3,4;NE1,2
Contrast - Common
  TR: 625 ms
  TE: 29 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.7
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 130 mm
  FoV phase: 121.9 %
  Slice thickness: 1.00 mm
  Base resolution: 128
  Phase resolution: 135 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 60.0 %
  Slices per slab: 60
  FoV read: 130 mm
  FoV phase: 121.9 %
  Slice thickness: 1.00 mm
  TR: 625 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: L0.5 A10.4 F26.0
  L: 0.5 mm
  A: 10.4 mm
  F: 26.0 mm
  Initial Rotation: -8.22 deg
  Initial Orientation: Sagittal
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 26 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 26 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Rotation: 81.78 deg
  F >> H: 130 mm
  A >> P: 159 mm
  R >> L: 60 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 2.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 625 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 130 mm
  FoV phase: 121.9 %
  Phase resolution: 135 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.5 ms
  Bandwidth: 449 Hz/Px
Sequence - Part 2
  Echo train duration: 203 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: T1 var
  Turbo factor: 40
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\COR T2 SELLA (SPC)
TA: 4:41 PM: REF Voxel size: 0.4×0.4×1.5 mmPAT: 2 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 80.0 %
  Slices per slab: 40
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 1.50 mm
  TR: 3300 ms
  TE: 371 ms
  Averages: 2.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3300 ms
  TE: 371 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 2.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 1.50 mm
  Base resolution: 192
  Phase resolution: 110 %
  Slice resolution: 86 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 60
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 80.0 %
  Slices per slab: 40
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 1.50 mm
  TR: 3300 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 150 mm
  F >> H: 150 mm
  A >> P: 60 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 3300 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 100.0 %
  Phase resolution: 110 %
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.86 ms
  Bandwidth: 651 Hz/Px
Sequence - Part 2
  Echo train duration: 880 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: T2 var
  Turbo factor: 266
Sequence - Assistant
  Allowed delay: 25 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\t1 vibe cor dyn
TA: 3:05 PM: REF Voxel size: 0.5×0.5×2.0 mmPAT: Off Rel. SNR: 1.00  : fldyn
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R0.5 A9.4 F0.1 mm
  Orientation: C > S-2.9
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 80 %
  Slice oversampling: 100.0 %
  Slices per slab: 12
  FoV read: 165 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  TR: 4.12 ms
  TE: 1.62 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE3,4;NE1,2
Contrast - Common
  TR: 4.12 ms
  TE: 1.62 ms
  Flip angle: 10.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 17
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 165 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  Base resolution: 160
  Phase resolution: 90 %
  Slice resolution: 83 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 33 %
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R0.5 A9.4 F0.1 mm
  Orientation: C > S-2.9
  Phase enc. dir.: R >> L
  Slice oversampling: 100.0 %
  Slices per slab: 12
  FoV read: 165 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  TR: 4.12 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R0.5 A9.4 F0.1 mm
  Orientation: C > S-2.9
  Phase enc. dir.: R >> L
  Initial Position: R0.5 A9.4 F0.1
  R: 0.5 mm
  A: 9.4 mm
  F: 0.1 mm
  Initial Rotation: -1.40 deg
  Initial Orientation: C > S
  C > S: -2.9
  > T: 0.0
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  Matrix Optimization: Performance
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: R0.5 A9.4 F0.1 mm
  Orientation: C > S-2.9
  Rotation: -1.40 deg
  R >> L: 165 mm
  F >> H: 165 mm
  A >> P: 24 mm
  Reset: Off
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Inline - Common
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 33 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 10.0 deg
  Temporal resolution: 10.29588 s
  Measurements: 17
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 12.8 s
Inline - Inline
  Subtract: Off
  Measurements: 17
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 17
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 17
  Contrasts: 1
  TR: 4.12 ms
  TE: 1.62 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\SAG T1 SPC POST FS
TA: 6:44 PM: ISO Voxel size: 0.5×0.5×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcR
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 60 %
  Slice oversampling: 60.0 %
  Slices per slab: 60
  FoV read: 130 mm
  FoV phase: 121.9 %
  Slice thickness: 1.00 mm
  TR: 625 ms
  TE: 29 ms
  Averages: 1.7
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE3,4;NE1,2
Contrast - Common
  TR: 625 ms
  TE: 29 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.7
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 130 mm
  FoV phase: 121.9 %
  Slice thickness: 1.00 mm
  Base resolution: 128
  Phase resolution: 135 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 60.0 %
  Slices per slab: 60
  FoV read: 130 mm
  FoV phase: 121.9 %
  Slice thickness: 1.00 mm
  TR: 625 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: L0.5 A10.4 F26.0
  L: 0.5 mm
  A: 10.4 mm
  F: 26.0 mm
  Initial Rotation: -8.22 deg
  Initial Orientation: Sagittal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 26 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 26 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L0.5 A10.4 F26.0 mm
  Orientation: Sagittal
  Rotation: 81.78 deg
  F >> H: 130 mm
  A >> P: 159 mm
  R >> L: 60 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 2.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 625 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 130 mm
  FoV phase: 121.9 %
  Phase resolution: 135 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.5 ms
  Bandwidth: 449 Hz/Px
Sequence - Part 2
  Echo train duration: 203 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: T1 var
  Turbo factor: 40
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\AX T1 FS POST
TA: 1:26 PM: REF Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.5 mm
  TR: 352.0 ms
  TE: 3.25 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 352.0 ms
  TE: 3.25 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.5 mm
  TR: 352.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 75.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
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  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 173 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 352.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 75.0 %
  Phase resolution: 80 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
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  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 352.0 ms
  TE: 3.25 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 280 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN PITUITARY_NEW\B11 - BRN PITUITARY_NEW\COR T2 SELLA_OPT
TA: 4:05 PM: REF Voxel size: 0.3×0.3×2.0 mmPAT: Off Rel. SNR: 1.00  : tseR
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  TR: 3000.0 ms
  TE: 80 ms
  Averages: 5
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 3000.0 ms
  TE: 80 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 5
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  TR: 3000.0 ms
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Geometry - AutoAlign
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  Orientation: Coronal
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  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 15
  Slice thickness: 2.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
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Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 17
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
