PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    BRN IAC
      B15 - IAC WWO
        localizer
        AX DWI
        SAG T1 SPACE
        AX FLAIR_
        AX DWI IAC
        AX T2 SPACE IAC
        AX T1 IAC
        COR T1 IAC
        AX T2_
        AX T1 SPC POST FS  IAC
        AX T1 FS POST
        AX T1 FS IAC
        COR T1 FS IAC

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\localizer
TA: 9.6 s PM: ISO Voxel size: 0.5×0.5×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  TE: 2.95 ms
  Averages: 2
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 7.0 ms
  TE: 2.95 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 1
  Slice thickness: 8.0 mm
  Dist. factor: 20 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 260 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 2.95 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX DWI
TA: 1:55 PM: ISO Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
  Prio recon: Off
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 23
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  TE: 89.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 6300 ms
  TE: 89.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 23
  Dist. factor: 30 %
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L0.0 P0.0 H113.0
  L: 0.0 mm
  P: 0.0 mm
  H: 113.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 113 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 113 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 148 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6300 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Bipolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 30
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Bipolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 30
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.98 ms
  Bandwidth: 1132 Hz/Px
Sequence - Part 2
  EPI factor: 192
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\SAG T1 SPACE
TA: 4:59 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 192
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 600 ms
  TE: 7.2 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 600 ms
  TE: 7.2 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 192
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 600 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Sagittal
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 600 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.58 ms
  Bandwidth: 630 Hz/Px
Sequence - Part 2
  Echo train duration: 165 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 44
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX FLAIR_
TA: 1:30 PM: ISO Voxel size: 0.6×0.6×3.5 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 21 %
  FoV read: 230 mm
  FoV phase: 81.3 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  TE: 97.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 97.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 81.3 %
  Slice thickness: 3.5 mm
  Base resolution: 192
  Phase resolution: 88 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 81.3 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A1.0 F9.2
  L: 0.2 mm
  A: 1.0 mm
  F: 9.2 mm
  Initial Rotation: 89.88 deg
  Initial Orientation: T > C
  T > C: 4.2
  > S: 1.3
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 187 mm
  A >> P: 230 mm
  F >> H: 150 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 81.3 %
  Phase resolution: 88 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.68 ms
  Bandwidth: 334 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 4
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 24
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX DWI IAC
TA: 4:22 PM: ISO Voxel size: 0.6×0.6×2.2 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 13
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 2.2 mm
  TR: 2000.0 ms
  TE: 106 ms
  Averages: 10
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 2000.0 ms
  TE: 106 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 10
  Averaging mode: Long term
  Reconstruction: Magnitude
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 2.2 mm
  Base resolution: 192
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 13
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 2.2 mm
  TR: 2000.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Diff - Neuro
  Diffusion mode: 3D Diagonal
  Diff. directions: 0
  b-value: 1000 s/mm²
  b-value: 10
  Diff. weighted images: On
Diff - Body
  Diffusion mode: 3D Diagonal
  Diff. directions: 0
  b-value: 1000 s/mm²
  b-value: 10
  Diff. weighted images: On
Diff - Composing
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  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Multi-slice mode: Single shot
  Echo spacing: 5.08 ms
  Bandwidth: 554 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Turbo factor: 144
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX T2 SPACE IAC
TA: 4:59 PM: REF Voxel size: 0.6×0.6×0.6 mmPAT: 2 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 88
  FoV read: 200 mm
  FoV phase: 88.8 %
  Slice thickness: 0.60 mm
  TR: 1200 ms
  TE: 266 ms
  Averages: 1.6
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 1200 ms
  TE: 266 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.6
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 200 mm
  FoV phase: 88.8 %
  Slice thickness: 0.60 mm
  Base resolution: 320
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 88
  FoV read: 200 mm
  FoV phase: 88.8 %
  Slice thickness: 0.60 mm
  TR: 1200 ms
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
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  Phase enc. dir.: R >> L
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 1200 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 200 mm
  FoV phase: 88.8 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 5.62 ms
  Bandwidth: 347 Hz/Px
Sequence - Part 2
  Echo train duration: 506 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: Constant
  Turbo factor: 88
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX T1 IAC
TA: 4:50 PM: ISO Voxel size: 0.3×0.3×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rs
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Routine
  Slice group: 1
  Slices: 16
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 12 ms
  Averages: 4
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 550.0 ms
  TE: 12 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 4
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 16
  Dist. factor: 0 %
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  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
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  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 16
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 170 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 170 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Slice
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 12 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 131
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 2
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\COR T1 IAC
TA: 4:17 PM: ISO Voxel size: 0.3×0.3×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 14
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 9.8 ms
  Averages: 4
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 550.0 ms
  TE: 9.8 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 14
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Coronal
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Geometry - AutoAlign
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  Orientation: Coronal
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 14
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Physio - Cardiac
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  Phase resolution: 90 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.84 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 116
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX T2_
TA: 1:54 PM: ISO Voxel size: 0.6×0.6×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  TE: 82 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4500.0 ms
  TE: 82 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A1.0 F9.2
  L: 0.2 mm
  A: 1.0 mm
  F: 9.2 mm
  Initial Rotation: 89.88 deg
  Initial Orientation: T > C
  T > C: 4.2
  > S: 1.3
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 230 mm
  A >> P: 230 mm
  F >> H: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 12
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX T1 SPC POST FS  IAC
TA: 6:38 PM: ISO Voxel size: 0.5×0.5×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: L1.0 A8.1 F42.5 mm
  Orientation: T > C5.3 > S-1.7
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 50 %
  Slice oversampling: 60.0 %
  Slices per slab: 60
  FoV read: 125 mm
  FoV phase: 115.6 %
  Slice thickness: 1.00 mm
  TR: 680 ms
  TE: 29 ms
  Averages: 1.7
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE3,4;NE1,2
Contrast - Common
  TR: 680 ms
  TE: 29 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.7
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 125 mm
  FoV phase: 115.6 %
  Slice thickness: 1.00 mm
  Base resolution: 128
  Phase resolution: 135 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L1.0 A8.1 F42.5 mm
  Orientation: T > C5.3 > S-1.7
  Phase enc. dir.: R >> L
  Slice oversampling: 60.0 %
  Slices per slab: 60
  FoV read: 125 mm
  FoV phase: 115.6 %
  Slice thickness: 1.00 mm
  TR: 680 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L1.0 A8.1 F42.5 mm
  Orientation: T > C5.3 > S-1.7
  Phase enc. dir.: R >> L
  Initial Position: L1.0 A8.1 F42.5
  L: 1.0 mm
  A: 8.1 mm
  F: 42.5 mm
  Initial Rotation: 91.44 deg
  Initial Orientation: T > C
  T > C: 5.3
  > S: -1.7
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 43 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 43 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L1.0 A8.1 F42.5 mm
  Orientation: T > C5.3 > S-1.7
  Rotation: 181.44 deg
  A >> P: 125 mm
  R >> L: 145 mm
  F >> H: 60 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 2.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 680 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 125 mm
  FoV phase: 115.6 %
  Phase resolution: 135 %
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.12 ms
  Bandwidth: 550 Hz/Px
Sequence - Part 2
  Echo train duration: 185 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: T1 var
  Turbo factor: 40
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX T1 FS POST
TA: 1:37 PM: ISO Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 355.0 ms
  TE: 3.25 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 355.0 ms
  TE: 3.25 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 355.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A1.0 F9.2
  L: 0.2 mm
  A: 1.0 mm
  F: 9.2 mm
  Initial Rotation: 89.88 deg
  Initial Orientation: T > C
  T > C: 4.2
  > S: 1.3
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 150 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 355.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 90 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 355.0 ms
  TE: 3.25 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 280 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\AX T1 FS IAC
TA: 5:31 PM: ISO Voxel size: 0.3×0.3×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rs
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Routine
  Slice group: 1
  Slices: 16
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 835.0 ms
  TE: 12 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 835.0 ms
  TE: 12 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 16
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 835.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 16
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 170 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 170 mm
  A >> P: 170 mm
  F >> H: 48 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 835.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 170 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
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Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Slice
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 12 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 131
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 2
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN IAC\B15 - IAC WWO\COR T1 FS IAC
TA: 4:22 PM: ISO Voxel size: 0.3×0.3×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 13
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 745.0 ms
  TE: 9.8 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 745.0 ms
  TE: 9.8 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 13
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Coronal
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  TR: 745.0 ms
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Geometry - AutoAlign
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  Orientation: Coronal
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 13
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 170 mm
  F >> H: 170 mm
  A >> P: 39 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 745.0 ms
  Concatenations: 1
Physio - Cardiac
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  Phase resolution: 90 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.84 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 116
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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