PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    BRAIN LAB
      B17 - BRAIN LAB
        localizer
        SAG T1 SPACE POST FS
        AX MPRAGE POST
        AX T2 SPACE
        AX SPACE FLAIR
        AX T1 SPACE
        NRG SAG MPRAGE POST OR

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\localizer
TA: 9.6 s PM: REF Voxel size: 0.5×0.5×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  TE: 2.95 ms
  Averages: 2
  Concatenations: 3
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 7.0 ms
  TE: 2.95 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 1
  Slice thickness: 8.0 mm
  Dist. factor: 20 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 260 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 2.95 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\SAG T1 SPACE POST FS
TA: 6:36 PM: REF Voxel size: 0.6×0.6×1.0 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
  Prio recon: Off
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 43 %
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  TR: 700 ms
  TE: 18.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 700 ms
  TE: 18.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  Base resolution: 192
  Phase resolution: 129 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
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  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 215 mm
  FoV phase: 118.8 %
  Slice thickness: 1.00 mm
  TR: 700 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 215 mm
  A >> P: 256 mm
  R >> L: 176 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 700 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 215 mm
  FoV phase: 118.8 %
  Phase resolution: 129 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.52 ms
  Bandwidth: 704 Hz/Px
Sequence - Part 2
  Echo train duration: 162 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 41
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\AX MPRAGE POST
TA: 3:32 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 250 mm
  FoV phase: 93.8 %
  Slice thickness: 1.00 mm
  TR: 1900.0 ms
  TE: 2.18 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: SP1-8
Contrast - Common
  TR: 1900.0 ms
  TE: 2.18 ms
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 250 mm
  FoV phase: 93.8 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 95 %
  Slice resolution: 82 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 23.1 %
  Slices per slab: 208
  FoV read: 250 mm
  FoV phase: 93.8 %
  Slice thickness: 1.00 mm
  TR: 1900.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1900.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 250 mm
  FoV phase: 93.8 %
  Phase resolution: 95 %
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  TR: 1900.0 ms
  TE: 2.18 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 6.6 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Non-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 210
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\AX T2 SPACE
TA: 3:26 PM: ISO Voxel size: 1.0×1.0×2.0 mmPAT: 2 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Basis
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 144
  FoV read: 250 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 3200 ms
  TE: 381 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 3200 ms
  TE: 381 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 250 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 85 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
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  Slice oversampling: 0.0 %
  Slices per slab: 144
  FoV read: 250 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 3200 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Basis
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Transversal: F >> H
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  AutoAlign: Head > Basis
  Coil Select Mode: Default
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 3200 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
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  FoV phase: 90.6 %
  Phase resolution: 100 %
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.4 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  Echo train duration: 806 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T2 var
  Turbo factor: 248
Sequence - Assistant
  Allowed delay: 25 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\AX SPACE FLAIR
TA: 4:57 PM: ISO Voxel size: 1.0×1.0×1.5 mmPAT: 2 Rel. SNR: 1.00  : spcir
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 144
  FoV read: 250 mm
  FoV phase: 87.5 %
  Slice thickness: 1.50 mm
  TR: 5000 ms
  TE: 333 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 5000 ms
  TE: 333 ms
  MTC: Off
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: Off
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Resolution - Common
  FoV read: 250 mm
  FoV phase: 87.5 %
  Slice thickness: 1.50 mm
  Base resolution: 256
  Phase resolution: 97 %
  Slice resolution: 81 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: Off
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Geometry - Common
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  FoV phase: 87.5 %
  Slice thickness: 1.50 mm
  TR: 5000 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 5000 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
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  FoV phase: 87.5 %
  Phase resolution: 97 %
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.62 ms
  Bandwidth: 592 Hz/Px
Sequence - Part 2
  Echo train duration: 767 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T2 var
  Turbo factor: 242
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\AX T1 SPACE
TA: 4:34 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Basis
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 144
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 600 ms
  TE: 7.2 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 600 ms
  TE: 7.2 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: A >> P
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  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 600 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Basis
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: Head > Basis
  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 600 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
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  FoV phase: 100.0 %
  Phase resolution: 100 %
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.58 ms
  Bandwidth: 630 Hz/Px
Sequence - Part 2
  Echo train duration: 136 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 36
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRAIN LAB\B17 - BRAIN LAB\NRG SAG MPRAGE POST OR
TA: 3:46 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: R4.3 A9.9 H40.5 mm
  Orientation: S > C1.1 > T0.2
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 18.2 %
  Slices per slab: 176
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1900.0 ms
  TE: 2.18 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 1900.0 ms
  TE: 2.18 ms
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 95 %
  Slice resolution: 83 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: R4.3 A9.9 H40.5 mm
  Orientation: S > C1.1 > T0.2
  Phase enc. dir.: A >> P
  Slice oversampling: 18.2 %
  Slices per slab: 176
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  TR: 1900.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R4.3 A9.9 H40.5 mm
  Orientation: S > C1.1 > T0.2
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 40 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 40 mm
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  Transversal: H >> F
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1900.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 1100 ms
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  Phase resolution: 95 %
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 6.6 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Non-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 172
Sequence - Assistant
  Mode: Off
