PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    BRN TRAUMA
      B4 - BRAIN TRAUMA
        AAHScout
        AX DWI
        AX FLAIR
        AX GRE
        AX SWI
        AX T1
        AX T2
        SAG T1

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AAHScout
TA: 0:19 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4.52 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 8.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.52 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AX DWI
TA: 1:43 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4300 ms
  TE: 75.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4300 ms
  TE: 75.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 144
  Phase resolution: 77 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4300 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4300 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 1
  b-value 2: 1
  b-value 3: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 20
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 1
  b-value 2: 1
  b-value 3: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 20
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.78 ms
  Bandwidth: 1510 Hz/Px
Sequence - Part 2
  EPI factor: 111
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AX FLAIR
TA: 1:30 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 36
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 17 %
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  TE: 97.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 97.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  Base resolution: 192
  Phase resolution: 92 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 36
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 36
  Slice thickness: 4.0 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
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System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 179 mm
  A >> P: 220 mm
  F >> H: 186 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 81.3 %
  Phase resolution: 92 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.68 ms
  Bandwidth: 334 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 4
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 24
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AX GRE
TA: 2:39 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: Off Rel. SNR: 1.00  : fl_r
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 730.0 ms
  TE: 22.50 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 730.0 ms
  TE: 22.50 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 730.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Segments: 1
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 730.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 25 deg
  Measurements: 1
  Contrasts: 1
  TR: 730.0 ms
  TE: 22.50 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 100 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AX SWI
TA: 4:19 PM: REF Voxel size: 0.9×0.9×2.0 mmPAT: 2 Rel. SNR: 1.00  : swi_r
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 72
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 49.0 ms
  TE: 40.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 49.0 ms
  TE: 40.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  Base resolution: 256
  Phase resolution: 80 %
  Slice resolution: 69 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 72
  FoV read: 230 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 49.0 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slabs: 1
  Slices per slab: 72
  Slice thickness: 2.00 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 90.6 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 209 mm
  A >> P: 230 mm
  F >> H: 144 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 49.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
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  FoV phase: 90.6 %
  Phase resolution: 80 %
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 49.0 ms
  TE: 40.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 80 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slab-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AX T1
TA: 2:14 PM: ISO Voxel size: 0.5×0.5×3.3 mmPAT: 4 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 37 %
  Slice oversampling: 33.3 %
  Slices per slab: 48
  FoV read: 240 mm
  FoV phase: 85.9 %
  Slice thickness: 3.30 mm
  TR: 600 ms
  TE: 25 ms
  Averages: 2.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 600 ms
  TE: 25 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 2.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 240 mm
  FoV phase: 85.9 %
  Slice thickness: 3.30 mm
  Base resolution: 256
  Phase resolution: 80 %
  Slice resolution: 94 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 48
  FoV read: 240 mm
  FoV phase: 85.9 %
  Slice thickness: 3.30 mm
  TR: 600 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 600 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 240 mm
  FoV phase: 85.9 %
  Phase resolution: 80 %
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Inline - Common
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.2 ms
  Bandwidth: 751 Hz/Px
Sequence - Part 2
  Echo train duration: 154 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: T1 var
  Turbo factor: 43
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\AX T2
TA: 1:54 PM: ISO Voxel size: 0.6×0.6×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  TE: 82 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4500.0 ms
  TE: 82 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
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  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 12
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN TRAUMA\B4 - BRAIN TRAUMA\SAG T1
TA: 1:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 37 %
  Slice oversampling: 33.3 %
  Slices per slab: 72
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  TR: 600 ms
  TE: 17.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 600 ms
  TE: 17.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 94 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 72
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.00 mm
  TR: 600 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 40 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 40 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 600 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 240 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.34 ms
  Bandwidth: 751 Hz/Px
Sequence - Part 2
  Echo train duration: 164 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 44
Sequence - Assistant
  Allowed delay: 30 s
