PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    BRN WO
      B1 - BRN WO
        AAHScout
        SAG MPRAGE
        AX DWI
        AX T2_
        AX  FLAIR
        AX GRE
      MOTION
        localizer
        AX DWI
        AX FLAIR BLADE
        AX EPI HEMO
        SAG T1 BLADE
        AX T1 BLADE
        AX T2 BLADE
      METAL SEQS
        SAG T1
        AX FLAIR
        AX T1
        AX T2

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\B1 - BRN WO\AAHScout
TA: 0:19 PM: ISO Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4.52 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 4.52 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651755 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 8.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.52 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\B1 - BRN WO\SAG MPRAGE
TA: 4:59 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
Properties
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  Load images to stamp segments: Off
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 25.0 %
  Slices per slab: 192
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 2200.0 ms
  TE: 2.67 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 2200.0 ms
  TE: 2.67 ms
  Magn. preparation: Non-sel. IR
  TI: 900 ms
  Flip angle: 8 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 96 %
  Slice resolution: 90 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  ! Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 2
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 192
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 2200.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  Initial Orientation: Sagittal
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2200.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 900 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 96 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - MapIt
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  TR: 2200.0 ms
  TE: 2.67 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 7.9 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Non-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 216
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\B1 - BRN WO\AX DWI
TA: 2:13 PM: ISO Voxel size: 1.6×1.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4600 ms
  TE: 80.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE1-4
Contrast - Common
  TR: 4600 ms
  TE: 80.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 146
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4600 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 153 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651755 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4600 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 2
  b-value 2: 2
  b-value 3: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 2
  b-value 2: 2
  b-value 3: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.79 ms
  Bandwidth: 1426 Hz/Px
Sequence - Part 2
  EPI factor: 110
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\B1 - BRN WO\AX T2_
TA: 2:41 PM: ISO Voxel size: 0.3×0.3×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 33 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 45 %
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  TE: 89.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 3800.0 ms
  TE: 89.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 88 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 38
  Dist. factor: 33 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Phase enc. dir.: R >> L
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 38
  Slice thickness: 3.0 mm
  Dist. factor: 33 %
  FoV read: 220 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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  Save uncombined: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 193 mm
  A >> P: 220 mm
  F >> H: 151 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 87.5 %
  Phase resolution: 88 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.9 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 10
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 18
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\B1 - BRN WO\AX  FLAIR
TA: 3:02 PM: ISO Voxel size: 0.9×0.9×4.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 40 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  TE: 91.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 91.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 55
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 230 mm
  FoV phase: 100.0 %
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System - Adjust Volume
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  R >> L: 230 mm
  A >> P: 230 mm
  F >> H: 159 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.12 ms
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\B1 - BRN WO\AX GRE
TA: 1:41 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 730.0 ms
  TE: 22.50 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 730.0 ms
  TE: 22.50 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 60
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
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  Slice thickness: 5.0 mm
  TR: 730.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 730.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
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  Phase resolution: 85 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 25 deg
  Measurements: 1
  Contrasts: 1
  TR: 730.0 ms
  TE: 22.50 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 100 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\localizer
TA: 9.6 s PM: REF Voxel size: 0.5×0.5×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  TE: 2.95 ms
  Averages: 2
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 7.0 ms
  TE: 2.95 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 1
  Slice thickness: 8.0 mm
  Dist. factor: 20 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
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  FoV read: 260 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 2.95 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\AX DWI
TA: 1:36 PM: REF Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
  Prio recon: Off
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  TE: 89.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE1-4
Contrast - Common
  TR: 6300 ms
  TE: 89.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 20
  Dist. factor: 30 %
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  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 6300 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 230 mm
  R >> L: 230 mm
  F >> H: 129 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6300 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Bipolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
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Diff - Body
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Bipolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
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  Exponential ADC Maps: On
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Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.98 ms
  Bandwidth: 1132 Hz/Px
Sequence - Part 2
  EPI factor: 192
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\AX FLAIR BLADE
TA: 3:46 PM: REF Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 8000.0 ms
  TE: 98 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 8000.0 ms
  TE: 98 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2370 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 108.3 %
  Trajectory: BLADE
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  TR: 8000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2370 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  BLADE coverage: 108.3 %
  Trajectory: BLADE
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.44 ms
  Bandwidth: 362 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 13
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: On
  Red. EC sensitivity: Off
  Turbo factor: 35
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\AX EPI HEMO
TA: 1:05 PM: ISO Voxel size: 0.6×0.6×5.0 mmRel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 226 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2500 ms
  TE: 32.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2500 ms
  TE: 32.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Fat sat.
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 226 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 192
  Phase resolution: 98 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
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  FoV read: 226 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2500 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 226 mm
  A >> P: 226 mm
  F >> H: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2500 ms
  Concatenations: 1
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 1.23 ms
  Bandwidth: 1002 Hz/Px
Sequence - Part 2
  EPI factor: 17
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\SAG T1 BLADE
TA: 5:32 PM: REF Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 23
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: Head > Basis
  Phase oversampling: 100.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  TE: 44 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2000.0 ms
  TE: 44 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 860 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 100.0 %
  Trajectory: BLADE
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 23
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Basis
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 70 mm
  Position: L0.0 P0.0 F138.9 mm
  Orientation: Transversal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 23
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System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Basis
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 860 ms
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  BLADE coverage: 100.0 %
  Trajectory: BLADE
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.44 ms
  Bandwidth: 362 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 54
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 15
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\AX T1 BLADE
TA: 4:45 PM: FIX Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tirB
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 2200.0 ms
  TE: 54 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2200.0 ms
  TE: 54 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  BLADE coverage: 190.9 %
  Trajectory: BLADE
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  TR: 2200.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
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System - Miscellaneous
  Positioning mode: FIX
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2200.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 936 ms
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  BLADE coverage: 190.9 %
  Trajectory: BLADE
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 42
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\MOTION\AX T2 BLADE
TA: 2:10 PM: FIX Voxel size: 0.7×0.7×5.0 mmPAT: Off Rel. SNR: 1.00  : tseB
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0.0 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  TE: 99 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4000.0 ms
  TE: 99 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  BLADE coverage: 100.0 %
  Trajectory: BLADE
  Interpolation: Off
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Geometry - Common
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  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  BLADE coverage: 100.0 %
  Trajectory: BLADE
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.5 ms
  Bandwidth: 363 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Motion correction: On
  Red. EC sensitivity: Off
  Turbo factor: 35
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\METAL SEQS\SAG T1
TA: 3:15 PM: FIX Voxel size: 0.9×0.9×4.0 mmPAT: Off Rel. SNR: 1.00  : tseW
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: R6.3 P3.9 F6.1 mm
  Orientation: S > T-5.5 > C-4.8
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  TE: 12.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 500.0 ms
  TE: 12.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: R6.3 P3.9 F6.1 mm
  Orientation: S > T-5.5 > C-4.8
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R6.3 P3.9 F6.1 mm
  Orientation: S > T-5.5 > C-4.8
  Phase enc. dir.: A >> P
  Initial Position: R6.3 P3.9 F6.1
  R: 6.3 mm
  P: 3.9 mm
  F: 6.1 mm
  Initial Rotation: -10.30 deg
  Initial Orientation: S > T
  S > T: -5.5
  > C: -4.8
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 4.0 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Transversal: H >> F
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  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.76 ms
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 140 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\METAL SEQS\AX FLAIR
TA: 1:41 PM: FIX Voxel size: 0.9×0.9×4.0 mmPAT: 2 Rel. SNR: 1.00  : tirW
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Routine
  Slice group: 1
  Slices: 27
  Dist. factor: 50 %
  Position: R7.7 P6.9 H6.3 mm
  Orientation: T > C-14.0 > S6.5
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 45 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  TE: 36.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 9000.0 ms
  TE: 36.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2400 ms
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 27
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 27
  Dist. factor: 50 %
  Position: R7.7 P6.9 H6.3 mm
  Orientation: T > C-14.0 > S6.5
  Phase enc. dir.: R >> L
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  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R7.7 P6.9 H6.3 mm
  Orientation: T > C-14.0 > S6.5
  Phase enc. dir.: R >> L
  Initial Position: R7.7 P6.9 H6.3
  R: 7.7 mm
  P: 6.9 mm
  H: 6.3 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: T > C
  T > C: -14.0
  > S: 6.5
Geometry - Saturation
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  Special sat.: Parallel H
  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 27
  Slice thickness: 4.0 mm
  Dist. factor: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2400 ms
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  Phase resolution: 100 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 6.06 ms
  Bandwidth: 399 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 10
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 20
Sequence - Assistant
  Mode: Off
  Allowed delay: 10 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\METAL SEQS\AX T1
TA: 3:15 PM: FIX Voxel size: 0.9×0.9×4.0 mmPAT: Off Rel. SNR: 1.00  : tseW
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: R8.2 P13.7 H4.9 mm
  Orientation: T > C-18.1 > S6.8
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  TE: 12.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 500.0 ms
  TE: 12.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: R8.2 P13.7 H4.9 mm
  Orientation: T > C-18.1 > S6.8
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  TR: 500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R8.2 P13.7 H4.9 mm
  Orientation: T > C-18.1 > S6.8
  Phase enc. dir.: R >> L
  Initial Position: R8.2 P13.7 H4.9
  R: 8.2 mm
  P: 13.7 mm
  H: 4.9 mm
  Initial Rotation: 79.70 deg
  Initial Orientation: T > C
  T > C: -18.1
  > S: 6.8
Geometry - Saturation
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  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 4.0 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 5.76 ms
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 140 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\BRN WO\METAL SEQS\AX T2
TA: 1:43 PM: FIX Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : tseW
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Routine
  Slice group: 1
  Slices: 34
  Dist. factor: 20 %
  Position: R7.7 P6.9 H6.3 mm
  Orientation: T > C-14.0 > S6.5
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 45 %
  FoV read: 220 mm
  FoV phase: 75.0 %
  Slice thickness: 4.0 mm
  TR: 4630.0 ms
  TE: 88.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 4630.0 ms
  TE: 88.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 75.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 34
  Dist. factor: 20 %
  Position: R7.7 P6.9 H6.3 mm
  Orientation: T > C-14.0 > S6.5
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 75.0 %
  Slice thickness: 4.0 mm
  TR: 4630.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R7.7 P6.9 H6.3 mm
  Orientation: T > C-14.0 > S6.5
  Phase enc. dir.: R >> L
  Initial Position: R7.7 P6.9 H6.3
  R: 7.7 mm
  P: 6.9 mm
  H: 6.3 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: T > C
  T > C: -14.0
  > S: 6.5
Geometry - Saturation
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  Special sat.: Parallel H
  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 34
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  FoV phase: 75.0 %
System - Miscellaneous
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4630.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV phase: 75.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 6.28 ms
  Bandwidth: 401 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 7
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 20
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