PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  SPINE
    C-T SPINE
      CT SPINE_WWO_
        LOC COUNTER
        SAG STIR_
        SAG T1_
        SAG T2
        AX MEDIC CSP
        AX T2_TSP
        SAG T1_POST FS
        AX T1 FS CSP POST
        AX T1 FS TSP POST

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\LOC COUNTER
TA: 0:22 PM: ISO Voxel size: 1.5×1.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/3
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 P35.1 F118.1 mm
  Orientation: C > T-3.3
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 9
  Dist. factor: 20 %
  Position: R9.3 P35.1 F118.1 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 5.2 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 18
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1,2
Contrast - Common
  TR: 5.2 ms
  TE: 2.20 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 224
  Phase resolution: 50 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 P35.1 F118.1 mm
  Orientation: C > T-3.3
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 9
  Dist. factor: 20 %
  Position: R9.3 P35.1 F118.1 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 5.2 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 18
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  AutoAlign: ---
  Position: R9.3 P35.1 F118.1 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 118 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Spine
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 9
  Slice thickness: 6.0 mm
  Dist. factor: 20 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 118 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 5.2 ms
  Concatenations: 18
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 100.0 %
  Phase resolution: 50 %
Physio - PACE
  Resp. control: Off
  Concatenations: 18
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Spine
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 5.2 ms
  TE: 2.20 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\LOC COUNTER
TA: 0:25 PM: ISO Voxel size: 1.5×1.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/3
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Routine
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 P68.9 F356.5 mm
  Orientation: C > T-3.3
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 11
  Dist. factor: 20 %
  Position: R9.3 P68.9 F356.5 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 5.2 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 20
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: SP2-5
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Geometry - Common
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  Position: R9.3 P68.9 F356.5 mm
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  Slices: 11
  Dist. factor: 20 %
  Position: R9.3 P68.9 F356.5 mm
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  Concatenations: 20
Geometry - AutoAlign
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  Position: R9.3 P68.9 F356.5 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 357 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 11
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 357 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5.2 ms
  Concatenations: 20
  Segments: 1
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Physio - PACE
  Resp. control: Off
  Concatenations: 20
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\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\LOC COUNTER
TA: 0:25 PM: ISO Voxel size: 1.5×1.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 3/3
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Routine
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 P92.7 F595.5 mm
  Orientation: C > T-3.3
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 11
  Dist. factor: 20 %
  Position: R9.3 P92.7 F595.5 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 5.2 ms
  TE: 2.20 ms
  Averages: 1
  Concatenations: 20
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: SP3-7
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Geometry - Common
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  Position: R9.3 P92.7 F595.5 mm
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  Position: R9.3 P92.7 F595.5 mm
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Geometry - AutoAlign
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  Position: R9.3 P92.7 F595.5 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 596 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 596 mm
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 470 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG STIR_
TA: 4:23 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir_rr  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 19
  Dist. factor: 0 %
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 70 %
  FoV read: 150 mm
  FoV phase: 234.4 %
  Slice thickness: 3.0 mm
  TR: 3750.0 ms
  TE: 41.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE4;NE2;SP1,2
Contrast - Common
  TR: 3750.0 ms
  TE: 41.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 234.4 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 68 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 19
  Dist. factor: 0 %
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  FoV read: 150 mm
  FoV phase: 234.4 %
  Slice thickness: 3.0 mm
  TR: 3750.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 117 mm
  Position: R11.8 A70.7 F10.7 mm
  Orientation: C > T-8.0 > S0.2
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 50 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 19
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 150 mm
  FoV phase: 234.4 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 50 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3750.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 234.4 %
  Phase resolution: 68 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.26 ms
  Bandwidth: 191 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 17
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG STIR_
TA: 4:23 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir_rr  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 19
  Dist. factor: 0 %
  Position: L24.3 P57.4 F259.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 70 %
  FoV read: 150 mm
  FoV phase: 234.4 %
  Slice thickness: 3.0 mm
  TR: 3750.0 ms
  TE: 41.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP1-4
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Geometry - Common
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  Position: L24.3 P57.4 F259.0 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L24.3 P57.4 F259.0 mm
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 259 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 259 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG T1_
TA: 3:47 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  TR: 754.0 ms
  TE: 8.2 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE4;NE2;SP1,2
Contrast - Common
  TR: 754.0 ms
  TE: 8.2 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 149 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  Base resolution: 192
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  TR: 754.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L15.2 P38.7 F50.0 mm
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Geometry - Saturation
  Sat. region: 1
  Thickness: 117 mm
  Position: R11.8 A70.7 F10.7 mm
  Orientation: C > T-8.0 > S0.2
  Shape: Standard
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 50 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 3.5 mm
  Dist. factor: 0 %
  FoV read: 165 mm
  FoV phase: 237.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 50 mm
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  Coil Select Mode: Off - All
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Physio - Signal1
  1st Signal/Mode: None
  TR: 754.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 165 mm
  FoV phase: 237.5 %
  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.2 ms
  Bandwidth: 253 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 100
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG T1_
TA: 3:23 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L24.3 P57.4 F259.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  TR: 676.0 ms
  TE: 8.2 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP1-4
Contrast - Common
  TR: 676.0 ms
  TE: 8.2 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Position: L24.3 P57.4 F259.0 mm
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  TR: 676.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L24.3 P57.4 F259.0 mm
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 259 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 259 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 676.0 ms
  Concatenations: 1
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG T2
TA: 3:27 PM: ISO Voxel size: 0.8×0.8×3.5 mmPAT: 2 Rel. SNR: 1.00  : tseR_rr  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 19
  Dist. factor: 0 %
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 77 %
  FoV read: 150 mm
  FoV phase: 215.6 %
  Slice thickness: 3.5 mm
  TR: 2800.0 ms
  TE: 85.0 ms
  Averages: 3
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE4;NE2;SP1,2
Contrast - Common
  TR: 2800.0 ms
  TE: 85.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 142 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 215.6 %
  Slice thickness: 3.5 mm
  Base resolution: 192
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 19
  Dist. factor: 0 %
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  FoV read: 150 mm
  FoV phase: 215.6 %
  Slice thickness: 3.5 mm
  TR: 2800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L15.2 P38.7 F50.0 mm
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Geometry - Saturation
  Sat. region: 1
  Thickness: 117 mm
  Position: R11.8 A70.7 F10.7 mm
  Orientation: C > T-8.0 > S0.2
  Shape: Standard
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 50 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 19
  Slice thickness: 3.5 mm
  Dist. factor: 0 %
  FoV read: 150 mm
  FoV phase: 215.6 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 50 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L15.2 P38.7 F50.0 mm
  Orientation: S > T-2.5 > C0.1
  Rotation: 174.90 deg
  A >> P: 150 mm
  F >> H: 324 mm
  R >> L: 67 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2800.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 215.6 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.06 ms
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 12
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 23
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG T2
TA: 3:27 PM: ISO Voxel size: 0.8×0.8×3.5 mmPAT: 2 Rel. SNR: 1.00  : tseR_rr  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 19
  Dist. factor: 0 %
  Position: L24.3 P57.4 F259.0 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 77 %
  FoV read: 150 mm
  FoV phase: 215.6 %
  Slice thickness: 3.5 mm
  TR: 2800.0 ms
  TE: 92.0 ms
  Averages: 3
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP1-4
Contrast - Common
  TR: 2800.0 ms
  TE: 92.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 142 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
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Geometry - Common
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  Position: L24.3 P57.4 F259.0 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L24.3 P57.4 F259.0 mm
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 259 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 259 mm
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System - Adjust Volume
  Position: L24.3 P57.4 F259.0 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\AX MEDIC CSP
TA: 5:21 PM: ISO Voxel size: 0.7×0.7×3.0 mmPAT: Off Rel. SNR: 1.00  : me_r
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 418.0 ms
  TE: 14.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 418.0 ms
  TE: 14.0 ms
  TD: 0.0 ms
  MTC: Off
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 418.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Sat. region: 1
  Thickness: 69 mm
  Position: L0.1 A47.1 F8.0 mm
  Orientation: C > T-9.7 > S0.1
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
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System - Adjust Volume
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Rotation: 0.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 117 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 418.0 ms
  Concatenations: 2
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Combined echoes: 2
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\AX T2_TSP
TA: 3:20 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tseR  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 28
  Dist. factor: 25 %
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 61 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3000.0 ms
  TE: 102.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: SP1,2
Contrast - Common
  TR: 3000.0 ms
  TE: 102.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 89 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 28
  Dist. factor: 25 %
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
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  Slice thickness: 4.0 mm
  TR: 3000.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.1 A19.7 F1.3 mm
  Orientation: C > T-3.7 > S0.2
  Shape: Standard
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 127 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Spine
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 28
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 180 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 127 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Cardiac
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System - Adjust Volume
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
  Rotation: 0.31 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 139 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3000.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 89 %
  Trajectory: Cartesian
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Inline - Composing
  Inline Composing: On
  Composing Function: Spine
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.46 ms
  Bandwidth: 241 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 23
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\AX T2_TSP
TA: 3:33 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tseR  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 29
  Dist. factor: 25 %
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 61 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3200.0 ms
  TE: 102.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: SP2,3
Contrast - Common
  TR: 3200.0 ms
  TE: 102.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
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Geometry - Common
  Slice group: 1
  Slices: 29
  Dist. factor: 25 %
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
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  TR: 3200.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.3 P23.2 F4.0 mm
  Orientation: C > T9.8 > S-0.7
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 254 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 29
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 254 mm
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System - Adjust Volume
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
  Rotation: 1.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 144 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3200.0 ms
  Concatenations: 2
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG T1_POST FS
TA: 4:02 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 15
  Dist. factor: 10 %
  Position: L18.2 P40.9 F49.8 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  TR: 600.0 ms
  TE: 8.2 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE4;NE2;SP1,2
Contrast - Common
  TR: 600.0 ms
  TE: 8.2 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 149 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  Base resolution: 192
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 15
  Dist. factor: 10 %
  Position: L18.2 P40.9 F49.8 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  TR: 600.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L18.2 P40.9 F49.8 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 117 mm
  Position: L0.3 A77.3 F10.8 mm
  Orientation: C > T-8.0 > S0.2
  Shape: Standard
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 50 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 15
  Slice thickness: 3.5 mm
  Dist. factor: 10 %
  FoV read: 165 mm
  FoV phase: 237.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 50 mm
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L18.2 P40.9 F49.8 mm
  Orientation: S > T-2.5 > C0.1
  Rotation: 174.90 deg
  A >> P: 165 mm
  F >> H: 392 mm
  R >> L: 58 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 165 mm
  FoV phase: 237.5 %
  Phase resolution: 90 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.2 ms
  Bandwidth: 253 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 100
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\SAG T1_POST FS
TA: 4:02 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 15
  Dist. factor: 10 %
  Position: L27.4 P59.5 F258.7 mm
  Orientation: S > T-2.5 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 165 mm
  FoV phase: 237.5 %
  Slice thickness: 3.5 mm
  TR: 600.0 ms
  TE: 8.2 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP1-4
Contrast - Common
  TR: 600.0 ms
  TE: 8.2 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Position: L27.4 P59.5 F258.7 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L27.4 P59.5 F258.7 mm
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 259 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 259 mm
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System - Adjust Volume
  Position: L27.4 P59.5 F258.7 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\AX T1 FS CSP POST
TA: 3:52 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 31 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 316.0 ms
  TE: 3.13 ms
  Averages: 5
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 316.0 ms
  TE: 3.13 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 5
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 316.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Saturation mode: Quick
  Sat. region: 1
  Thickness: 69 mm
  Position: L0.1 A47.1 F8.0 mm
  Orientation: C > T-9.7 > S0.1
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 30 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Rotation: 0.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 117 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 316.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 316.0 ms
  TE: 3.13 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 65 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\AX T1 FS TSP POST
TA: 2:29 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 28
  Dist. factor: 25 %
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 31 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 322.0 ms
  TE: 3.13 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP1,2
Contrast - Common
  TR: 322.0 ms
  TE: 3.13 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 68 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 28
  Dist. factor: 25 %
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
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  Slice thickness: 4.0 mm
  TR: 322.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
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Geometry - Saturation
  Saturation mode: Quick
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.1 A19.7 F1.3 mm
  Orientation: C > T-3.7 > S0.2
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 127 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 28
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 127 mm
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System - Adjust Volume
  Position: L18.6 P63.6 F126.9 mm
  Orientation: T > C3.7 > S2.5
  Rotation: 0.31 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 139 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 322.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
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  Phase resolution: 68 %
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Inline - MapIt
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  TR: 322.0 ms
  TE: 3.13 ms
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\\CLINICAL_PROTOCOLS_UMI\SPINE\C-T SPINE\CT SPINE_WWO_\AX T1 FS TSP POST
TA: 2:23 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 29
  Dist. factor: 25 %
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 31 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 310.0 ms
  TE: 3.13 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP2,3
Contrast - Common
  TR: 310.0 ms
  TE: 3.13 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
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Geometry - Common
  Slice group: 1
  Slices: 29
  Dist. factor: 25 %
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
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  TR: 310.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
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Geometry - Saturation
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  Position: L0.4 P35.9 F6.2 mm
  Orientation: C > T9.8 > S-0.7
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 254 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 29
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 254 mm
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System - Adjust Volume
  Position: L29.1 P70.6 F253.6 mm
  Orientation: T > C-4.5 > S2.4
  Rotation: 1.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 144 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 310.0 ms
  Concatenations: 1
  Segments: 1
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Inline - MapIt
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  TR: 310.0 ms
  TE: 3.13 ms
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