PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    ELBOW
      ELBOW W WO
        localizer
        localizer_sag+cor+tra
        COR STIR
        SAG STIR
        COR T1
        AX T1
        AX T2 FS
        AX T1 FS PRE
        AX T1 FS POST
        SAG T1 FS POST
        COR T1 FS POST

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\localizer
TA: 8.7 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.0 ms
  TE: 3.04 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 7.0 ms
  TE: 3.04 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 50 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 3.04 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 280 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.4×0.4×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 3
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.6 ms
  TE: 3.37 ms
  Averages: 1
  Concatenations: 9
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 7.6 ms
  TE: 3.37 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 3
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.6 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 9
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P18.0 H0.0 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 3
  Slice thickness: 6.0 mm
  Dist. factor: 50 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Segments: 1
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Physio - Signal1
  1st Signal/Mode: None
  TR: 7.6 ms
  Concatenations: 9
  Segments: 1
Physio - Cardiac
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  FoV read: 200 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 9
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Inline - MapIt
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  TR: 7.6 ms
  TE: 3.37 ms
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\COR STIR
TA: 4:42 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tir
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 13 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  TE: 40 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 4000.0 ms
  TE: 40 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 13 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Sat. region: 1
  Thickness: 90 mm
  Position: L0.0 P0.0 H110.0 mm
  Orientation: Transversal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 4.0 mm
  Dist. factor: 13 %
  FoV read: 120 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
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  Transversal: F >> H
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  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 120 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 13.4 ms
  Bandwidth: 159 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 69
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\SAG STIR
TA: 3:49 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 13 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3500.0 ms
  TE: 41 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 3500.0 ms
  TE: 41 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  TR: 3500.0 ms
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 90 mm
  Position: L11.5 P2.7 H88.7 mm
  Orientation: T > S-7.4 > C-1.7
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 1
Physio - Cardiac
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  Phase resolution: 70 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 13.8 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 64
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\COR T1
TA: 2:59 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 13 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 550.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 550.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Sat. region: 1
  Thickness: 90 mm
  Position: L0.0 P0.0 H110.0 mm
  Orientation: Transversal
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: F >> H
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 11.4 ms
  Bandwidth: 172 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 160
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\AX T1
TA: 3:15 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 600.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
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Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 3.0 mm
  Dist. factor: 17 %
  FoV read: 120 mm
  FoV phase: 100.0 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 2
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\AX T2 FS
TA: 3:44 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 6000.0 ms
  TE: 67 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 6000.0 ms
  TE: 67 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
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  TR: 6000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: On
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 120 mm
  A >> P: 120 mm
  F >> H: 88 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 11.2 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 35
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\AX T1 FS PRE
TA: 4:24 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 575.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 575.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Geometry - Common
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  TR: 575.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Adjustments
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  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
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Physio - Signal1
  1st Signal/Mode: None
  TR: 575.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 11.4 ms
  Bandwidth: 172 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 150
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\AX T1 FS POST
TA: 4:24 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - All
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\SAG T1 FS POST
TA: 3:12 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 625.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
Contrast - Common
  TR: 625.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
  Slice group: 1
  Slices: 20
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  TR: 625.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 20
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System - Miscellaneous
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  Transversal: H >> F
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 120 mm
  A >> P: 120 mm
  R >> L: 70 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 625.0 ms
  Concatenations: 2
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\ELBOW\ELBOW W WO\COR T1 FS POST
TA: 3:12 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 120 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 625.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FS
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Geometry - Common
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: F >> H
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 85.20 deg
  F >> H: 120 mm
  R >> L: 120 mm
  A >> P: 70 mm
  Reset: Off
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