PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    FOOT
      FOOT WO
        localizer_tra
        localizer_sag+cor+tra
        COR STIR
        COR T1
        AX STIR
        SAG STIR
        SAG T1
        AX T1
        AX DESS
        COR PD FS
      FOOT W/WO
        localizer_tra
        localizer_sag+cor+tra
        SAG T1
        SAG STIR
        COR STIR
        COR T1
        AX STIR
        AX T1
        COR PD FS
        AX T1 FS
        AX T1 FS +-C
        COR T1 FS +-C
        SAG T1 FS +-C
      DIABETIC FOOT
        localizer_tra
        localizer_sag+cor+tra
        SAG T1
        COR STIR
        AX STIR
        COR T1
        AX T1
        SAG STIR
        COR PD FS
        AX T1 FS
        TWIST PERF
        AX T1 FS +-C
        COR T1 FS +-C
        SAG T1 FS +-C
      MORTONS NEUROMA
        localizer_tra
        localizer_sag+cor+tra
        localizer_tra
        localizer_sag+cor+tra
        COR STIR
        COR T1
        AX STIR
        SAG STIR
        SAG T1
        AX T1
        AX DESS
        COR PD FS
      METAL SEQS
        localizer_tra
        localizer_sag+cor+tra
        SAG T1
        SAG STIR
        COR STIR
        COR T1
        AX STIR
        AX T1
        AX T1 DIXON FS
        AX T1 DIXON FS +-C
        SAG T1 DIXON FS +-C
        COR T1 DIXON FS +-C
      ACR SEQS
        COR T2_
        COR T2_
        COR T2 FS
        COR T2 FS
        AX T2 FS
        COR T2 (SHORT AXIS)
        AX T2 DIXON FS

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
Contrast - Common
  TR: 6.9 ms
  TE: 2.99 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.9 ms
  TE: 2.99 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 11
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 11
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P18.0 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 11
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\COR STIR
TA: 3:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 44.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3500.0 ms
  TE: 44.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P70.0 F3.0 mm
  Orientation: Coronal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\COR T1
TA: 3:28 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 9.8 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D)
  Coil elements: FA;TO
Contrast - Common
  TR: 550.0 ms
  TE: 9.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 5
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 5
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 5
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.82 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 74
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\AX STIR
TA: 4:54 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 4000.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
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  FoV phase: 121.9 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
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  FoV phase: 121.9 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 36
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\SAG STIR
TA: 2:45 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tirR
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3800.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
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Geometry - AutoAlign
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  Orientation: S > T-3.4
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 24
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 21
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\SAG T1
TA: 3:48 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 619.0 ms
  TE: 11 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 619.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
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  TR: 619.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 619.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.9 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 91
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\AX T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  TE: 10 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 475.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
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Geometry - AutoAlign
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  Orientation: Transversal
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 112.5 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 475.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 112.5 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\AX DESS
TA: 5:40 PM: REF Voxel size: 0.6×0.6×0.7 mmPAT: 2 Rel. SNR: 1.00  : de
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 14.3 %
  Slices per slab: 112
  FoV read: 150 mm
  FoV phase: 109.4 %
  Slice thickness: 0.70 mm
  TR: 18.88 ms
  TE: 7.24 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 18.88 ms
  TE: 7.24 ms
  Flip angle: 25 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 109.4 %
  Slice thickness: 0.70 mm
  Base resolution: 256
  Phase resolution: 95 %
  Slice resolution: 81 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 14.3 %
  Slices per slab: 112
  FoV read: 150 mm
  FoV phase: 109.4 %
  Slice thickness: 0.70 mm
  TR: 18.88 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
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System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 165 mm
  F >> H: 79 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 222 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT WO\COR PD FS
TA: 3:01 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  TE: 25.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: FA;TO
Contrast - Common
  TR: 2800.0 ms
  TE: 25.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
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  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Transversal: H >> F
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 122 mm
  F >> H: 150 mm
  A >> P: 132 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
Contrast - Common
  TR: 6.9 ms
  TE: 2.99 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
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  Liver registration: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: L30.5 A49.2 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: L33.1 A104.2 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L30.5 A31.2 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 11
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: TO
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: L30.5 A49.2 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: L33.1 A104.2 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L30.5 A31.2 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 11
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L30.5 A31.2 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 11
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\SAG T1
TA: 3:48 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 619.0 ms
  TE: 11 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 619.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 619.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 24
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 619.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.9 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 91
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\SAG STIR
TA: 2:45 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tirR
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3800.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 21
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\COR STIR
TA: 3:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 44.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3500.0 ms
  TE: 44.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P70.0 F3.0 mm
  Orientation: Coronal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\COR T1
TA: 3:28 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 9.8 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D)
  Coil elements: FA;TO
Contrast - Common
  TR: 550.0 ms
  TE: 9.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 5
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 5
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 5
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.82 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 74
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\AX STIR
TA: 4:54 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 4000.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
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  FoV phase: 121.9 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
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  FoV phase: 121.9 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 36
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\AX T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  TE: 10 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 475.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Navigator
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Geometry - Tim CT
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  FoV phase: 112.5 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 475.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  FoV phase: 112.5 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\COR PD FS
TA: 3:01 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  TE: 25.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: FA;TO
Contrast - Common
  TR: 2800.0 ms
  TE: 25.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
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Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
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  FoV phase: 81.3 %
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System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 122 mm
  R >> L: 150 mm
  A >> P: 132 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\AX T1 FS
TA: 1:53 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  TR: 581.0 ms
  TE: 18.0 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 581.0 ms
  TE: 18.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  TR: 581.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 112.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 169 mm
  F >> H: 110 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 581.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 112.5 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.94 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 63
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\AX T1 FS +-C
TA: 1:53 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - All
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\COR T1 FS +-C
TA: 1:43 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  TE: 20.0 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 600.0 ms
  TE: 20.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 122 mm
  F >> H: 150 mm
  A >> P: 132 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 4
Physio - Cardiac
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  FoV phase: 81.3 %
  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.82 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 41
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\FOOT W/WO\SAG T1 FS +-C
TA: 2:11 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  TE: 18.0 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 600.0 ms
  TE: 18.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
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  Concatenations: 3
Geometry - AutoAlign
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  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 24
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Rotation: 0.00 deg
  A >> P: 160 mm
  F >> H: 160 mm
  R >> L: 79 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.94 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 71
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
Contrast - Common
  TR: 6.9 ms
  TE: 2.99 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
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  Liver registration: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: L30.5 A49.2 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: L33.1 A104.2 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L30.5 A31.2 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 11
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: TO
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: L30.5 A49.2 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: L33.1 A104.2 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L30.5 A31.2 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 11
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L30.5 A31.2 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 11
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\SAG T1
TA: 3:48 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 619.0 ms
  TE: 11 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 619.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 619.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 24
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 619.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.9 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 91
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\COR STIR
TA: 3:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 44.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3500.0 ms
  TE: 44.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
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Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P70.0 F3.0 mm
  Orientation: Coronal
  Shape: Standard
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\AX STIR
TA: 4:54 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 4000.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
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  FoV phase: 121.9 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV phase: 121.9 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 36
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\COR T1
TA: 3:28 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 9.8 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D)
  Coil elements: FA;TO
Contrast - Common
  TR: 550.0 ms
  TE: 9.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
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  FoV phase: 81.3 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 5
Physio - Cardiac
  Magn. preparation: None
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  FoV phase: 81.3 %
  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 5
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.82 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 74
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\AX T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  TE: 10 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 475.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
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  FoV phase: 112.5 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 475.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV phase: 112.5 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\SAG STIR
TA: 2:45 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tirR
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3800.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: S > T-3.4
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 24
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 21
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\COR PD FS
TA: 3:01 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  TE: 25.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: FA;TO
Contrast - Common
  TR: 2800.0 ms
  TE: 25.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
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System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 122 mm
  R >> L: 150 mm
  A >> P: 132 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\AX T1 FS
TA: 3:41 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  TR: 581.0 ms
  TE: 14 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 581.0 ms
  TE: 14 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  TR: 581.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 169 mm
  F >> H: 110 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 581.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 112.5 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reduce Motion Sens.: On
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Echo spacing: 13.7 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 63
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\TWIST PERF
TA: 3:13 PM: FIX Voxel size: 0.9×0.9×2.5 mmPAT: 2 Rel. SNR: 1.00  : fldyn
Properties
  Prio recon: Off
  Load images to viewer: Off
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  Slice oversampling: 0.0 %
  Slices per slab: 40
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 2.50 mm
  TR: 4.30 ms
  TE: 1.73 ms
  Filter: None
  Coil elements: BO1-3;EN;SP3-5
Contrast - Common
  TR: 4.30 ms
  TE: 1.73 ms
  Flip angle: 12 deg
  Fat suppr.: None
Contrast - Dynamic
  Reconstruction: Magnitude
  Measurements: 40
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 2.50 mm
  Base resolution: 192
  Phase resolution: 75 %
  Slice resolution: 60 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 25 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
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  Slice oversampling: 0.0 %
  Slices per slab: 40
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 2.50 mm
  TR: 4.30 ms
Geometry - AutoAlign
  Slab group: 1
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: FIX
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  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: Low
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Angio - Common
  View sharing: TWIST
  Central region A: 25 %
  Sampling density B: 25 %
  Dynamic recon mode: Forward share
  Flip angle: 12 deg
  Temporal resolution: 4.62 s
  Measurements: 40
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Burn time-to-center: Off
  Temporal interpolation: 1
  Time to center: 9.2 s
Angio - Inline
  Subtract: Off
  Measurements: 40
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: On
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Optimization: Min. TE TR
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\AX T1 FS +-C
TA: 3:41 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
  Prio recon: Off
  Load images to viewer: On
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  TR: 581.0 ms
  TE: 14 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 581.0 ms
  TE: 14 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
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  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 4.0 mm
  TR: 581.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
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Geometry - Saturation
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 169 mm
  F >> H: 110 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reduce Motion Sens.: On
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Echo spacing: 13.7 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 63
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\COR T1 FS +-C
TA: 3:10 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  TE: 14 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 600.0 ms
  TE: 14 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 122 mm
  R >> L: 150 mm
  A >> P: 132 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 4
Physio - Cardiac
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  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 39
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\DIABETIC FOOT\SAG T1 FS +-C
TA: 3:23 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 600.0 ms
  TE: 14 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 27
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
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  Concatenations: 3
Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 150 mm
  F >> H: 150 mm
  R >> L: 110 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 100.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 56
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 4
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
Contrast - Common
  TR: 6.9 ms
  TE: 2.99 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
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  Orientation: Transversal
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
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  Liver registration: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 11
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 11
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P18.0 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 11
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
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Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
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  FoV read: 350 mm
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  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Tim CT
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  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
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  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\localizer_sag+cor+tra
TA: 0:17 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 11
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 11
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P18.0 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 11
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\COR STIR
TA: 3:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 44.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3500.0 ms
  TE: 44.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P70.0 F3.0 mm
  Orientation: Coronal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\COR T1
TA: 3:28 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 9.8 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D)
  Coil elements: FA;TO
Contrast - Common
  TR: 550.0 ms
  TE: 9.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 5
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 5
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 85 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 5
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.82 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 74
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\AX STIR
TA: 4:54 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 4000.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 121.9 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
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  FoV phase: 121.9 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
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  FoV phase: 121.9 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.34 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 36
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\SAG STIR
TA: 2:45 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tirR
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
  TE: 37.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 3800.0 ms
  TE: 37.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3800.0 ms
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Geometry - AutoAlign
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  Orientation: S > T-3.4
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 24
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 100.0 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 85 %
  Trajectory: Cartesian
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 21
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\SAG T1
TA: 3:48 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: S > T-3.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 619.0 ms
  TE: 11 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 619.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
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  TR: 619.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 619.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.9 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 91
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\AX T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  TE: 10 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 475.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 112.5 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
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Geometry - AutoAlign
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  Orientation: Transversal
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 112.5 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 475.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 112.5 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\AX DESS
TA: 5:40 PM: REF Voxel size: 0.6×0.6×0.7 mmPAT: 2 Rel. SNR: 1.00  : de
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 14.3 %
  Slices per slab: 112
  FoV read: 150 mm
  FoV phase: 109.4 %
  Slice thickness: 0.70 mm
  TR: 18.88 ms
  TE: 7.24 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 18.88 ms
  TE: 7.24 ms
  Flip angle: 25 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 109.4 %
  Slice thickness: 0.70 mm
  Base resolution: 256
  Phase resolution: 95 %
  Slice resolution: 81 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 14.3 %
  Slices per slab: 112
  FoV read: 150 mm
  FoV phase: 109.4 %
  Slice thickness: 0.70 mm
  TR: 18.88 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
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System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 165 mm
  F >> H: 79 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 222 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\MORTONS NEUROMA\COR PD FS
TA: 3:01 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  TE: 25.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: FA;TO
Contrast - Common
  TR: 2800.0 ms
  TE: 25.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
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  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Transversal: H >> F
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System - Adjust Volume
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 122 mm
  R >> L: 150 mm
  A >> P: 132 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\localizer_tra
TA: 8.6 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: BC
Contrast - Common
  TR: 6.9 ms
  TE: 2.99 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 6.0 mm
  Dist. factor: 100 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 5
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 5
Inline - Common
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  Liver registration: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\localizer_sag+cor+tra
TA: 0:26 PM: REF Voxel size: 0.6×0.6×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: R38.1 A56.8 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 9
  Dist. factor: 50 %
  Position: R22.0 A94.9 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: R46.6 A58.3 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.9 ms
  TE: 2.99 ms
  Averages: 1
  Concatenations: 17
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FA;TO
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: R38.1 A56.8 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 9
  Dist. factor: 50 %
  Position: R22.0 A94.9 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 5
  Dist. factor: 50 %
  Position: R46.6 A58.3 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
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  Concatenations: 17
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: R46.6 A58.3 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.9 ms
  Concatenations: 17
  Segments: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 17
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\SAG T1
TA: 3:58 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tseW
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 29
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  TE: 7.6 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 550.0 ms
  TE: 7.6 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 29
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 7 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 29
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 160 mm
  FoV phase: 125.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 7 mm
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Rotation: 72.00 deg
  F >> H: 160 mm
  A >> P: 200 mm
  R >> L: 96 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 160 mm
  FoV phase: 125.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.58 ms
  Bandwidth: 401 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 214
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\SAG STIR
TA: 5:44 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tirW
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  TR: 8360.0 ms
  TE: 38.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 8360.0 ms
  TE: 38.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
  Slice group: 1
  Slices: 30
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  TR: 8360.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
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System - Adjust Volume
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  R >> L: 99 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8360.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
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  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.6 ms
  Bandwidth: 504 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 20
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 15
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\COR STIR
TA: 7:53 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tirW
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Routine
  Slice group: 1
  Slices: 60
  Dist. factor: 10 %
  Position: R39.6 A85.4 F17.7 mm
  Orientation: C > T-28.8 > S-4.7
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 8130.0 ms
  TE: 38.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 8130.0 ms
  TE: 38.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 60
  Dist. factor: 10 %
  Position: R39.6 A85.4 F17.7 mm
  Orientation: C > T-28.8 > S-4.7
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 8130.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R39.6 A85.4 F17.7 mm
  Orientation: C > T-28.8 > S-4.7
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: R0.1 P53.1 H31.7 mm
  Orientation: C > T-30.8 > S0.1
  Shape: Standard
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 18 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 60
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 18 mm
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System - Adjust Volume
  Position: R39.6 A85.4 F17.7 mm
  Orientation: C > T-28.8 > S-4.7
  Rotation: 0.00 deg
  R >> L: 122 mm
  F >> H: 150 mm
  A >> P: 198 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8130.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 14
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 14
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\COR T1
TA: 2:07 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tseW
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Routine
  Slice group: 1
  Slices: 60
  Dist. factor: 10 %
  Position: R39.6 A85.4 F17.7 mm
  Orientation: C > T-28.8 > S-4.7
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 588.0 ms
  TE: 7.6 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 588.0 ms
  TE: 7.6 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  TR: 588.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 588.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.58 ms
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 70
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\AX STIR
TA: 2:39 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: Off Rel. SNR: 1.00  : tirW
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  FoV read: 180 mm
  FoV phase: 140.6 %
  Slice thickness: 3.0 mm
  TR: 4500.0 ms
  TE: 38.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 4500.0 ms
  TE: 38.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 180 mm
  FoV phase: 140.6 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 140.6 %
  Slice thickness: 3.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Phase enc. dir.: A >> P
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 14 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 180 mm
  FoV phase: 140.6 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 14 mm
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System - Adjust Volume
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Rotation: 93.00 deg
  R >> L: 180 mm
  A >> P: 254 mm
  F >> H: 99 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 140.6 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 6.38 ms
  Bandwidth: 401 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 34
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 15
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\AX T1
TA: 2:19 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 180 mm
  FoV phase: 140.6 %
  Slice thickness: 3.0 mm
  TR: 475.0 ms
  TE: 10 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 475.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
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  TR: 475.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Navigator
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System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 475.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 72
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\AX T1 DIXON FS
TA: 3:11 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 23
  Dist. factor: 10 %
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  FoV read: 180 mm
  FoV phase: 128.1 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 500.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 128.1 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 23
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  FoV phase: 128.1 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
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Geometry - Saturation
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R41.7 A77.2 F13.9 mm
  Orientation: T > C29.6 > S0.8
  Rotation: 93.00 deg
  R >> L: 180 mm
  A >> P: 231 mm
  F >> H: 101 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV phase: 128.1 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Reduce Motion Sens.: On
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Echo spacing: 10.6 ms
  Bandwidth: 401 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 94
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\AX T1 DIXON FS +-C
TA: 3:11 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - All
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\SAG T1 DIXON FS +-C
TA: 3:55 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 29
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 75 %
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  TR: 660.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 660.0 ms
  TE: 11 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
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Resolution - Common
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 29
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 125.0 %
  Slice thickness: 3.0 mm
  TR: 660.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 7 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 7 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: R44.7 A79.1 F7.2 mm
  Orientation: S > T-5.2 > C3.0
  Rotation: 72.00 deg
  F >> H: 160 mm
  A >> P: 200 mm
  R >> L: 96 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 660.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 125.0 %
  Phase resolution: 90 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Reduce Motion Sens.: On
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Echo spacing: 11 ms
  Bandwidth: 399 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 88
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\METAL SEQS\COR T1 DIXON FS +-C
TA: 2:14 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 660.0 ms
  TE: 11 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 84 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 10 %
  Position: R44.7 A79.1 F7.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 81.3 %
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  Concatenations: 3
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Navigator
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System - Adjust Volume
  Position: R44.7 A79.1 F7.2 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 122 mm
  F >> H: 150 mm
  A >> P: 149 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 660.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 81.3 %
  Phase resolution: 84 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 33
  Phase correction: Automatic
  RF pulse type: Fast
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\COR T2_
TA: 3:00 PM: FIX Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 5410.0 ms
  TE: 78.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FA;TO
Contrast - Common
  TR: 5410.0 ms
  TE: 78.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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  TR: 5410.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.7 A5.1 F2.9 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 10 %
  FoV read: 150 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 3 mm
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  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5410.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.78 ms
  Bandwidth: 206 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\COR T2_
TA: 3:00 PM: FIX Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Geometry - Navigator
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\COR T2 FS
TA: 2:50 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 42
  Dist. factor: 10 %
  Position: L1.5 P9.4 H1.5 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 150 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 5000.0 ms
  TE: 77 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 5000.0 ms
  TE: 77 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 47
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 42
  Dist. factor: 10 %
  Position: L1.5 P9.4 H1.5 mm
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  TR: 5000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.5 P9.4 H1.5 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 1 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 1 mm
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.5 P9.4 H1.5 mm
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 122 mm
  R >> L: 150 mm
  A >> P: 139 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5000.0 ms
  Concatenations: 2
Physio - Cardiac
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reduce Motion Sens.: On
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Echo spacing: 12.8 ms
  Bandwidth: 295 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 8
  Phase correction: Automatic
  RF pulse type: Normal
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 16
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\COR T2 FS
TA: 2:50 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Geometry - Navigator
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\AX T2 FS
TA: 3:27 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L1.5 P9.4 H1.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 150 mm
  FoV phase: 115.6 %
  Slice thickness: 3.0 mm
  TR: 6690.0 ms
  TE: 77 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 6690.0 ms
  TE: 77 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: On
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 115.6 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 35
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L1.5 P9.4 H1.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 115.6 %
  Slice thickness: 3.0 mm
  TR: 6690.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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System - Adjust Volume
  Position: L1.5 P9.4 H1.5 mm
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 174 mm
  F >> H: 99 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6690.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV phase: 115.6 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  RF pulse type: Normal
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\COR T2 (SHORT AXIS)
TA: 2:54 PM: FIX Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: R8.3 A111.6 F6.5 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 150 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  TE: 74.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: TO
Contrast - Common
  TR: 4000.0 ms
  TE: 74.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: R8.3 A111.6 F6.5 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 150 mm
  FoV phase: 87.5 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R8.3 A111.6 F6.5 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P50.0 H0.0 mm
  Orientation: Coronal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
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  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 87.5 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.3 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 14
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 10
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\FOOT\ACR SEQS\AX T2 DIXON FS
TA: 4:22 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
  Position: R16.1 A88.3 F43.2 mm
  Orientation: T > S19.3 > C16.3
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 90 %
  FoV read: 160 mm
  FoV phase: 106.3 %
  Slice thickness: 3.0 mm
  TR: 4000.0 ms
  TE: 79 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: FA;TO
Contrast - Common
  TR: 4000.0 ms
  TE: 79 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 160 mm
  FoV phase: 106.3 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 0 %
  Position: R16.1 A88.3 F43.2 mm
  Orientation: T > S19.3 > C16.3
  Phase enc. dir.: A >> P
  FoV read: 160 mm
  FoV phase: 106.3 %
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R16.1 A88.3 F43.2 mm
  Orientation: T > S19.3 > C16.3
  Phase enc. dir.: A >> P
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: Off
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 43 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 43 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Foot/Ankle
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System - Adjust Volume
  Position: R16.1 A88.3 F43.2 mm
  Orientation: T > S19.3 > C16.3
  Rotation: 96.20 deg
  R >> L: 160 mm
  A >> P: 170 mm
  F >> H: 90 mm
  Reset: Off
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Physio - Cardiac
  Magn. preparation: None
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 106.3 %
  Phase resolution: 85 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Reduce Motion Sens.: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Echo spacing: 13.2 ms
  Bandwidth: 319 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 32
  Phase correction: Automatic
  RF pulse type: Normal
  Gradient mode: Fast
  Red. EC sensitivity: Off
  Turbo factor: 9
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
