PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    HIP
      HIP WO
        localizer
        COR STIR
        COR T1
        AX T2 FS
        AX T1
        SAG PD FS
        COR PD FS
        AX-O PD FS
        COR DESS

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\localizer
TA: 0:14 PM: ISO Voxel size: 0.8×0.8×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 5
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.0 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 8
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4,5
Contrast - Common
  TR: 6.0 ms
  TE: 2.38 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 5
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 8
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 8.0 mm
  Dist. factor: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651811 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.0 ms
  Concatenations: 8
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 8
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.0 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\COR STIR
TA: 2:27 PM: ISO Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 4560.0 ms
  TE: 46.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 4560.0 ms
  TE: 46.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 150 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 4560.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 80 mm
  Position: L18.0 A18.4 H95.1 mm
  Orientation: Transversal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 128 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 380 mm
  FoV phase: 96.9 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 128 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4560.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 150 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 380 mm
  FoV phase: 96.9 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.14 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 31
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 8
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\COR T1
TA: 3:32 PM: ISO Voxel size: 1.0×1.0×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 500.0 ms
  TE: 14 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 500.0 ms
  TE: 14 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 27
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  TR: 500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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System - Adjustments
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  Assume Dominant Fat: On
  Assume Silicone: Off
  Adjustment Tolerance: Auto
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 13.9 ms
  Bandwidth: 119 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 104
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\AX T2 FS
TA: 2:52 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 8500.0 ms
  TE: 73.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4-6
Contrast - Common
  TR: 8500.0 ms
  TE: 73.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 8500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
  Special sat.: Parallel H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 117 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 340 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 117 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 298 mm
  R >> L: 340 mm
  F >> H: 220 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 87.5 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.12 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\AX T1
TA: 3:29 PM: ISO Voxel size: 1.3×1.3×5.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 340 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  TR: 505.0 ms
  TE: 7.4 ms
  Averages: 2
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4-6
Contrast - Common
  TR: 505.0 ms
  TE: 7.4 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 130 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
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  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  TR: 505.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Geometry - Navigator
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Geometry - Tim CT
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  FoV phase: 90.6 %
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
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  A >> P: 309 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 505.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 90.6 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.38 ms
  Bandwidth: 219 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 68
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: TR
  Max. TR: 550.0 ms
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\SAG PD FS
TA: 2:19 PM: ISO Voxel size: 0.7×0.7×3.5 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 2890.0 ms
  TE: 27 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP5,6
Contrast - Common
  TR: 2890.0 ms
  TE: 27 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 2890.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  Initial Position: R102.7 P39.9 H45.6
  R: 102.7 mm
  P: 39.9 mm
  H: 45.6 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Sagittal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel R/L
  Gap: 11 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 46 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 3.5 mm
  Dist. factor: 0 %
  FoV read: 180 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 46 mm
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System - Adjust Volume
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 180 mm
  A >> P: 180 mm
  R >> L: 88 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2890.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9 ms
  Bandwidth: 219 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 46
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\COR PD FS
TA: 2:23 PM: ISO Voxel size: 0.7×0.7×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R101.9 P41.5 H45.6 mm
  Orientation: Coronal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3400.0 ms
  TE: 28.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO2,3;SP5,6
Contrast - Common
  TR: 3400.0 ms
  TE: 28.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
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  Position: R101.9 P41.5 H45.6 mm
  Orientation: Coronal
  Phase enc. dir.: H >> F
  FoV read: 170 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3400.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R101.9 P41.5 H45.6 mm
  Orientation: Coronal
  Phase enc. dir.: H >> F
  Initial Position: R101.9 P41.5 H45.6
  R: 101.9 mm
  P: 41.5 mm
  H: 45.6 mm
  Initial Rotation: -90.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
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  Special sat.: Parallel P
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 170 mm
  FoV phase: 100.0 %
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System - Adjust Volume
  Position: R101.9 P41.5 H45.6 mm
  Orientation: Coronal
  Rotation: -90.00 deg
  F >> H: 170 mm
  R >> L: 170 mm
  A >> P: 75 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3400.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 170 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.32 ms
  Bandwidth: 199 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 20
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\AX-O PD FS
TA: 4:47 PM: ISO Voxel size: 0.7×0.7×3.0 mmPAT: Off Rel. SNR: 1.00  : tseR_rr
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 0 %
  Position: R99.4 P39.9 H41.5 mm
  Orientation: T > S42.2
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 170 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3000.0 ms
  TE: 29.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP5,6
Contrast - Common
  TR: 3000.0 ms
  TE: 29.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 3
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 170 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 20
  Dist. factor: 0 %
  Position: R99.4 P39.9 H41.5 mm
  Orientation: T > S42.2
  Phase enc. dir.: A >> P
  FoV read: 170 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3000.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R99.4 P39.9 H41.5 mm
  Orientation: T > S42.2
  Phase enc. dir.: A >> P
  Initial Position: R99.4 P39.9 H41.5
  R: 99.4 mm
  P: 39.9 mm
  H: 41.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > S
  T > S: 42.2
  > C: 0.0
Geometry - Saturation
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  Restore magn.: On
  Special sat.: Parallel F/H
  Gap: 11 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 41 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 20
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  FoV phase: 90.6 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 41 mm
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System - Adjust Volume
  Position: R99.4 P39.9 H41.5 mm
  Orientation: T > S42.2
  Rotation: 0.00 deg
  A >> P: 155 mm
  R >> L: 170 mm
  F >> H: 60 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3000.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV phase: 90.6 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.62 ms
  Bandwidth: 199 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 31
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\HIP\HIP WO\COR DESS
TA: 5:41 PM: ISO Voxel size: 0.6×0.6×0.6 mmPAT: 2 Rel. SNR: 1.00  : de_rr
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  Slice oversampling: 0.0 %
  Slices per slab: 104
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 0.60 mm
  TR: 19.50 ms
  TE: 7.10 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP5-7
Contrast - Common
  TR: 19.50 ms
  TE: 7.10 ms
  Flip angle: 25 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 0.60 mm
  Base resolution: 256
  Phase resolution: 91 %
  Slice resolution: 83 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  Slice oversampling: 0.0 %
  Slices per slab: 104
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 0.60 mm
  TR: 19.50 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 49.90 deg
  F >> H: 160 mm
  R >> L: 160 mm
  A >> P: 63 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651811 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Off
  Flow comp.: Read
  Multi-slice mode: Sequential
  Bandwidth: 195 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
Sequence - Assistant
  Mode: Off
