PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    KNEE
      KNEE ROUTINE
        localizer_tra
        localizer_sag+cor+tra
        AX T1
        COR PD FS
        AX PD FS
        SAG PD FS
        SAG PD
        COR-O PD FS
        AX T1 FS PRE
        AX T1 FS +-C
        SAG T1 FS +-C
        COR T1 FS+- C

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\localizer_tra
TA: 5.9 s PM: REF Voxel size: 0.7×0.7×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.7 ms
  TE: 3.28 ms
  Averages: 1
  Concatenations: 3
  Filter: Elliptical filter
  Coil elements: SP1-8
Contrast - Common
  TR: 7.7 ms
  TE: 3.28 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.7 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 3
  Slice thickness: 6.0 mm
  Dist. factor: 50 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.7 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.7 ms
  TE: 3.28 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\localizer_sag+cor+tra
TA: 0:15 PM: REF Voxel size: 0.5×0.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: R85.6 A40.7 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 100 %
  Position: L85.6 A40.7 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 3
  Dist. factor: 100 %
  Position: L85.6 A16.7 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.7 ms
  TE: 3.28 ms
  Averages: 1
  Concatenations: 9
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: K15
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Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: R85.6 A40.7 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 100 %
  Position: L85.6 A40.7 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 3
  Dist. factor: 100 %
  Position: L85.6 A16.7 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 250 mm
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  Concatenations: 9
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L85.6 A16.7 H0.0 mm
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Geometry - Tim CT
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  Dist. factor: 100 %
  FoV read: 250 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
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Physio - Signal1
  1st Signal/Mode: None
  TR: 7.7 ms
  Concatenations: 9
  Segments: 1
Physio - Cardiac
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 9
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\AX T1
TA: 1:04 PM: REF Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
  Prio recon: Off
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 25 %
  Position: R71.0 A25.3 F41.7 mm
  Orientation: T > S1.5 > C-0.1
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 647.0 ms
  TE: 9.3 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: K15
Contrast - Common
  TR: 647.0 ms
  TE: 9.3 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 25 %
  Position: R71.0 A25.3 F41.7 mm
  Orientation: T > S1.5 > C-0.1
  Phase enc. dir.: R >> L
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 647.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R71.0 A25.3 F41.7 mm
  Orientation: T > S1.5 > C-0.1
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 180 mm
  FoV phase: 100.0 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 647.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.28 ms
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 48
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\COR PD FS
TA: 3:42 PM: REF Voxel size: 0.6×0.6×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 17 %
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2980.0 ms
  TE: 39.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: K15
Contrast - Common
  TR: 2980.0 ms
  TE: 39.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 17 %
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2980.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 17 %
  FoV read: 160 mm
  FoV phase: 100.0 %
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Rotation: 0.00 deg
  R >> L: 160 mm
  F >> H: 160 mm
  A >> P: 105 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2980.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.84 ms
  Bandwidth: 193 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 36
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\AX PD FS
TA: 3:32 PM: REF Voxel size: 0.6×0.6×4.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 28
  Dist. factor: 0 %
  Position: R69.5 A18.4 F3.0 mm
  Orientation: T > C1.2
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3630.0 ms
  TE: 41 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: K15
Contrast - Common
  TR: 3630.0 ms
  TE: 41 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 28
  Dist. factor: 0 %
  Position: R69.5 A18.4 F3.0 mm
  Orientation: T > C1.2
  Phase enc. dir.: R >> L
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3630.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R69.5 A18.4 F3.0 mm
  Orientation: T > C1.2
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 28
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 150 mm
  FoV phase: 100.0 %
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System - Adjust Volume
  Position: R69.5 A18.4 F3.0 mm
  Orientation: T > C1.2
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 150 mm
  F >> H: 112 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3630.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 100.0 %
  Phase resolution: 90 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 193 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 28
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 10
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\SAG PD FS
TA: 4:06 PM: REF Voxel size: 0.6×0.6×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: R82.5 A20.7 F1.8 mm
  Orientation: S > C-6.2 > T-3.7
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 90 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2000.0 ms
  TE: 38.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: K15
Contrast - Common
  TR: 2000.0 ms
  TE: 38.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 84 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: R82.5 A20.7 F1.8 mm
  Orientation: S > C-6.2 > T-3.7
  Phase enc. dir.: H >> F
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R82.5 A20.7 F1.8 mm
  Orientation: S > C-6.2 > T-3.7
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 70 mm
  Position: R6.5 P33.2 H200.0 mm
  Orientation: T > C-14.0 > S2.7
  Shape: Standard
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
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System - Adjust Volume
  Position: R82.5 A20.7 F1.8 mm
  Orientation: S > C-6.2 > T-3.7
  Rotation: 90.07 deg
  F >> H: 150 mm
  A >> P: 150 mm
  R >> L: 120 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 2
Physio - Cardiac
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  Phase resolution: 84 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.56 ms
  Bandwidth: 219 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 59
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\SAG PD
TA: 4:22 PM: REF Voxel size: 0.6×0.6×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 17 %
  Position: R82.5 A20.7 F1.8 mm
  Orientation: S > C-6.2 > T-3.7
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 90 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2800.0 ms
  TE: 27.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: K15
Contrast - Common
  TR: 2800.0 ms
  TE: 27.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 17 %
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  TR: 2800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 3.0 mm
  Dist. factor: 17 %
  FoV read: 150 mm
  FoV phase: 100.0 %
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System - Adjust Volume
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  R >> L: 112 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2800.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.84 ms
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 46
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 8
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\COR-O PD FS
TA: 3:38 PM: REF Voxel size: 0.5×0.5×3.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3010.0 ms
  TE: 47.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: K15
Contrast - Common
  TR: 3010.0 ms
  TE: 47.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
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  TR: 3010.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 150 mm
  FoV phase: 100.0 %
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System - Adjust Volume
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Rotation: 0.00 deg
  R >> L: 150 mm
  F >> H: 150 mm
  A >> P: 75 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3010.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.32 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 35
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\AX T1 FS PRE
TA: 2:54 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 33 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  TE: 18 ms
  Averages: 2
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: FL
Contrast - Common
  TR: 600.0 ms
  TE: 18 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 33 %
  Position: Isocenter
  Orientation: Transversal
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  TR: 600.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 33 %
  FoV read: 150 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 150 mm
  A >> P: 150 mm
  F >> H: 119 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 3
Physio - Cardiac
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  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 47
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\AX T1 FS +-C
TA: 2:54 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - All
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\SAG T1 FS +-C
TA: 3:59 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 90 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 600.0 ms
  TE: 16 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: K15
Contrast - Common
  TR: 600.0 ms
  TE: 16 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.0 P33.4 H15.6 mm
  Orientation: C > T-25.0
  Shape: Standard
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.0 mm
  Dist. factor: 17 %
  FoV read: 150 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 150 mm
  A >> P: 150 mm
  R >> L: 116 mm
  Reset: Off
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Physio - Cardiac
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  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8 ms
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 130
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\KNEE\KNEE ROUTINE\COR T1 FS+- C
TA: 2:18 PM: ISO Voxel size: 0.6×0.6×3.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 33 %
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 697.0 ms
  TE: 18 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: K15
Contrast - Common
  TR: 697.0 ms
  TE: 18 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 33 %
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
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  TR: 697.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 3.0 mm
  Dist. factor: 33 %
  FoV read: 150 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
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System - Adjust Volume
  Position: R82.2 A23.1 F1.2 mm
  Orientation: C > S5.2 > T-3.7
  Rotation: 0.00 deg
  R >> L: 150 mm
  F >> H: 150 mm
  A >> P: 99 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 697.0 ms
  Concatenations: 2
Physio - Cardiac
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  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9 ms
  Bandwidth: 190 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 96
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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