PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    LOWER LONG BONES
      LONG BONES (1-STATION <375 FH FOV)
        LOC
        LOC SPECFIC SIDE
        COR STIR
        SAG STIR
        COR T1
        SAG T1
        AX T2 FS
        AX T1
        AX 3D T1 FS
        AX 3D T1 FS +-C
        COR 3D T1 FS +-C
        SAG 3D T1 FS +-C

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\LOC
TA: 0:18 PM: ISO Voxel size: 1.8×1.8×8.0 mmPAT: Off Rel. SNR: 1.00  : h
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 97 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
Contrast - Common
  TR: 1500.0 ms
  TE: 97 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: 4/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 7
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 7 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 7 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 7
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 450 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 7
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 4.64 ms
  Bandwidth: 399 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Turbo factor: 256
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\LOC SPECFIC SIDE
TA: 0:18 PM: ISO Voxel size: 1.8×1.8×8.0 mmPAT: Off Rel. SNR: 1.00  : h
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: R141.7 P90.2 H12.5 mm
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: R139.9 P86.8 H6.8 mm
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: R141.4 P77.1 H5.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 97 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
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Geometry - Common
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  Position: R141.7 P90.2 H12.5 mm
  Orientation: C > T-1.7 > S-0.2
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  Position: R139.9 P86.8 H6.8 mm
  Orientation: S > T9.9
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  Position: R141.4 P77.1 H5.9 mm
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Geometry - AutoAlign
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  Position: R141.4 P77.1 H5.9 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 9 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 9 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\COR STIR
TA: 2:34 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  TE: 38.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 4000.0 ms
  TE: 38.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 350 mm
  FoV phase: 115.6 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 115.6 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.48 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 37
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 6
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\SAG STIR
TA: 2:58 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  TR: 4200.0 ms
  TE: 42.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: PA2-4;SP6-8
Contrast - Common
  TR: 4200.0 ms
  TE: 42.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 27
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  TR: 4200.0 ms
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Navigator
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Geometry - Tim CT
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  FoV read: 300 mm
  FoV phase: 121.9 %
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4200.0 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 121.9 %
  Phase resolution: 70 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.32 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 41
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\COR T1
TA: 3:05 PM: ISO Voxel size: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.7 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 650.0 ms
  TE: 9.7 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Navigator
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Geometry - Tim CT
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  FoV read: 350 mm
  FoV phase: 115.6 %
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 350 mm
  R >> L: 405 mm
  A >> P: 191 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 115.6 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.68 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 70
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\SAG T1
TA: 2:06 PM: ISO Voxel size: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.4 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: PA2-4;SP6-8
Contrast - Common
  TR: 650.0 ms
  TE: 9.4 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 300 mm
  FoV phase: 121.9 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
  FoV read: 300 mm
  FoV phase: 121.9 %
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Navigator
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Geometry - Tim CT
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  FoV read: 300 mm
  FoV phase: 121.9 %
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 180.00 deg
  A >> P: 300 mm
  F >> H: 366 mm
  R >> L: 191 mm
  Reset: Off
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Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 121.9 %
  Phase resolution: 70 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.4 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 95
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX T2 FS
TA: 1:46 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 5500.0 ms
  TE: 66.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;PA6;SP4-7
Contrast - Common
  TR: 5500.0 ms
  TE: 66.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  Base resolution: 384
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 5500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 45
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
System - Miscellaneous
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 325 mm
  R >> L: 400 mm
  F >> H: 180 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 81.3 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.26 ms
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 17
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
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\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX T2 FS
TA: 1:46 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 170 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 170 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX T1
TA: 1:59 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 4.0 mm
  TR: 750.0 ms
  TE: 9.8 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;PA6;SP4-7
Contrast - Common
  TR: 750.0 ms
  TE: 9.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
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  TR: 750.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 750.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.8 ms
  Bandwidth: 181 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 51
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX T1
TA: 1:59 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 170 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 170 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX 3D T1 FS
TA: 2:02 PM: ISO Voxel size: 1.1×1.1×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R86.4 P61.1 H0.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  Slice oversampling: 10.0 %
  Slices per slab: 160
  FoV read: 400 mm
  FoV phase: 82.4 %
  Slice thickness: 1.2 mm
  TR: 12.30 ms
  TE: 5.57 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 12.30 ms
  TE: 5.57 ms
  Flip angle: 10.0 deg
  Fat suppr.: Water excit. normal
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 82.4 %
  Slice thickness: 1.2 mm
  Base resolution: 352
  Phase resolution: 84 %
  Slice resolution: 53 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R86.4 P61.1 H0.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 10.0 %
  Slices per slab: 160
  FoV read: 400 mm
  FoV phase: 82.4 %
  Slice thickness: 1.2 mm
  TR: 12.30 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R86.4 P61.1 H0.1 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Water excit. normal
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R86.4 P61.1 H0.1 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 330 mm
  R >> L: 400 mm
  F >> H: 192 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651810 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 50.7 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Angio
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 12.30 ms
  TE: 5.57 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX 3D T1 FS
TA: 2:02 PM: ISO Voxel size: 1.1×1.1×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R86.4 P61.1 F170.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  Slice oversampling: 10.0 %
  Slices per slab: 160
  FoV read: 400 mm
  FoV phase: 82.4 %
  Slice thickness: 1.2 mm
  TR: 12.30 ms
  TE: 5.57 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: BO1-3;SP1-3
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Geometry - Common
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  Position: R86.4 P61.1 F170.4 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R86.4 P61.1 F170.4 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 170 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 170 mm
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System - Adjust Volume
  Position: R86.4 P61.1 F170.4 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX 3D T1 FS +-C
TA: 2:02 PM: ISO Voxel size: 1.1×1.1×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R86.4 P61.1 H0.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  Slice oversampling: 10.0 %
  Slices per slab: 160
  FoV read: 400 mm
  FoV phase: 82.4 %
  Slice thickness: 1.2 mm
  TR: 12.30 ms
  TE: 5.57 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: BO1-3;SP1-3
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Geometry - Common
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  Position: R86.4 P61.1 H0.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R86.4 P61.1 H0.1 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: R86.4 P61.1 H0.1 mm
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\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\AX 3D T1 FS +-C
TA: 2:02 PM: ISO Voxel size: 1.1×1.1×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R86.4 P61.1 F170.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  Slice oversampling: 10.0 %
  Slices per slab: 160
  FoV read: 400 mm
  FoV phase: 82.4 %
  Slice thickness: 1.2 mm
  TR: 12.30 ms
  TE: 5.57 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: BO1-3;SP1-3
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Geometry - Common
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  Position: R86.4 P61.1 F170.4 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R86.4 P61.1 F170.4 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 170 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 170 mm
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System - Adjust Volume
  Position: R86.4 P61.1 F170.4 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\COR 3D T1 FS +-C
TA: 3:55 PM: ISO Voxel size: 1.1×1.1×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  Slice oversampling: 6.7 %
  Slices per slab: 240
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 1.2 mm
  TR: 13.60 ms
  TE: 6.08 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 13.60 ms
  TE: 6.08 ms
  Flip angle: 10.0 deg
  Fat suppr.: Water excit. normal
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 1.2 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 6.7 %
  Slices per slab: 240
  FoV read: 350 mm
  FoV phase: 115.6 %
  Slice thickness: 1.2 mm
  TR: 13.60 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 350 mm
  R >> L: 405 mm
  A >> P: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 98.5 s
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
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  TR: 13.60 ms
  TE: 6.08 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\LOWER LONG BONES\LONG BONES (1-STATION <375 FH FOV)\SAG 3D T1 FS +-C
TA: 4:05 PM: ISO Voxel size: 1.2×1.2×1.2 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  Slice oversampling: 8.3 %
  Slices per slab: 192
  FoV read: 300 mm
  FoV phase: 118.8 %
  Slice thickness: 1.2 mm
  TR: 13.50 ms
  TE: 6.04 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Normalize
  Coil elements: PA2-4;SP6-8
Contrast - Common
  TR: 13.50 ms
  TE: 6.04 ms
  Flip angle: 10.0 deg
  Fat suppr.: Water excit. normal
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 118.8 %
  Slice thickness: 1.2 mm
  Base resolution: 256
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
  Slice oversampling: 8.3 %
  Slices per slab: 192
  FoV read: 300 mm
  FoV phase: 118.8 %
  Slice thickness: 1.2 mm
  TR: 13.50 ms
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 180.00 deg
  A >> P: 300 mm
  F >> H: 357 mm
  R >> L: 231 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651826 MHz
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Inline - Common
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  Time to center: 103.3 s
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Inline - MapIt
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  TR: 13.50 ms
  TE: 6.04 ms
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