PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    UPPER LONG BONES 2ST
      LONG BONES ARM (2-STATION)
        LOC
        LOC SPECFIC SIDE
        COR STIR
        SAG STIR
        COR T1
        SAG T1
        AX T2 FS
        AX T1
        AX T1 FS
        AX T1 FS +-C
        COR T1 FS +-C
        SAG T1 FS +-C

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\LOC
TA: 0:18 PM: ISO Voxel size: 1.6×1.6×8.0 mmPAT: Off Rel. SNR: 1.00  : h  | Substep: 1/2
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 98 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
Contrast - Common
  TR: 1500.0 ms
  TE: 98 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: 4/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: Isocenter
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 7
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 7 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 7 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651826 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 7
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 7
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 4.66 ms
  Bandwidth: 399 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Turbo factor: 256
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\LOC
TA: 0:18 PM: ISO Voxel size: 1.6×1.6×8.0 mmPAT: Off Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: L0.0 P0.0 F346.0 mm
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: L0.0 P0.0 F346.0 mm
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: L0.0 P0.0 F202.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 98 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
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Geometry - Common
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  Position: L0.0 P0.0 F346.0 mm
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  Position: L0.0 P0.0 F346.0 mm
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  Position: L0.0 P0.0 F202.0 mm
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Geometry - AutoAlign
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  Position: L0.0 P0.0 F202.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 325 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 325 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\LOC SPECFIC SIDE
TA: 0:18 PM: ISO Voxel size: 1.6×1.6×8.0 mmPAT: Off Rel. SNR: 1.00  : h  | Substep: 1/2
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: R141.7 P90.2 H12.5 mm
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: R139.9 P86.8 H6.8 mm
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: R141.4 P77.1 H5.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 98 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
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Geometry - Common
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  Position: R141.7 P90.2 H12.5 mm
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  Position: R139.9 P86.8 H6.8 mm
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  Position: R141.4 P77.1 H5.9 mm
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Geometry - AutoAlign
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  Position: R141.4 P77.1 H5.9 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 9 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 9 mm
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\LOC SPECFIC SIDE
TA: 0:18 PM: ISO Voxel size: 1.6×1.6×8.0 mmPAT: Off Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 100 %
  Position: R141.7 P90.2 F314.5 mm
  Orientation: C > T-1.7 > S-0.2
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 4
  Dist. factor: 100 %
  Position: R139.9 P86.8 F320.2 mm
  Orientation: S > T9.9
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 4
  Dist. factor: 700 %
  Position: R141.4 P77.1 F177.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 1500.0 ms
  TE: 98 ms
  Averages: 1
  Concatenations: 7
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: FL;SP4-7
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Geometry - Common
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  Position: R141.7 P90.2 F314.5 mm
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  Position: R139.9 P86.8 F320.2 mm
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  Position: R141.4 P77.1 F177.1 mm
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Geometry - AutoAlign
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  Position: R141.4 P77.1 F177.1 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\COR STIR
TA: 2:34 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir  | Substep: 1/2
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  TE: 41.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 4000.0 ms
  TE: 41.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 225 mm
  FoV phase: 175.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 225 mm
  FoV phase: 175.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.14 ms
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 37
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 8
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\COR STIR
TA: 2:34 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\SAG STIR
TA: 2:34 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 4000.0 ms
  TE: 40.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: PA2-4;SP6-8
Contrast - Common
  TR: 4000.0 ms
  TE: 40.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 38
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 6.66 ms
  Bandwidth: 250 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 37
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 9
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\SAG STIR
TA: 2:34 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\COR T1
TA: 2:25 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.3 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 650.0 ms
  TE: 9.3 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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  TR: 650.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 180.00 deg
  R >> L: 225 mm
  F >> H: 394 mm
  A >> P: 179 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.32 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 109
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\COR T1
TA: 2:25 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\SAG T1
TA: 2:25 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.3 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: PA2-4;SP6-8
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 180.00 deg
  A >> P: 225 mm
  F >> H: 394 mm
  R >> L: 179 mm
  Reset: Off
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\SAG T1
TA: 2:25 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Resolution - Common
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T2 FS
TA: 1:38 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 6000.0 ms
  TE: 67.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;PA6;SP4-7
Contrast - Common
  TR: 6000.0 ms
  TE: 67.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 38
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 6000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 50 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 180 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 160 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.64 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 14
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 11
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T2 FS
TA: 1:38 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 150 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 150 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T1
TA: 1:43 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 678.0 ms
  TE: 10 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;PA6;SP4-7
Contrast - Common
  TR: 678.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
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  TR: 678.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 678.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10.2 ms
  Bandwidth: 182 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 49
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T1
TA: 1:43 PM: ISO Voxel size: 0.6×0.6×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 150 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 150 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T1 FS
TA: 1:51 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 650.0 ms
  TE: 8.8 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;PA6;SP4-7
Contrast - Common
  TR: 650.0 ms
  TE: 8.8 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Geometry - Common
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  TR: 650.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 160 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.76 ms
  Bandwidth: 224 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 40
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T1 FS
TA: 1:51 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 150 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 150 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T1 FS +-C
TA: 1:51 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: Off - All
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\AX T1 FS +-C
TA: 1:51 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 150 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 150 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\COR T1 FS +-C
TA: 2:30 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.3 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;PA4;SP4-6
Contrast - Common
  TR: 650.0 ms
  TE: 9.3 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
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  Concatenations: 3
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: F >> H
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
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  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 225 mm
  FoV phase: 175.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 180.00 deg
  R >> L: 225 mm
  F >> H: 394 mm
  A >> P: 179 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV read: 225 mm
  FoV phase: 175.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.32 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 74
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\COR T1 FS +-C
TA: 2:30 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\SAG T1 FS +-C
TA: 2:30 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 225 mm
  FoV phase: 175.0 %
  Slice thickness: 5.0 mm
  TR: 650.0 ms
  TE: 9.3 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;PA4;SP4-6
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Geometry - Common
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  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 225 mm
  A >> P: 394 mm
  R >> L: 179 mm
  Reset: Off
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\\CLINICAL_PROTOCOLS_UMI\MSK\UPPER LONG BONES\LONG BONES ARM (2-STATION)\SAG T1 FS +-C
TA: 2:30 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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