PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    NON-HYPER ACUTE STROKE
      NON HYPERACUTE N
        3PL LOC HD-NK
        AX DWI
        AX FLAIR
        AX SWI
        TIMING RUN TWIST
        3D TOF
        CE MRA
        CE MRV HEAD
        AX T1 FS POST
        AX FLAIR POST
        AX PERFUSION
        AX GRE

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\3PL LOC HD-NK
TA: 0:15 PM: ISO Voxel size: 2.3×2.3×10.0 mmPAT: 2 Rel. SNR: 1.00  : tfi
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: L0.0 P0.0 F3.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 30 %
  Position: L0.0 P0.0 F3.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 5
  Dist. factor: 30 %
  Position: L0.0 P0.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 10.0 mm
  TR: 3.52 ms
  TE: 1.76 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 3.52 ms
  TE: 1.76 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 58 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 10.0 mm
  Base resolution: 192
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: L0.0 P0.0 F3.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 30 %
  Position: L0.0 P0.0 F3.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 5
  Dist. factor: 30 %
  Position: L0.0 P0.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 10.0 mm
  TR: 3.52 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P0.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L0.0 P0.0 F1.5 mm
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 450 mm
  F >> H: 453 mm
  R >> L: 450 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 3.52 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX DWI
TA: 2:05 PM: ISO Voxel size: 1.7×1.7×5.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 26
  Dist. factor: 20 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4100 ms
  TE: 89.0 ms
  Averages: 3
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 4100 ms
  TE: 89.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 130
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 26
  Dist. factor: 20 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 4100 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: A >> P
  Initial Position: L1.1 P9.8 H56.3
  L: 1.1 mm
  P: 9.8 mm
  H: 56.3 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: -6.1
  > S: -2.3
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 56 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 56 mm
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  Coil Combine Mode: Sum of Squares
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System - Adjust Volume
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 155 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4100 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Bipolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
  b-value 3: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Mosaic: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Bipolar
  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 500 s/mm²
  b-value 3: 1000 s/mm²
  b-value 1: 3
  b-value 2: 3
  b-value 3: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.77 ms
  Bandwidth: 1480 Hz/Px
Sequence - Part 2
  EPI factor: 130
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX FLAIR
TA: 3:02 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  TE: 93.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 9000.0 ms
  TE: 93.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 89 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
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  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 3.5 mm
  Dist. factor: 25 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjust Volume
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Rotation: 90.00 deg
  R >> L: 230 mm
  A >> P: 230 mm
  F >> H: 140 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 89 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.28 ms
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX SWI
TA: 4:16 PM: ISO Voxel size: 0.4×0.4×2.2 mmPAT: 2 Rel. SNR: 1.00  : swi_r
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 72
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 2.20 mm
  TR: 47.0 ms
  TE: 38.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 47.0 ms
  TE: 38.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 2.20 mm
  Base resolution: 256
  Phase resolution: 79 %
  Slice resolution: 75 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 72
  FoV read: 230 mm
  FoV phase: 87.5 %
  Slice thickness: 2.20 mm
  TR: 47.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slabs: 1
  Slices per slab: 72
  Slice thickness: 2.20 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 87.5 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 202 mm
  A >> P: 230 mm
  F >> H: 159 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 47.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 87.5 %
  Phase resolution: 79 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 47.0 ms
  TE: 38.00 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 80 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slab-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\TIMING RUN TWIST
TA: 0:48 PM: ISO Voxel size: 1.6×1.6×2.0 mmPAT: 2 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 64
  FoV read: 400 mm
  FoV phase: 93.8 %
  Slice thickness: 2.00 mm
  TR: 2.27 ms
  TE: 0.81 ms
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 2.27 ms
  TE: 0.81 ms
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Reconstruction: Magnitude
  Measurements: 25
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 93.8 %
  Slice thickness: 2.00 mm
  Base resolution: 256
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  View sharing: TWIST
  Central region A: 17 %
  Sampling density B: 20 %
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
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  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 64
  FoV read: 400 mm
  FoV phase: 93.8 %
  Slice thickness: 2.00 mm
  TR: 2.27 ms
Geometry - AutoAlign
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  Orientation: Coronal
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  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Angio - Common
  View sharing: TWIST
  Central region A: 17 %
  Sampling density B: 20 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 25 deg
  Virt. temporal resolution: 0.79 s
  Measurements: 25
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 2
  Time to center: 5.5 s
Angio - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 25
  StdDev: Off
  Save original images: Off
Angio - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: Off
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Optimization: Min. TE TR
  Bandwidth: 750 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\3D TOF
TA: 4:34 PM: ISO Voxel size: 0.4×0.4×0.5 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 5
  Dist. factor: -17.50 %
  Position: L2.0 A22.0 F8.7 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 0.50 mm
  TR: 24.0 ms
  TE: 7.00 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 24.0 ms
  TE: 7.00 ms
  TD: 0.000 ms
  MTC: Off
  Flip angle: 25 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 0.50 mm
  Base resolution: 256
  Phase resolution: 94 %
  Slice resolution: 50 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 5
  Dist. factor: -17.50 %
  Position: L2.0 A22.0 F8.7 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 0.50 mm
  TR: 24.0 ms
  Multi-slice mode: Sequential
  Series: Descending
  Concatenations: 5
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L2.0 A22.0 F8.7 mm
  Orientation: Transversal
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Tracking H
  Gap: 10 mm
  Thickness: 40 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
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System - Adjustments
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  Adjustment Tolerance: Auto
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System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 24.0 ms
  Concatenations: 5
Physio - Cardiac
  Fat suppr.: None
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 94 %
Angio - Common
  TONE ramp: 70 %
  Flow direction: F >> H
  Flip angle: 25 deg
  MTC: Off
  Measurements: 1
  3D centric reordering: On
Angio - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: On
  MIP-Time: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Sequential
  Bandwidth: 100 Hz/Px
Sequence - Part 2
  Gradient mode: Fast
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\CE MRA
TA: 0:24 PM: ISO Voxel size: 0.8×0.8×0.8 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 A7.0 F87.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 25.0 %
  Slices per slab: 128
  FoV read: 350 mm
  FoV phase: 87.5 %
  Slice thickness: 0.75 mm
  TR: 2.82 ms
  TE: 1.08 ms
  Averages: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 2.82 ms
  TE: 1.08 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 350 mm
  FoV phase: 87.5 %
  Slice thickness: 0.75 mm
  Base resolution: 448
  Phase resolution: 80 %
  Slice resolution: 61 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 32
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 A7.0 F87.5 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 25.0 %
  Slices per slab: 128
  FoV read: 350 mm
  FoV phase: 87.5 %
  Slice thickness: 0.75 mm
  TR: 2.82 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 A7.0 F87.5 mm
  Orientation: Coronal
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 88 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 88 mm
  MSMA: C - T - S
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
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  Adjustment Tolerance: Maximum
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System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.82 ms
  Segments: 1
Angio - Common
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  Time to center: 6.0 s
Angio - Inline
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  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 660 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\CE MRV HEAD
TA: 1:01 PM: ISO Voxel size: 0.7×0.7×0.8 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 60.0 %
  Slices per slab: 240
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 3.91 ms
  TE: 1.39 ms
  Averages: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 3.91 ms
  TE: 1.39 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
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Resolution - Common
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  Base resolution: 288
  Phase resolution: 90 %
  Slice resolution: 61 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reference scan mode: Integrated
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Geometry - Common
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  Position: L1.4 P11.8 H0.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 60.0 %
  Slices per slab: 240
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 3.91 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.4 P11.8 H0.2 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.91 ms
  Segments: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX T1 FS POST
TA: 1:55 PM: ISO Voxel size: 0.4×0.4×3.5 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 34
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.5 mm
  TR: 370.0 ms
  TE: 3.25 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 370.0 ms
  TE: 3.25 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 34
  Dist. factor: 30 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 75.0 %
  Slice thickness: 3.5 mm
  TR: 370.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A1.0 F9.2
  L: 0.2 mm
  A: 1.0 mm
  F: 9.2 mm
  Initial Rotation: 89.88 deg
  Initial Orientation: T > C
  T > C: 4.2
  > S: 1.3
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: Q-parallel F
  Gap: 10.1 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 34
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 230 mm
  FoV phase: 75.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
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System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Rotation: 89.88 deg
  R >> L: 173 mm
  A >> P: 230 mm
  F >> H: 154 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651780 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 370.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 75.0 %
  Phase resolution: 80 %
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 370.0 ms
  TE: 3.25 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 280 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 70 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX FLAIR POST
TA: 3:02 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  TE: 93.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 9000.0 ms
  TE: 93.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 89 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 32
  Dist. factor: 25 %
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 56 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 32
  Slice thickness: 3.5 mm
  Dist. factor: 25 %
  FoV read: 230 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 56 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L1.1 P9.8 H56.3 mm
  Orientation: T > C-6.1 > S-2.3
  Rotation: 90.00 deg
  R >> L: 230 mm
  A >> P: 230 mm
  F >> H: 140 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 230 mm
  FoV phase: 100.0 %
  Phase resolution: 89 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.28 ms
  Bandwidth: 201 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 19
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX PERFUSION
TA: 1:21 PM: ISO Voxel size: 1.7×1.7×5.0 mmPAT: 2 Rel. SNR: 1.00  : epfid
Properties
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  Load images to stamp segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1530 ms
  TE: 35.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 1530 ms
  TE: 35.0 ms
  MTC: Off
  Flip angle: 90 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 50
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 20 %
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 1530 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Phase enc. dir.: A >> P
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Water excit. normal
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 26 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 26 mm
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  Coil Combine Mode: Sum of Squares
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L1.1 P7.7 F25.8 mm
  Orientation: T > C-2.2 > S0.4
  Rotation: 0.00 deg
  A >> P: 214 mm
  R >> L: 220 mm
  F >> H: 143 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.400
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1530 ms
  Concatenations: 1
Perf
  GBP: On
  PBP: Off
  TTP: On
  relCBV: Off
  relCBF: Off
  relMTT: Off
  relCBVCorr: Off
  Measurements: 50
  Motion correction: Off
  Spatial filter: Off
Sequence - Part 1
  Introduction: Off
  Multi-slice mode: Interleaved
  Free echo spacing: On
  Echo spacing: 0.84 ms
  Bandwidth: 1446 Hz/Px
Sequence - Part 2
  EPI factor: 112
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\NON-HYPER ACUTE STROKE\NON HYPERACUTE N\AX GRE
TA: 1:45 PM: ISO Voxel size: 0.4×0.4×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 26
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 700.0 ms
  TE: 20.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 700.0 ms
  TE: 20.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 80
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 26
  Dist. factor: 20 %
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  FoV read: 230 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 700.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.2 A1.0 F9.2 mm
  Orientation: T > C4.2 > S1.3
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A1.0 F9.2
  L: 0.2 mm
  A: 1.0 mm
  F: 9.2 mm
  Initial Rotation: 89.88 deg
  Initial Orientation: T > C
  T > C: 4.2
  > S: 1.3
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 9 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 26
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 230 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 9 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 700.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
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  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 700.0 ms
  TE: 20.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 140 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
