PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    BONY PELVIS
      PELVIS/HIPS WWO
        localizer
        AX T1
        AX T2 FS
        COR STIR
        COR T1
        SAG PD FS
        AX T1 FS
        AX  IN OUT PHASE
        AX T1 FS POST
        COR T1 FS POST
        SAG T1 FS POST

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\localizer
TA: 0:24 PM: ISO Voxel size: 0.9×0.9×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 300 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 13 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  TE: 2.44 ms
  Averages: 2
  Concatenations: 8
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP3-5
Contrast - Common
  TR: 7.0 ms
  TE: 2.44 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 300 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 450 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 8
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  AutoAlign: ---
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 3
  Slice thickness: 8.0 mm
  Dist. factor: 50 %
  FoV read: 450 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651811 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 8
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 450 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 8
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 2.44 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\AX T1
TA: 3:29 PM: ISO Voxel size: 1.3×1.3×5.0 mmPAT: Off Rel. SNR: 1.00  : tse
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 340 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  TR: 505.0 ms
  TE: 7.4 ms
  Averages: 2
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4-6
Contrast - Common
  TR: 505.0 ms
  TE: 7.4 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 130 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 90.6 %
  Slice thickness: 5.0 mm
  TR: 505.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 117 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 340 mm
  FoV phase: 90.6 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 117 mm
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  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 309 mm
  R >> L: 340 mm
  F >> H: 220 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 505.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV read: 340 mm
  FoV phase: 90.6 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.38 ms
  Bandwidth: 219 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 68
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: TR
  Max. TR: 550.0 ms
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\AX T2 FS
TA: 2:52 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L21.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 8500.0 ms
  TE: 73.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4-6
Contrast - Common
  TR: 8500.0 ms
  TE: 73.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Geometry - Common
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  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 8500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
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Geometry - Navigator
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Geometry - Tim CT
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  FoV phase: 87.5 %
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: Off
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System - Adjust Volume
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  A >> P: 298 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 87.5 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.12 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 13
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\COR STIR
TA: 2:27 PM: ISO Voxel size: 1.2×1.2×5.0 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 4560.0 ms
  TE: 46.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 4560.0 ms
  TE: 46.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 150 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 4560.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Sat. region: 1
  Thickness: 80 mm
  Position: L18.0 A18.4 H95.1 mm
  Orientation: Transversal
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 128 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 380 mm
  FoV phase: 96.9 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 128 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
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System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4560.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 150 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 380 mm
  FoV phase: 96.9 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.14 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 31
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 8
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\COR T1
TA: 3:32 PM: ISO Voxel size: 1.0×1.0×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 500.0 ms
  TE: 14 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 500.0 ms
  TE: 14 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 384
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 27
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  TR: 500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
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System - Adjustments
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  Assume Dominant Fat: On
  Assume Silicone: Off
  Adjustment Tolerance: Auto
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 13.9 ms
  Bandwidth: 119 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 104
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\SAG PD FS
TA: 4:14 PM: ISO Voxel size: 0.9×0.9×5.0 mmPAT: Off Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 55
  Dist. factor: 0 %
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 3500.0 ms
  TE: 32.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP5,6
Contrast - Common
  TR: 3500.0 ms
  TE: 32.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 55
  Dist. factor: 0 %
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 3500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel R/L
  Gap: 11 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 46 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 55
  Slice thickness: 5.0 mm
  Dist. factor: 0 %
  FoV read: 300 mm
  FoV phase: 81.3 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 46 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: R102.7 P39.9 H45.6 mm
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 244 mm
  F >> H: 300 mm
  R >> L: 275 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 81.3 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.12 ms
  Bandwidth: 252 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 17
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 11
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\AX T1 FS
TA: 2:27 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 628.0 ms
  TE: 7.5 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4-6
Contrast - Common
  TR: 628.0 ms
  TE: 7.5 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 60 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 628.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 117 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 340 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 117 mm
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System - Adjust Volume
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 298 mm
  R >> L: 340 mm
  F >> H: 220 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 628.0 ms
  Concatenations: 4
Physio - Cardiac
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  FoV read: 340 mm
  FoV phase: 87.5 %
  Phase resolution: 60 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.52 ms
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 56
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: TR
  Max. TR: 550.0 ms
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\AX  IN OUT PHASE
TA: 3:38 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 50
  Dist. factor: 10 %
  Position: L25.2 P37.1 H17.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 315.0 ms
  TE 1: 2.44 ms
  TE 2: 4.84 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP3-5
Contrast - Common
  TR: 315.0 ms
  TE 1: 2.44 ms
  TE 2: 4.84 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 50
  Dist. factor: 10 %
  Position: L25.2 P37.1 H17.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 315.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L25.2 P37.1 H17.0 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Parallel H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 17 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 50
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 350 mm
  FoV phase: 87.5 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 17 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 315.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 87.5 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 2
  TR: 315.0 ms
  TE 1: 2.44 ms
  TE 2: 4.84 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 2
  Flow comp. 1: No
  Readout mode: Bipolar
  Multi-slice mode: Interleaved
  Bandwidth 1: 500 Hz/Px
  Bandwidth 2: 500 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\AX T1 FS POST
TA: 2:25 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: Off Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 628.0 ms
  TE: 7.5 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP4-6
Contrast - Common
  TR: 628.0 ms
  TE: 7.5 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 60 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 87.5 %
  Slice thickness: 5.0 mm
  TR: 628.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L16.1 P16.5 F116.8 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 117 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 340 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 117 mm
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L16.1 P16.5 F116.8 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 298 mm
  R >> L: 340 mm
  F >> H: 220 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 628.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 87.5 %
  Phase resolution: 60 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 4
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.52 ms
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 56
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: TR
  Max. TR: 550.0 ms
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\COR T1 FS POST
TA: 3:06 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 350 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 550.0 ms
  TE: 8.7 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 550.0 ms
  TE: 8.7 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 350 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 350 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 550.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 128 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 5.0 mm
  Dist. factor: 10 %
  FoV read: 350 mm
  FoV phase: 96.9 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 128 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 340 mm
  R >> L: 350 mm
  A >> P: 192 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 4
Physio - Cardiac
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  FoV read: 350 mm
  FoV phase: 96.9 %
  Phase resolution: 75 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.7 ms
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 82
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\BONY PELVIS\PELVIS/HIPS WWO\SAG T1 FS POST
TA: 4:14 PM: ISO Voxel size: 1.1×1.1×5.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 50
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Sagittal
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 350 mm
  FoV phase: 96.9 %
  Slice thickness: 5.0 mm
  TR: 600.0 ms
  TE: 8.7 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 600.0 ms
  TE: 8.7 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
  Slice group: 1
  Slices: 50
  Dist. factor: 10 %
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Sagittal
  Phase enc. dir.: H >> F
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  TR: 600.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 5
Geometry - AutoAlign
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  Orientation: Sagittal
  Phase enc. dir.: H >> F
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 50
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System - Adjust Volume
  Position: L14.1 P35.8 F128.2 mm
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 340 mm
  A >> P: 350 mm
  R >> L: 275 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 5
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Physio - PACE
  Resp. control: Off
  Concatenations: 5
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