PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  SPINE
    WHOLE SPINE
      S12-WHOLE SPINE W WO (>5'8)
        SPINE LOC COUNTER
        SAG STIR_
        SAG T1_
        AX T2
        SAG T1 FS_POST
        AX T1 FS +-C

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SPINE LOC COUNTER
TA: 0:18 PM: ISO Voxel size: 1.5×1.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/3
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 A5.4 F12.7 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 9
  Dist. factor: 20 %
  Position: R9.3 A5.4 F12.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 4.2 ms
  TE: 1.77 ms
  Averages: 1
  Concatenations: 18
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1,2
Contrast - Common
  TR: 4.2 ms
  TE: 1.77 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 8 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 224
  Phase resolution: 50 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 A5.4 F12.7 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 9
  Dist. factor: 20 %
  Position: R9.3 A5.4 F12.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 4.2 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 18
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  AutoAlign: ---
  Position: R9.3 A5.4 F12.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 13 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Spine
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 9
  Slice thickness: 6.0 mm
  Dist. factor: 20 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 13 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 4.2 ms
  Concatenations: 18
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 340 mm
  FoV phase: 100.0 %
  Phase resolution: 50 %
Physio - PACE
  Resp. control: Off
  Concatenations: 18
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Spine
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 4.2 ms
  TE: 1.77 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 470 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SPINE LOC COUNTER
TA: 0:20 PM: ISO Voxel size: 1.5×1.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/3
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Routine
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 P14.6 F252.7 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 11
  Dist. factor: 20 %
  Position: R9.3 P14.6 F252.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 4.2 ms
  TE: 1.77 ms
  Averages: 1
  Concatenations: 20
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: SP2-5
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Geometry - Common
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  Position: R9.3 P14.6 F252.7 mm
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  Slices: 11
  Dist. factor: 20 %
  Position: R9.3 P14.6 F252.7 mm
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  Concatenations: 20
Geometry - AutoAlign
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  Position: R9.3 P14.6 F252.7 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 253 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 11
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 253 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4.2 ms
  Concatenations: 20
  Segments: 1
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Physio - PACE
  Resp. control: Off
  Concatenations: 20
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\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SPINE LOC COUNTER
TA: 0:20 PM: ISO Voxel size: 1.5×1.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 3/3
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Routine
  Slice group: 1
  Slices: 9
  Dist. factor: 150 %
  Position: R9.3 P24.6 F492.7 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 11
  Dist. factor: 20 %
  Position: R9.3 P24.6 F492.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 340 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 4.2 ms
  TE: 1.77 ms
  Averages: 1
  Concatenations: 20
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: SP3-7
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Geometry - Common
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  Position: R9.3 P24.6 F492.7 mm
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  Position: R9.3 P24.6 F492.7 mm
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Geometry - AutoAlign
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  Position: R9.3 P24.6 F492.7 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 493 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 493 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG STIR_
TA: 3:37 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir_rr  | Substep: 1/3
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 0 %
  Position: R1.2 P57.4 H0.4 mm
  Orientation: S > T5.9
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 92 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 45.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP3-6
Contrast - Common
  TR: 3500.0 ms
  TE: 45.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 20
  Dist. factor: 0 %
  Position: R1.2 P57.4 H0.4 mm
  Orientation: S > T5.9
  Phase enc. dir.: H >> F
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.2 P57.4 H0.4 mm
  Orientation: S > T5.9
  Phase enc. dir.: H >> F
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 67 mm
  Position: L0.0 A82.1 F188.3 mm
  Orientation: C > T10.8
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 20
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 170 mm
  FoV phase: 200.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 170 mm
  FoV phase: 200.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.44 ms
  Bandwidth: 221 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 15
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 18
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG STIR_
TA: 3:37 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir_rr  | Substep: 2/3
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 0 %
  Position: R1.2 P57.4 F224.6 mm
  Orientation: S > T5.9
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 92 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 45.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP3-6
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Geometry - Common
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  Position: R1.2 P57.4 F224.6 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.2 P57.4 F224.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 67 mm
  Position: L0.0 A82.1 F393.3 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 225 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 225 mm
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\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG STIR_
TA: 3:37 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir_rr  | Substep: 3/3
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Routine
  Slice group: 1
  Slices: 20
  Dist. factor: 0 %
  Position: R1.2 P57.4 F399.6 mm
  Orientation: S > T5.9
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 92 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 45.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP3-6
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Geometry - Common
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  Position: R1.2 P57.4 F399.6 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.2 P57.4 F399.6 mm
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Geometry - Saturation
  Sat. region: 1
  Thickness: 67 mm
  Position: L0.0 A82.1 F548.3 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 400 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 400 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG T1_
TA: 2:32 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 1/3
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.5 mm
  TR: 673.0 ms
  TE: 8.2 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1-3
Contrast - Common
  TR: 673.0 ms
  TE: 8.2 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.5 mm
  Base resolution: 192
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
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  Slice thickness: 3.5 mm
  TR: 673.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  Initial Position: R1.3 P2.6 H0.3
  R: 1.3 mm
  P: 2.6 mm
  H: 0.3 mm
  Initial Rotation: 88.00 deg
  Initial Orientation: S > T
  S > T: -0.1
  > C: 0.1
Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 3.5 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: Off - All
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Physio - Signal1
  1st Signal/Mode: None
  TR: 673.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.16 ms
  Bandwidth: 253 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 75
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG T1_
TA: 2:37 PM: ISO Voxel size: 0.9×0.9×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 2/3
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 10 %
  Position: R1.3 P2.6 F249.7 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 4.0 mm
  TR: 694.0 ms
  TE: 8.2 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1-3
Contrast - Common
  TR: 694.0 ms
  TE: 8.2 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 4.0 mm
  Base resolution: 192
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 10 %
  Position: R1.3 P2.6 F249.7 mm
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  Slice thickness: 4.0 mm
  TR: 694.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.3 P2.6 F249.7 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 4.0 mm
  Dist. factor: 10 %
  FoV read: 170 mm
  FoV phase: 200.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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Physio - Signal1
  1st Signal/Mode: None
  TR: 694.0 ms
  Concatenations: 1
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\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG T1_
TA: 2:37 PM: ISO Voxel size: 0.9×0.9×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 3/3
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 10 %
  Position: R1.3 P2.6 F499.7 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 4.0 mm
  TR: 694.0 ms
  TE: 8.2 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1-3
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Geometry - Common
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  Position: R1.3 P2.6 F499.7 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.3 P2.6 F499.7 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 500 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 500 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\AX T2
TA: 2:44 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3000.0 ms
  TE: 102.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: SP5,6
Contrast - Common
  TR: 3000.0 ms
  TE: 102.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.6 A89.5 F410.3 mm
  Orientation: C > T14.2 > S0.4
  Shape: Standard
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 200 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 180 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 200 mm
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  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3000.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.46 ms
  Bandwidth: 241 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 13
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 23
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG T1 FS_POST
TA: 2:37 PM: ISO Voxel size: 0.9×0.9×3.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 1/3
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 94 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.5 mm
  TR: 517.0 ms
  TE: 8.2 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1-3
Contrast - Common
  TR: 517.0 ms
  TE: 8.2 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.5 mm
  Base resolution: 192
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 3.5 mm
  TR: 517.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  Initial Position: R1.3 P2.6 H0.3
  R: 1.3 mm
  P: 2.6 mm
  H: 0.3 mm
  Initial Rotation: 88.00 deg
  Initial Orientation: S > T
  S > T: -0.1
  > C: 0.1
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Spine
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 3.5 mm
  Dist. factor: 0 %
  FoV read: 170 mm
  FoV phase: 200.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R1.3 P2.6 H0.3 mm
  Orientation: S > T-0.1 > C0.1
  Rotation: 178.00 deg
  A >> P: 170 mm
  F >> H: 340 mm
  R >> L: 60 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 517.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 170 mm
  FoV phase: 200.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Inline - Composing
  Inline Composing: On
  Composing Function: Spine
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.16 ms
  Bandwidth: 253 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 75
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG T1 FS_POST
TA: 3:19 PM: ISO Voxel size: 0.9×0.9×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 2/3
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 10 %
  Position: R1.3 P2.6 F249.7 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 4.0 mm
  TR: 700.0 ms
  TE: 8.2 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1-3
Contrast - Common
  TR: 700.0 ms
  TE: 8.2 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 4.0 mm
  Base resolution: 192
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 10 %
  Position: R1.3 P2.6 F249.7 mm
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  Slice thickness: 4.0 mm
  TR: 700.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.3 P2.6 F249.7 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 4.0 mm
  Dist. factor: 10 %
  FoV read: 170 mm
  FoV phase: 200.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjust Volume
  Position: R1.3 P2.6 F249.7 mm
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  R >> L: 75 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 700.0 ms
  Concatenations: 2
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Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 70
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
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\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\SAG T1 FS_POST
TA: 3:19 PM: ISO Voxel size: 0.9×0.9×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr  | Substep: 3/3
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 10 %
  Position: R1.3 P2.6 F499.7 mm
  Orientation: S > T-0.1 > C0.1
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 170 mm
  FoV phase: 200.0 %
  Slice thickness: 4.0 mm
  TR: 700.0 ms
  TE: 8.2 ms
  Averages: 2
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1-3
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Geometry - Common
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  Position: R1.3 P2.6 F499.7 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R1.3 P2.6 F499.7 mm
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 500 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 500 mm
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System - Adjust Volume
  Position: R1.3 P2.6 F499.7 mm
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\WHOLE SPINE\S12-WHOLE SPINE W WO (>5'8)\AX T1 FS +-C
TA: 2:54 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 330.0 ms
  TE: 3.13 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP5,6
Contrast - Common
  TR: 330.0 ms
  TE: 3.13 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 68 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 330.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Saturation mode: Quick
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.4 A62.6 F162.2 mm
  Orientation: C > T5.3 > S0.4
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 200 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 200 mm
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.07 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 124 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 330.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 68 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 330.0 ms
  TE: 3.13 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 65 deg
