PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  SPINE
    CSPINE
      S2 - CSP WWO
        localizer
        SAG STIR
        SAG T1
        SAG T2
        SAG SPACE T2
        AX MEDIC
        AX T2_
        SAG T1 FS POST
        AX T1 FS (FLASH) POST

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\localizer
TA: 0:39 PM: ISO Voxel size: 0.6×0.6×8.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 300 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 5
  Dist. factor: 20 %
  Position: L19.2 P20.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  TE: 2.44 ms
  Averages: 2
  Concatenations: 15
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE4;NE1,2;SP1
Contrast - Common
  TR: 7.0 ms
  TE: 2.44 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 300 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 5
  Dist. factor: 20 %
  Position: L19.2 P20.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 7.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 15
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L19.2 P20.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 5
  Slice thickness: 8.0 mm
  Dist. factor: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.0 ms
  Concatenations: 15
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 15
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.0 ms
  TE: 2.44 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\SAG STIR
TA: 4:38 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir_rr
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 70 %
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  TR: 3750.0 ms
  TE: 41.0 ms
  Averages: 3
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE3,4;NE1,2;SP1,2
Contrast - Common
  TR: 3750.0 ms
  TE: 41.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 76 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  TR: 3750.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 67 mm
  Position: L0.0 A60.6 F29.3 mm
  Orientation: C > T-25.8
  Shape: Standard
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 48 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 140 mm
  FoV phase: 153.1 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 48 mm
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  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3750.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 160 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 140 mm
  FoV phase: 153.1 %
  Phase resolution: 76 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.14 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 12
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\SAG T1
TA: 3:45 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 70 %
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  TR: 650.0 ms
  TE: 15.0 ms
  Averages: 4
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1,2
Contrast - Common
  TR: 650.0 ms
  TE: 15.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 4
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 68 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
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  TR: 650.0 ms
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - All
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  Phase resolution: 68 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.72 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 43
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\SAG T2
TA: 3:31 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tseR_rr
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 70 %
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  TR: 2570.0 ms
  TE: 90.0 ms
  Averages: 4
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE3,4;NE1,2;SP1,2
Contrast - Common
  TR: 2570.0 ms
  TE: 90.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 142 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
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Resolution - Common
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  TR: 2570.0 ms
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Geometry - Saturation
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  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard Neck
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System - Adjust Volume
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Rotation: 155.90 deg
  A >> P: 35 mm
  F >> H: 215 mm
  R >> L: 51 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2570.0 ms
  Concatenations: 2
Physio - Cardiac
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  Phase resolution: 90 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.2 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 10
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 23
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\SAG SPACE T2
TA: 6:04 PM: ISO Voxel size: 0.4×0.4×0.9 mmPAT: 3 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: R2.9 P33.9 F15.4 mm
  Orientation: S > T2.3
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 73 %
  Slice oversampling: 18.2 %
  Slices per slab: 88
  FoV read: 145 mm
  FoV phase: 186.5 %
  Slice thickness: 0.90 mm
  TR: 1250 ms
  TE: 133 ms
  Averages: 1.4
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: FS;HE3,4;NE1,2;SP1
Contrast - Common
  TR: 1250 ms
  TE: 133 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 120 deg
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.4
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 145 mm
  FoV phase: 186.5 %
  Slice thickness: 0.90 mm
  Base resolution: 192
  Phase resolution: 80 %
  Slice resolution: 90 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: R2.9 P33.9 F15.4 mm
  Orientation: S > T2.3
  Phase enc. dir.: H >> F
  Slice oversampling: 18.2 %
  Slices per slab: 88
  FoV read: 145 mm
  FoV phase: 186.5 %
  Slice thickness: 0.90 mm
  TR: 1250 ms
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R2.9 P33.9 F15.4 mm
  Orientation: S > T2.3
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 15 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 15 mm
  MSMA: S - C - T
  Sagittal: R >> L
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R2.9 P33.9 F15.4 mm
  Orientation: S > T2.3
  Rotation: 175.10 deg
  A >> P: 145 mm
  F >> H: 271 mm
  R >> L: 80 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 1250 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 145 mm
  FoV phase: 186.5 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.02 ms
  Bandwidth: 521 Hz/Px
Sequence - Part 2
  Echo train duration: 293 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: Constant
  Turbo factor: 82
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\AX MEDIC
TA: 5:16 PM: ISO Voxel size: 0.7×0.7×3.0 mmPAT: Off Rel. SNR: 1.00  : me_r
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 878.0 ms
  TE: 14.0 ms
  Averages: 2
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 878.0 ms
  TE: 14.0 ms
  MTC: Off
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 878.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Sat. region: 1
  Thickness: 69 mm
  Position: L0.1 A47.1 F8.0 mm
  Orientation: C > T-9.7 > S0.1
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Rotation: 0.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 117 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 878.0 ms
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Combined echoes: 2
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\AX T2_
TA: 3:20 PM: ISO Voxel size: 0.4×0.4×3.5 mmPAT: Off Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 27
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 60 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 3000.0 ms
  TE: 102.0 ms
  Averages: 2
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: SP5,6
Contrast - Common
  TR: 3000.0 ms
  TE: 102.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 89 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 27
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
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  Slice thickness: 3.5 mm
  TR: 3000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 50 mm
  Position: L0.6 A89.5 F210.3 mm
  Orientation: C > T14.2 > S0.4
  Shape: Standard
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 27
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 180 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3000.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 89 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.46 ms
  Bandwidth: 241 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 23
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\SAG T1 FS POST
TA: 3:46 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
  AutoAlign: ---
  Phase oversampling: 70 %
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  TR: 650.0 ms
  TE: 15.0 ms
  Averages: 4
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1,2
Contrast - Common
  TR: 650.0 ms
  TE: 15.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 4
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 68 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 17
  Dist. factor: 0 %
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
  FoV read: 140 mm
  FoV phase: 153.1 %
  Slice thickness: 3.0 mm
  TR: 650.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Phase enc. dir.: H >> F
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Sat. region: 1
  Thickness: 67 mm
  Position: L0.0 A60.6 F29.3 mm
  Orientation: C > T-25.8
  Shape: Standard
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 48 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 17
  Slice thickness: 3.0 mm
  Dist. factor: 0 %
  FoV read: 140 mm
  FoV phase: 153.1 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 48 mm
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  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L5.4 P26.9 F47.8 mm
  Orientation: S > T1.4
  Rotation: 155.90 deg
  A >> P: 140 mm
  F >> H: 215 mm
  R >> L: 51 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 140 mm
  FoV phase: 153.1 %
  Phase resolution: 68 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.72 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 43
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: TR
  Max. TR: 650.0 ms
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\SPINE\CSPINE\S2 - CSP WWO\AX T1 FS (FLASH) POST
TA: 3:55 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 31 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 320.0 ms
  TE: 3.13 ms
  Averages: 5
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 320.0 ms
  TE: 3.13 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 5
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 320.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Saturation mode: Quick
  Sat. region: 1
  Thickness: 69 mm
  Position: L0.1 A47.1 F8.0 mm
  Orientation: C > T-9.7 > S0.1
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 1 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 30 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 1 mm
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: R7.4 P25.4 F0.9 mm
  Orientation: T > C10.4
  Rotation: 0.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 117 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 320.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 320.0 ms
  TE: 3.13 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 65 deg
