PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  MSK
    SHOULDER
      SHOULDER ROUTINE
        localizer ax
        localizer sag_ cor
        AX T1
        AX PD FS
        COR T1
        COR T2 FS
        SAG T1
        SAG T2 FS
        AX T1 FS
        AX T1 FS POST
        SAG T1 FS POST
        COR T1 FS POST

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\localizer ax
TA: 6.8 s PM: REF Voxel size: 1.0×1.0×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 38 %
  FoV read: 500 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.3 ms
  TE: 2.59 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SHS
Contrast - Common
  TR: 6.3 ms
  TE: 2.59 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 500 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 500 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.3 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 3
  Slice thickness: 6.0 mm
  Dist. factor: 50 %
  FoV read: 500 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651811 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.3 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 500 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.3 ms
  TE: 2.59 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 290 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\localizer sag_ cor
TA: 0:18 PM: REF Voxel size: 0.5×0.5×6.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: R125.8 P0.0 H20.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: R144.4 A23.7 H17.2 mm
  Orientation: C > S31.7
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 3
  Dist. factor: 50 %
  Position: R107.8 P0.0 H20.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 38 %
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 6.3 ms
  TE: 2.59 ms
  Averages: 1
  Concatenations: 9
  Filter: Distortion Corr.(2D), Normalize, Elliptical filter
  Coil elements: SHL
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Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: On
  Unfiltered images: Off
  B1 filter: Off
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Geometry - Common
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  Position: R125.8 P0.0 H20.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: R144.4 A23.7 H17.2 mm
  Orientation: C > S31.7
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 3
  Dist. factor: 50 %
  Position: R107.8 P0.0 H20.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 250 mm
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  Concatenations: 9
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: R107.8 P0.0 H20.0 mm
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Geometry - Tim CT
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: H
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Physio - Signal1
  1st Signal/Mode: None
  TR: 6.3 ms
  Concatenations: 9
  Segments: 1
Physio - Cardiac
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 9
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\AX T1
TA: 2:43 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R123.9 A8.4 H11.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  TE: 12 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHL
Contrast - Common
  TR: 500.0 ms
  TE: 12 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: On
  ! Intensity: Medium
  Edge Enhancement: 1
  Smoothing: 1
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R123.9 A8.4 H11.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R123.9 A8.4 H11.4 mm
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 11 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 18
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 150 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 11 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R123.9 A8.4 H11.4 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 150 mm
  R >> L: 150 mm
  F >> H: 72 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 11.7 ms
  Bandwidth: 120 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 160
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\AX PD FS
TA: 3:27 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tse_rs
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R123.9 A8.4 H11.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 2500.0 ms
  TE: 27 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHL
Contrast - Common
  TR: 2500.0 ms
  TE: 27 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Geometry - Common
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  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 2500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
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Geometry - Tim CT
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  FoV read: 140 mm
  FoV phase: 100.0 %
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System - Adjust Volume
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  A >> P: 140 mm
  R >> L: 140 mm
  F >> H: 72 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 140 mm
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: Slice
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 13.3 ms
  Bandwidth: 120 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 80
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 6
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\COR T1
TA: 2:43 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  TE: 13 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHL
Contrast - Common
  TR: 500.0 ms
  TE: 13 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
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  TR: 500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 10 mm
  Inline Composing: Off
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 10 mm
  MSMA: S - C - T
  Sagittal: Lat >> Med
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 12.6 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 160
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\COR T2 FS
TA: 2:33 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3300.0 ms
  TE: 59.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHL
Contrast - Common
  TR: 3300.0 ms
  TE: 59.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
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Geometry - Common
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  TR: 3300.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
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Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: On
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Rotation: 0.00 deg
  R >> L: 140 mm
  F >> H: 140 mm
  A >> P: 72 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3300.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 44
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 11
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\SAG T1
TA: 2:43 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R125.7 A20.0 H9.2 mm
  Orientation: S > C-34.1 > T4.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 500.0 ms
  TE: 13 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHL
Contrast - Common
  TR: 500.0 ms
  TE: 13 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Geometry - Common
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  Position: R125.7 A20.0 H9.2 mm
  Orientation: S > C-34.1 > T4.0
  Phase enc. dir.: A >> P
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  TR: 500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R125.7 A20.0 H9.2 mm
  Orientation: S > C-34.1 > T4.0
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: None
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 9 mm
  Inline Composing: Off
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 9 mm
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System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 12.6 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 160
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Low SAR
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\SAG T2 FS
TA: 2:33 PM: ISO Voxel size: 0.4×0.4×4.0 mmPAT: Off Rel. SNR: 1.00  : tseR
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R125.7 A20.0 H9.2 mm
  Orientation: S > C-34.1 > T4.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 140 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 3300.0 ms
  TE: 67.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SHL
Contrast - Common
  TR: 3300.0 ms
  TE: 67.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  TR: 3300.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: On
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: R125.7 A20.0 H9.2 mm
  Orientation: S > C-34.1 > T4.0
  Rotation: 0.00 deg
  A >> P: 140 mm
  F >> H: 140 mm
  R >> L: 72 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3300.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 44
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 11
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\AX T1 FS
TA: 3:00 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 550.0 ms
  TE: 10 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHS
Contrast - Common
  TR: 550.0 ms
  TE: 10 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
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  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
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  FoV read: 150 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
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  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
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  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 150 mm
  R >> L: 150 mm
  F >> H: 72 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 150 mm
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 10 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 160
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 3
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\AX T1 FS POST
TA: 3:00 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - All
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\SAG T1 FS POST
TA: 3:00 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 550.0 ms
  TE: 10 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHS
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Geometry - Common
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  Orientation: Sagittal
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Geometry - AutoAlign
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  Orientation: Sagittal
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Geometry - Navigator
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System - Miscellaneous
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  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 150 mm
  F >> H: 150 mm
  R >> L: 72 mm
  Reset: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\MSK\SHOULDER\SHOULDER ROUTINE\COR T1 FS POST
TA: 3:00 PM: ISO Voxel size: 0.5×0.5×4.0 mmPAT: Off Rel. SNR: 1.00  : tse
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Routine
  Slice group: 1
  Slices: 18
  Dist. factor: 0 %
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 100 %
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 550.0 ms
  TE: 10 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: SHL
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Geometry - Common
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  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Phase enc. dir.: R >> L
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 10 mm
  Inline Composing: Off
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 10 mm
  MSMA: S - C - T
  Sagittal: Lat >> Med
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System - Adjust Volume
  Position: R122.8 A16.0 H9.8 mm
  Orientation: C > S37.8
  Rotation: 0.00 deg
  R >> L: 150 mm
  F >> H: 150 mm
  A >> P: 72 mm
  Reset: Off
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