PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    MRA HEAD
      V2 - MRA HEAD W WO
        AAHScout
        SAG T1 SCOUT
        vessels_head (OPTIONAL)
        3D TOF
        TWIST_TIMING
        CE MRA MASK
        CE MRA COW
        CE MRV HEAD

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\AAHScout
TA: 0:16 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.64 ms
  TE: 2.38 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3.64 ms
  TE: 2.38 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.64 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: Off - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 6.9 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.64 ms
  TE: 2.38 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\SAG T1 SCOUT
TA: 1:20 PM: REF Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 440.0 ms
  TE: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 440.0 ms
  TE: 2.46 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 440.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 440.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 440.0 ms
  TE: 2.46 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 380 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\vessels_head (OPTIONAL)
TA: 0:24 PM: REF Voxel size: 1.2×1.2×6.0 mmRel. SNR: 1.00  : fl_rd
Properties
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  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: L0.0 P0.0 F30.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 24
  FoV read: 300 mm
  FoV phase: 70.3 %
  Slice thickness: 6.00 mm
  TR: 23.0 ms
  TE: 8.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 23.0 ms
  TE: 8.0 ms
  MTC: Off
  Flip angle: 10 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 70.3 %
  Slice thickness: 6.00 mm
  Base resolution: 256
  Phase resolution: 75 %
  Slice resolution: 50 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: L0.0 P0.0 F30.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 24
  FoV read: 300 mm
  FoV phase: 70.3 %
  Slice thickness: 6.00 mm
  TR: 23.0 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F30.0 mm
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Geometry - Saturation
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: C - T - S
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 23.0 ms
  Concatenations: 1
Inline - Common
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  Save original images: Off
Inline - MIP
  MIP-Sag: On
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  Save original images: Off
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\3D TOF
TA: 6:16 PM: FIX Voxel size: 0.4×0.4×0.5 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 5
  Dist. factor: -17.50 %
  Position: L2.0 A22.0 F8.7 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 0.50 mm
  TR: 25.0 ms
  TE: 7.00 ms
  Averages: 1
  Concatenations: 5
  Filter: Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 25.0 ms
  TE: 7.00 ms
  TD: 0.000 ms
  MTC: Off
  Flip angle: 25 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 0.50 mm
  Base resolution: 256
  Phase resolution: 94 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 5
  Dist. factor: -17.50 %
  Position: L2.0 A22.0 F8.7 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 0.50 mm
  TR: 25.0 ms
  Multi-slice mode: Sequential
  Series: Descending
  Concatenations: 5
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L2.0 A22.0 F8.7 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Tracking H
  Gap: 10 mm
  Thickness: 40 mm
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System - Miscellaneous
  Positioning mode: FIX
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 25.0 ms
  Concatenations: 5
Physio - Cardiac
  Fat suppr.: None
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 94 %
Angio - Common
  TONE ramp: 70 %
  Flow direction: F >> H
  Flip angle: 25 deg
  MTC: Off
  Measurements: 1
  3D centric reordering: On
Angio - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: On
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Sequential
  Bandwidth: 100 Hz/Px
Sequence - Part 2
  Gradient mode: Fast
  RF spoiling: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\TWIST_TIMING
TA: 0:47 PM: ISO Voxel size: 1.3×1.3×1.3 mmPAT: 6 Rel. SNR: 1.00  : fldyn
Properties
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  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: L0.0 P2.8 F0.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 12.5 %
  Slices per slab: 128
  FoV read: 425 mm
  FoV phase: 68.8 %
  Slice thickness: 1.33 mm
  TR: 2.04 ms
  TE: 0.84 ms
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: HE1-4;NE1,2;SP1,2
Contrast - Common
  TR: 2.04 ms
  TE: 0.84 ms
  Flip angle: 18 deg
  Fat suppr.: None
Contrast - Dynamic
  Reconstruction: Magnitude
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 425 mm
  FoV phase: 68.8 %
  Slice thickness: 1.33 mm
  Base resolution: 320
  Phase resolution: 75 %
  Slice resolution: 75 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  View sharing: TWIST
  Central region A: 8 %
  Sampling density B: 20 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 3
  Ref. lines 3D: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.0 P2.8 F0.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 12.5 %
  Slices per slab: 128
  FoV read: 425 mm
  FoV phase: 68.8 %
  Slice thickness: 1.33 mm
  TR: 2.04 ms
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P2.8 F0.4 mm
  Orientation: Coronal
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
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  Adjustment Tolerance: Maximum
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
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Angio - Common
  View sharing: TWIST
  Central region A: 8 %
  Sampling density B: 20 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 18 deg
  Temporal resolution: 1.26 s
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  Time to center: 5.7 s
Angio - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction indices:
  Subtraction group: 1
  Measurements: 30
  StdDev: Off
  Save original images: Off
Angio - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: Off
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Optimization: Min. TE TR
  Bandwidth: 710 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: Off
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\CE MRA MASK
TA: 0:35 PM: ISO Voxel size: 0.7×0.7×0.8 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 44.4 %
  Slices per slab: 144
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 3.91 ms
  TE: 1.39 ms
  Averages: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 3.91 ms
  TE: 1.39 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  Base resolution: 288
  Phase resolution: 90 %
  Slice resolution: 62 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 44.4 %
  Slices per slab: 144
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 3.91 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.4 P11.8 H0.2 mm
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System - Miscellaneous
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  Sagittal: L >> R
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  Matrix Optimization: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.91 ms
  Segments: 1
Angio - Common
  Flip angle: 25 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 6.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
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  Measurements: 1
  StdDev: Off
  Motion Correction: Angio Advanced
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\CE MRA COW
TA: 0:35 PM: ISO Voxel size: 0.7×0.7×0.8 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
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System - Miscellaneous
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  Coil Select Mode: Off - All
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRA HEAD\V2 - MRA HEAD W WO\CE MRV HEAD
TA: 1:01 PM: ISO Voxel size: 0.7×0.7×0.8 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 60.0 %
  Slices per slab: 240
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 3.91 ms
  TE: 1.39 ms
  Averages: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
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Resolution - Common
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  Base resolution: 288
  Phase resolution: 90 %
  Slice resolution: 61 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
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  Slice oversampling: 60.0 %
  Slices per slab: 240
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 350 Hz/Px
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