PrintOut
SIEMENS MAGNETOM Aera
Table of contents
\\CLINICAL_PROTOCOLS_UMI
  BRAIN
    MRV HEAD
      V4 - MRV HEAD W WO
        localizer
        AX MRV MASK
        AX MRV POST

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRV HEAD\V4 - MRV HEAD W WO\localizer
TA: 6.1 s PM: ISO Voxel size: 1.1×1.1×10.0 mmPAT: Off Rel. SNR: 1.00  : fl_rr
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 280 mm
  FoV phase: 100.0 %
  Slice thickness: 10.0 mm
  TR: 12.0 ms
  TE: 6.31 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 12.0 ms
  TE: 6.31 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 40 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 280 mm
  FoV phase: 100.0 %
  Slice thickness: 10.0 mm
  Base resolution: 256
  Phase resolution: 50 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 280 mm
  FoV phase: 100.0 %
  Slice thickness: 10.0 mm
  TR: 12.0 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 1
  Slice thickness: 10.0 mm
  Dist. factor: 20 %
  FoV read: 280 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 12.0 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 280 mm
  FoV phase: 100.0 %
  Phase resolution: 50 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 40 deg
  Measurements: 1
  Contrasts: 1
  TR: 12.0 ms
  TE: 6.31 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Sequential
  Bandwidth: 180 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Whisper
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRV HEAD\V4 - MRV HEAD W WO\AX MRV MASK
TA: 1:06 PM: ISO Voxel size: 0.8×0.8×0.8 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 18.2 %
  Slices per slab: 176
  FoV read: 250 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 4.35 ms
  TE: 1.50 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 4.35 ms
  TE: 1.50 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 250 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  Base resolution: 320
  Phase resolution: 95 %
  Slice resolution: 64 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Geometry - Common
  Slab group: 1
  Slabs: 1
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  Slice oversampling: 18.2 %
  Slices per slab: 176
  FoV read: 250 mm
  FoV phase: 81.3 %
  Slice thickness: 0.80 mm
  TR: 4.35 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
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  Coil Combine Mode: Sum of Squares
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System - Adjustments
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  Adjustment Tolerance: Maximum
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System - Tx/Rx
  Frequency 1H: 63.651794 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4.35 ms
  Segments: 1
Angio - Common
  Flip angle: 30 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: On
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 300 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Aera
\\CLINICAL_PROTOCOLS_UMI\BRAIN\MRV HEAD\V4 - MRV HEAD W WO\AX MRV POST
TA: 1:06 PM: ISO Voxel size: 0.8×0.8×0.8 mmPAT: 2 Rel. SNR: 1.00  : fl
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System - Miscellaneous
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  Coil Select Mode: Off - All
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