PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  ABD-PEL
    ABD-PEL DOT
      ABD-PEL DOT
        FastViewLocalizer *
        COR PRE *
        sCOR PRE *
        COR_STARVIBE *
        COR T2 *
        AX T2 *
        COR T2 VFA *
        AX T2 VFA *
        AX T2 SPAIR *
        SAG T2 *
        AX DWI LIVER *
        AX DWI b1600 sm fov prostate or rectum *
        AX DWI *
        AX DWI LIVER *
        AX DWI b1100 sm fov prostate *
        AX T2 SPACE *
        AX 3D DIXON *
        AX 3D DIXON *
        AX PRE AP *
        HISTO *
        Care Bolus *
        AX ARTERIAL *
        AX VENOUS *
        AX MRCP BH *
        COR MRCP BH *
        AX DELAYED *
        AX PRE AP *
        AX MRCP BH *
        COR MRCP BH *
        AX TRUFISP *
        HISTO *
        COR POST *
        AX VIBE HIRES ABD (RSRCH) *
        AX TRUFISP *
        AX IN-OPP BH *
        AX 3D DIXON *
        AX PRE AP *
        HISTO *
        Care Bolus *
        sAX ARTERIAL *
        sAX VENOUS *
        AX MRCP *
        COR MRCP BH *
        sAX DELAYED *
        sCOR POST *
        AX TRUFISP *
        AX PRE AP *
        COR MRCP BH *
        AX MRCP *
        AX TRUFISP *
        HISTO *
        AX IN-PHASE *
        AX OPP-PHASE *
        AX IN-PHASE *
        AX OPP-PHASE *
        AX_RADIAL_PRE AP *
        HISTO *
        DYN ART RADIAL *
        AX_RADIAL_VENOUS AP *
        AX MRCP BH *
        COR MRCP BH *
        AX_RADIAL_DELAY AP *
        AX_RADIAL_PRE *
        AX MRCP BH *
        COR MRCP BH *
        AX TRUFISP *
        HISTO *
        COR_STARVIBE *
        AX TRUFISP *
        Raw Data Transfer *
        AX 3D PELVIS DIXON *

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\FastViewLocalizer *
TA: 0:17 PM: ISO Voxel size: 5.0×5.0×5.0 mmRel. SNR: 1.00  : flct
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 2.56 ms
  TE: 1.44 ms
  Filter: Distortion Corr.(2D)
  Coil elements: BC
Contrast - Common
  TR: 2.56 ms
  TE: 1.44 ms
Resolution - Common
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  Base resolution: 96
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 2.56 ms
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Table position: H
  Table position: 97 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: On
  Range start: H
  Range start: 100 mm
  Total FoV: H >> F
  Total FoV: 800 mm
  Slices: 1
  Slice thickness: 5 mm
  Dist. factor: 100 %
  FoV read: 480 mm
  FoV phase: 87.5 %
  Perform CTM adjustments: On
  Table Speed: 46 mm/s
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 97 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Perform CTM adjustments: On
  Adjustment Tolerance: Maximum
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Img. Scale Cor.: 1.000
Sequence - Part 1
  Dimension: 2D
  Bandwidth: 801.282051 Hz/Px
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR PRE *
TA: 0:17 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 2.96 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 55 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reordering Shift 3D: 0
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 3
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 345 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.3 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.96 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR PRE *
TA: 0:17 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 F275.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
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Geometry - Common
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  Position: L16.4 P26.6 F275.0 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 F275.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 275 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 275 mm
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System - Adjust Volume
  Position: L16.4 P26.6 F275.0 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sCOR PRE *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 6 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 2.93 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 6
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Geometry - Common
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  Position: L16.4 P26.6 H0.0 mm
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  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 339 mm
  F >> H: 420 mm
  A >> P: 288 mm
  Reset: Off
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
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  Time to center: 8.7 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.93 ms
  TE: 1.23 ms
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sCOR PRE *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 6 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 F275.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
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Geometry - Common
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  Position: L16.4 P26.6 F275.0 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 F275.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 275 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 275 mm
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System - Adjust Volume
  Position: L16.4 P26.6 F275.0 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR_STARVIBE *
TA: 2:17 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.16 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 3.16 ms
  TE: 1.48 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Radial views: 680
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
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  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.16 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 216 mm
  Reset: Off
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Inline - Common
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  Time to center: 68.7 s
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Inline - MapIt
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  TR: 3.16 ms
  TE: 1.48 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR_STARVIBE *
TA: 2:17 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P0.0 F199.6 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.16 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F199.6 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F199.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 200 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 200 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F199.6 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR T2 *
TA: 0:53 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 1/2
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 79 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 1500.0 ms
  TE: 79 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: 5/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm C
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.6 ms
  Bandwidth: 814 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 192
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR T2 *
TA: 0:53 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/2
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Geometry - AutoAlign
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  Initial Position: L0.0 P0.0 F300.0
  L: 0.0 mm
  P: 0.0 mm
  F: 300.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 200 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 200 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 *
TA: 0:59 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 74 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 74 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 60 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 38
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
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  Concatenations: 3
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
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  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
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System - Adjustments
  B0 Shim mode: Cardiac
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 251 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 87.5 %
  Phase resolution: 60 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 781 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 168
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 *
TA: 0:59 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: L0.0 P0.0 F224.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 74 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 38
  Reference scan mode: Integrated
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Geometry - Common
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  Position: L0.0 P0.0 F224.8 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F224.8 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 225 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 225 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F224.8 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR T2 VFA *
TA: 0:23 PM: ISO Voxel size: 0.6×0.6×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 23 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 650.0 ms
  TE: 134 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 650.0 ms
  TE: 134 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 130 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 82 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 650.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
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  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 650.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 100.0 %
  Phase resolution: 82 %
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 781 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 262
Sequence - Special
  Variable Flip Angle: On
  FA Start: 130.0 deg
  FA Min: 75.0 deg
  FA Cent: 100.0 deg
  FA End: 45.0 deg
  Organ Type: Liver
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR T2 VFA *
TA: 0:23 PM: ISO Voxel size: 0.6×0.6×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 23 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 650.0 ms
  TE: 138 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 650.0 ms
  TE: 138 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 130 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 84 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 40
  Reference scan mode: Integrated
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Geometry - AutoAlign
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  Initial Position: L0.0 P0.0 F300.0
  L: 0.0 mm
  P: 0.0 mm
  F: 300.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 200 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 200 mm
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Physio - Cardiac
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  Phase resolution: 84 %
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Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 269
Sequence - Special
  Variable Flip Angle: On
  FA Start: 130.0 deg
  FA Min: 60.0 deg
  FA Cent: 100.0 deg
  FA End: 45.0 deg
  Organ Type: Liver
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 VFA *
TA: 0:23 PM: ISO Voxel size: 0.6×0.6×6.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 600.0 ms
  TE: 119 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 600.0 ms
  TE: 119 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 130 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 85 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 38
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 600.0 ms
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Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
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Physio - Signal1
  1st Signal/Mode: None
  TR: 600.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 87.5 %
  Phase resolution: 85 %
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Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 238
Sequence - Special
  Variable Flip Angle: On
  FA Start: 130.0 deg
  FA Min: 75.0 deg
  FA Cent: 100.0 deg
  FA End: 45.0 deg
  Organ Type: Liver
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 VFA *
TA: 0:23 PM: ISO Voxel size: 0.6×0.6×6.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: L0.0 P0.0 F224.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 600.0 ms
  TE: 134 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 600.0 ms
  TE: 134 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 130 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 84 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 34
  Reference scan mode: Integrated
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Geometry - Common
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  Position: L0.0 P0.0 F224.8 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F224.8 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 225 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 225 mm
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Physio - Cardiac
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  Phase resolution: 84 %
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Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 235
Sequence - Special
  Variable Flip Angle: On
  FA Start: 130.0 deg
  FA Min: 60.0 deg
  FA Cent: 90.0 deg
  FA End: 45.0 deg
  Organ Type: Liver
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 SPAIR *
TA: 0:59 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 72 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 72 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 60 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - Common
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  Position: Isocenter
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  TR: 1500.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: On
  Only after freq. change: On
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 251 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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  Phase resolution: 60 %
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.78 ms
  Bandwidth: 710 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 168
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 SPAIR *
TA: 0:59 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: L0.0 P0.0 F224.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 72 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - Common
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  Position: L0.0 P0.0 F224.8 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F224.8 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 225 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 225 mm
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System - Adjustments
  B0 Shim mode: Standard
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
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System - Adjust Volume
  Position: L0.0 P0.0 F224.8 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\SAG T2 *
TA: 1:00 PM: ISO Voxel size: 1.3×1.3×5.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  TE: 82 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 2000.0 ms
  TE: 82 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 320 mm
  FoV phase: 75.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 977 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 154
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DWI LIVER *
TA: 2:41 PM: ISO Voxel size: 1.7×1.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : epir
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 14630 ms
  TE: 50.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2;SP1,2
Contrast - Common
  TR: 14630 ms
  TE: 50.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 220 ms
  IR scheme: Sequential
  Fat suppr.: None
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 14630 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 100 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 100 mm
  MSMA: S - C - T
  Sagittal: R >> L
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 333 mm
  R >> L: 425 mm
  F >> H: 231 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 10.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 14630 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 3
  b-value 2: 5
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 10
Diff - Body
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 3
  b-value 2: 5
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: On
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 10
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.55 ms
  Bandwidth: 2170 Hz/Px
Sequence - Part 2
  EPI factor: 90
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DWI b1600 sm fov prostate or rectum *
TA: 3:36 PM: ISO Voxel size: 1.1×1.1×3.0 mmPAT: 2 Rel. SNR: 1.00  : epse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 9000 ms
  TE: 68.0 ms
  Concatenations: 1
  Filter: Raw filter, Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2;SP1,2
Contrast - Common
  TR: 9000 ms
  TE: 68.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
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Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 114
  Phase resolution: 100 %
  Phase partial Fourier: 7/8
  Interpolation: On
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Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 9000 ms
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Geometry - AutoAlign
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  Initial Position: L8.6 P22.5 F100.2
  L: 8.6 mm
  P: 22.5 mm
  F: 100.2 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Advanced
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System - Adjust Volume
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  A >> P: 250 mm
  R >> L: 250 mm
  F >> H: 120 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 6.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 9000 ms
  Concatenations: 1
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Diff - Neuro
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  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 400 s/mm²
  b-value 3: 1100 s/mm²
  b-value 1: 3
  b-value 2: 5
  b-value 3: 11
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Diff - Body
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  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 400 s/mm²
  b-value 3: 1100 s/mm²
  b-value 1: 3
  b-value 2: 5
  b-value 3: 11
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  Calculated Image: On
  Calculated bValue: 1600 s/mm²
  b-Value >=: 0 s/mm²
  Noise level: 10
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.66 ms
  Bandwidth: 1754 Hz/Px
Sequence - Part 2
  EPI factor: 114
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DWI *
TA: 2:41 PM: ISO Voxel size: 1.7×1.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : epir
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 14630 ms
  TE: 50.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2;SP1,2
Contrast - Common
  TR: 14630 ms
  TE: 50.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 220 ms
  IR scheme: Sequential
  Fat suppr.: None
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Resolution - Common
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: 7/8
  Interpolation: On
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Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
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  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 14630 ms
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Geometry - AutoAlign
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  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 333 mm
  R >> L: 425 mm
  F >> H: 231 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 10.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 14630 ms
  Concatenations: 1
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Diff - Neuro
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  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
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Diff - Body
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  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
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  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 10
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.55 ms
  Bandwidth: 2170 Hz/Px
Sequence - Part 2
  EPI factor: 90
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DWI LIVER *
TA: 2:41 PM: ISO Voxel size: 1.7×1.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : epir
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Geometry - Navigator
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DWI b1100 sm fov prostate *
TA: 3:36 PM: ISO Voxel size: 1.1×1.1×3.0 mmPAT: 2 Rel. SNR: 1.00  : epse
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
  Position: L8.6 P22.5 F100.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 9000 ms
  TE: 68.0 ms
  Concatenations: 1
  Filter: Raw filter, Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2;SP1,2
Contrast - Common
  TR: 9000 ms
  TE: 68.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
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Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 114
  Phase resolution: 100 %
  Phase partial Fourier: 7/8
  Interpolation: On
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Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
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Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 0 %
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 9000 ms
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Advanced
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System - Adjust Volume
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  A >> P: 250 mm
  R >> L: 250 mm
  F >> H: 120 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000 ms
  Concatenations: 1
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Diff - Neuro
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  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 400 s/mm²
  b-value 3: 1100 s/mm²
  b-value 1: 3
  b-value 2: 5
  b-value 3: 11
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Diff - Body
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  Diff. weightings: 3
  b-value 1: 0 s/mm²
  b-value 2: 400 s/mm²
  b-value 3: 1100 s/mm²
  b-value 1: 3
  b-value 2: 5
  b-value 3: 11
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  Calculated Image: On
  Calculated bValue: 1600 s/mm²
  b-Value >=: 0 s/mm²
  Noise level: 10
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Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.66 ms
  Bandwidth: 1754 Hz/Px
Sequence - Part 2
  EPI factor: 114
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX T2 SPACE *
TA: 3:59 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 3 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 20.0 %
  Slices per slab: 160
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1200 ms
  TE: 100 ms
  Averages: 1.4
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP5-7
Contrast - Common
  TR: 1200 ms
  TE: 100 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 135 deg
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.4
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 91 %
  Slice resolution: 60 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 20.0 %
  Slices per slab: 160
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1200 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 250 mm
  A >> P: 250 mm
  F >> H: 160 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 1200 ms
  Concatenations: 1
Physio - Cardiac
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  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 91 %
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.8 ms
  Adiabatic-mode: Off
  Bandwidth: 592 Hz/Px
Sequence - Part 2
  Echo train duration: 300 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: Constant
  Turbo factor: 110
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX 3D DIXON *
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  TR: 3.89 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 3.89 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Flip angle: 9.0 deg
  Fat suppr.: None
  Lines Per Shot: 58
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  TR: 3.89 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L3.0 P33.1 F61.1
  L: 3.0 mm
  P: 33.1 mm
  F: 61.1 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 61 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Spine
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 61 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 329 mm
  R >> L: 420 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.4 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Spine
  Normalize: None
  Series Description:
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Inline - MapIt
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  Contrasts: 2
  TR: 3.89 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Off
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: In phase
  Multi-slice mode: Sequential
  Bandwidth 1: 1040 Hz/Px
  Bandwidth 2: 1040 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX 3D DIXON *
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F264.7 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  TR: 3.89 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
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Geometry - Common
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  Position: L3.0 P33.1 F264.7 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L3.0 P33.1 F264.7 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 265 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 265 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L3.0 P33.1 F264.7 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX 3D DIXON *
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  TR: 3.89 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
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Geometry - Common
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  Position: L3.0 P33.1 F61.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L3.0 P33.1 F61.1 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 61 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 61 mm
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System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L3.0 P33.1 F61.1 mm
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Inline - Composing
  Inline Composing: Off
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 8.8 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
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  Contrasts: 1
  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
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Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\HISTO *
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
Contrast
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  TM: 10 ms
  Averages: 1
  Flip angle: 90 deg
  Water suppr.: None
  Measurements: 5
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Save uncombined: Off
  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Sequence - Common
  Preparation scans: 0
  Delta frequency: -1.8 ppm
  Phase cycling: Auto
  Bandwidth: 1200 Hz
  Acquisition duration: 853 ms
  Remove oversampling: On

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\Care Bolus *
TA: 1:16 PM: FIX Voxel size: 1.8×1.8×20.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  TR: 68.77 ms
  TE: 1.52 ms
  Averages: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 68.77 ms
  TE: 1.52 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 100
  Pause after meas.: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  Base resolution: 192
  Phase resolution: 77 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  TR: 68.77 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: Parallel R/L
  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: FIX
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - Coil Memory
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 68.77 ms
  Segments: 13
Angio - Common
  Flip angle: 30 deg
  Measurements: 100
  Pause after meas.: 0.0 s
Angio - Inline
  Subtract: Off
  Measurements: 100
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  Segments: 13
  RF pulse type: Low SAR
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX ARTERIAL *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
  Prio recon: Off
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Abdomen
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX ARTERIAL *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX VENOUS *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX VENOUS *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX MRCP BH *
TA: 1:02 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1850.0 ms
  TE: 782 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1850.0 ms
  TE: 782 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1850.0 ms
  Multi-slice mode: Single shot
  Series: Interl. in B.-h.
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1850.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR MRCP BH *
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DELAYED *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.8 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX DELAYED *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX MRCP BH *
TA: 1:02 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1850.0 ms
  TE: 782 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1850.0 ms
  TE: 782 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1850.0 ms
  Multi-slice mode: Single shot
  Series: Interl. in B.-h.
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1850.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR MRCP BH *
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 400 mm
  A >> P: 463 mm
  F >> H: 270 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\HISTO *
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
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Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR POST *
TA: 0:17 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 2.96 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 55 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reordering Shift 3D: 0
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 3
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 345 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.3 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.96 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR POST *
TA: 0:17 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 F275.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 86.1 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
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Geometry - Common
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  Position: L16.4 P26.6 F275.0 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 F275.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 275 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 275 mm
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System - Adjust Volume
  Position: L16.4 P26.6 F275.0 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX VIBE HIRES ABD (RSRCH) *
TA: 0:19 PM: ISO Voxel size: 0.8×0.8×2.5 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 28.6 %
  Slices per slab: 112
  FoV read: 380 mm
  FoV phase: 81.7 %
  Slice thickness: 2.5 mm
  TR: 3.44 ms
  TE: 1.4 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.44 ms
  TE: 1.4 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 58
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 380 mm
  FoV phase: 81.7 %
  Slice thickness: 2.5 mm
  Base resolution: 480
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Geometry - Common
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  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 28.6 %
  Slices per slab: 112
  FoV read: 380 mm
  FoV phase: 81.7 %
  Slice thickness: 2.5 mm
  TR: 3.44 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 8 mm
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 311 mm
  R >> L: 380 mm
  F >> H: 280 mm
  Reset: Off
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
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  TR: 3.44 ms
  TE: 1.4 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 550 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:21 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
Properties
  Prio recon: On
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 84.4 %
  Slice thickness: 6.0 mm
  TR: 3.25 ms
  TE: 1.47 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 3.25 ms
  TE: 1.47 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 84.4 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 84.4 %
  Slice thickness: 6.0 mm
  TR: 3.25 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 338 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.25 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1502 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:21 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX IN-OPP BH *
TA: 0:33 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
  Prio recon: Off
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 43
  Dist. factor: 20 %
  Position: L16.7 P7.3 H0.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 5.0 mm
  TR: 150.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1,2;SP3,4
Contrast - Common
  TR: 150.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 60 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: 7/8
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 43
  Dist. factor: 20 %
  Position: L16.7 P7.3 H0.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 5.0 mm
  TR: 150.0 ms
  Multi-slice mode: Interleaved
  Series: Interl. in B.-h.
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L16.7 P7.3 H0.4 mm
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Q-parallel F/H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 43
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 420 mm
  FoV phase: 78.1 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 150.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 420 mm
  FoV phase: 78.1 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 2
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 60 deg
  Measurements: 1
  Contrasts: 2
  TR: 150.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 2
  Flow comp. 1: No
  Readout mode: Bipolar
  Multi-slice mode: Interleaved
  Bandwidth 1: 1090 Hz/Px
  Bandwidth 2: 1090 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Optimized
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX IN-OPP BH *
TA: 0:33 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slice group: 1
  Slices: 43
  Dist. factor: 20 %
  Position: L16.7 P7.3 F249.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 5.0 mm
  TR: 150.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1,2;SP3,4
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Geometry - Common
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  Position: L16.7 P7.3 F249.6 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L16.7 P7.3 F249.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX 3D DIXON *
TA: 0:12 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 425 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.88 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.88 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Flip angle: 9.0 deg
  Fat suppr.: None
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 425 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 425 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.88 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 319 mm
  R >> L: 425 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 6.4 s
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 3.88 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Off
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: In phase
  Multi-slice mode: Sequential
  Bandwidth 1: 1040 Hz/Px
  Bandwidth 2: 1040 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.25 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 6.9 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
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  Contrasts: 1
  TR: 3.13 ms
  TE: 1.25 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 530 Hz/Px
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Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\HISTO *
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
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Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Save uncombined: Off
  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\Care Bolus *
TA: 1:16 PM: FIX Voxel size: 1.8×1.8×20.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  TR: 68.77 ms
  TE: 1.52 ms
  Averages: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 68.77 ms
  TE: 1.52 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 100
  Pause after meas.: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  Base resolution: 192
  Phase resolution: 77 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  TR: 68.77 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: Parallel R/L
  Gap: 10.0 mm
  Thickness: 50 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: FIX
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - Coil Memory
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 68.77 ms
  Segments: 13
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  Segments: 13
  RF pulse type: Low SAR
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sAX ARTERIAL *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
  Prio recon: Off
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.25 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Abdomen
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 530 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sAX ARTERIAL *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sAX VENOUS *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sAX VENOUS *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX MRCP *
TA: 0:50 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 28 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 2000.0 ms
  TE: 792 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2000.0 ms
  TE: 792 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 4
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR MRCP BH *
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sAX DELAYED *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.25 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 6.9 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 530 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sAX DELAYED *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sCOR POST *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 6 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 2.93 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 6
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Geometry - Common
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  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 339 mm
  F >> H: 420 mm
  A >> P: 288 mm
  Reset: Off
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Time to center: 8.7 s
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Inline - MapIt
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  TR: 2.93 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\sCOR POST *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 6 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 F275.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
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Geometry - Common
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  Position: L16.4 P26.6 F275.0 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 F275.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 275 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 275 mm
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System - Adjust Volume
  Position: L16.4 P26.6 F275.0 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 363 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.25 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L10.1 P17.4 H0.5
  L: 10.1 mm
  P: 17.4 mm
  H: 0.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Abdomen
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 323 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 6.9 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Inline - MapIt
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  TR: 3.13 ms
  TE: 1.25 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 530 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX PRE AP *
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 75.0 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.25 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR MRCP BH *
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX MRCP *
TA: 0:50 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 28 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 2000.0 ms
  TE: 792 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2000.0 ms
  TE: 792 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: SPAIR
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: F >> H
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 45
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  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 400 mm
  A >> P: 463 mm
  F >> H: 270 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\HISTO *
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
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Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX IN-PHASE *
TA: 0:58 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl  | Substep: 1/2
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  TE: 2.42 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP6-8
Contrast - Common
  TR: 1600.0 ms
  TE: 2.42 ms
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: On
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 325 mm
  R >> L: 400 mm
  F >> H: 251 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1600.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 81.3 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  TR: 1600.0 ms
  TE: 2.42 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 6.1 ms
  Bandwidth: 170 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 146
Sequence - Assistant
  Mode: Off
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX IN-PHASE *
TA: 0:58 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 240 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 240 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX OPP-PHASE *
TA: 0:58 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  TE: 3.54 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP6-8
Contrast - Common
  TR: 1600.0 ms
  TE: 3.54 ms
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
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Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: Default
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Inline - MapIt
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  TE: 3.54 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 7 ms
  Bandwidth: 180 Hz/Px
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX OPP-PHASE *
TA: 0:58 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 240 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 240 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX IN-PHASE *
TA: 1:54 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  TE: 2.42 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP6-8
Contrast - Common
  TR: 1600.0 ms
  TE: 2.42 ms
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
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Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: On - AutoCoilSelect
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
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  TE: 2.42 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 6.1 ms
  Bandwidth: 170 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX OPP-PHASE *
TA: 1:54 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  TE: 3.54 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP6-8
Contrast - Common
  TR: 1600.0 ms
  TE: 3.54 ms
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
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Geometry - Navigator
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Inline - MapIt
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  TE: 3.54 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 7 ms
  Bandwidth: 180 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_PRE AP *
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.83 ms
  TE: 1.48 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Radial views: 680
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
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  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Default
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System - Adjust Volume
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  A >> P: 380 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 60.4 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.83 ms
  TE: 1.48 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_PRE AP *
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P0.0 F184.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F184.6 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F184.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 185 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 185 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F184.6 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\HISTO *
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
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Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
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Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\DYN ART RADIAL *
TA: 2:18 PM: ISO Voxel size: 1.8×1.8×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 27.3 %
  Slices per slab: 88
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.77 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 3.77 ms
  TE: 1.65 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Radial views: 600
  Slice resolution: 61 %
  Slice partial Fourier: 6/8
  Trajectory: Radial
  Interpolation: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 27.3 %
  Slices per slab: 88
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.77 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 456 mm
  R >> L: 456 mm
  F >> H: 264 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  Flip angle: 12.0 deg
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  Time to center: 69.0 s
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.77 ms
  TE: 1.65 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 490 Hz/Px
Sequence - Part 2
  Simulated motion: Off
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Special
  Radial view sharing: Golden angle
  Temporal resolution: 34
  # Subframe intervals: 2
  Subframe interval: 1
  Start 1: 0.0 s
  Duration 1: 70.4 s
  Temporal spacing 1: 7.8 s
  Outer angular coverage: 98.4 %
  Inner radius: 25.0 %
  Adapt temp. resolution: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_VENOUS AP *
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.83 ms
  TE: 1.48 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Radial views: 680
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
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Geometry - Common
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  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
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System - Adjust Volume
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  A >> P: 380 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
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  Time to center: 60.4 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.83 ms
  TE: 1.48 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_VENOUS AP *
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P0.0 F184.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F184.6 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F184.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 185 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 185 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F184.6 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX MRCP BH *
TA: 0:46 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1820.0 ms
  TE: 782 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1820.0 ms
  TE: 782 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1820.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1820.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR MRCP BH *
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_DELAY AP *
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.83 ms
  TE: 1.48 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Radial views: 680
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 380 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 60.4 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_DELAY AP *
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P0.0 F184.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F184.6 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F184.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 185 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 185 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F184.6 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_PRE *
TA: 1:03 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.08 ms
  TE: 1.47 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 3.08 ms
  TE: 1.47 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 100 %
  Slice resolution: 60 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
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Geometry - Common
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  Position: Isocenter
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  TR: 3.08 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
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Inline - Common
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  Time to center: 31.4 s
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Inline - MapIt
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  TR: 3.08 ms
  TE: 1.47 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
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\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX_RADIAL_PRE *
TA: 1:03 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P0.0 F184.6 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.08 ms
  TE: 1.47 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F184.6 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F184.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 185 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 185 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F184.6 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX MRCP BH *
TA: 0:46 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1820.0 ms
  TE: 782 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1820.0 ms
  TE: 782 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1820.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1820.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR MRCP BH *
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 115.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 400 mm
  A >> P: 463 mm
  F >> H: 270 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\HISTO *
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
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Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR_STARVIBE *
TA: 2:17 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.16 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 3.16 ms
  TE: 1.48 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Radial views: 680
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.16 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 216 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 68.7 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Inline - MapIt
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  TR: 3.16 ms
  TE: 1.48 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\COR_STARVIBE *
TA: 2:17 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P0.0 F199.6 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.16 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
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Geometry - Common
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  Position: L0.0 P0.0 F199.6 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P0.0 F199.6 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 200 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 200 mm
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System - Adjust Volume
  Position: L0.0 P0.0 F199.6 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 363 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: High
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Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX TRUFISP *
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\Raw Data Transfer *
TA: 0.0 s PM: REF Rel. SNR: 1.00  :
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  AutoAlign: ---
  Filter: None
  Coil elements: BC
Contrast
Resolution - Common
  Prescan Normalize: Off
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.260379 MHz
  Correction factor: 1
  Gain: Low
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Sequence - Special
  Click to open   >>>: Off
  YarraLink ver 0.1: Off
  Info at http://yarra.rocks: Off
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ABD-PEL\ABD-PEL DOT\ABD-PEL DOT\AX 3D PELVIS DIXON *
TA: 2:27 PM: ISO Voxel size: 1.0×1.0×1.5 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 44.4 %
  Slices per slab: 144
  FoV read: 350 mm
  FoV phase: 82.4 %
  Slice thickness: 1.5 mm
  TR: 6.46 ms
  TE 1: 2.46 ms
  TE 2: 3.69 ms
  Averages: 3
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 6.46 ms
  TE 1: 2.46 ms
  TE 2: 3.69 ms
  Flip angle: 9.0 deg
  Fat suppr.: None
  Lines Per Shot: 104
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 82.4 %
  Slice thickness: 1.5 mm
  Base resolution: 352
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 44.4 %
  Slices per slab: 144
  FoV read: 350 mm
  FoV phase: 82.4 %
  Slice thickness: 1.5 mm
  TR: 6.46 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L3.0 P33.1 F61.1
  L: 3.0 mm
  P: 33.1 mm
  F: 61.1 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 61 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 61 mm
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 289 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Reset: Off
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 74.1 s
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
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  Contrasts: 2
  TR: 6.46 ms
  TE 1: 2.46 ms
  TE 2: 3.69 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: In phase
  Multi-slice mode: Sequential
  Bandwidth 1: 1010 Hz/Px
  Bandwidth 2: 1010 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
