PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\UMC_3T_01_26_2017
  MRA BODY
    MRU
      ADULT
        FastViewLocalizer
        COR T2
        AX T2
        AX T2 SPAIR
        SAG T2 KIDNEY
        COR PRE
        AX IN-OPP BH
        AX PRE AP
        COR MRCP BH
        AX T2 SPACE
        MRU DYN TEST
        MRU DYN
        MRA ABD MASK
        CARE BOLUS
        MRA SOURCE 1
        MRA SOURCE 2
        AX POST
        COR POST
        AX TRUFISP
        SAG 3D POST
        AX POST 10mins
        DYN ART GOLDEN ANGLE

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\FastViewLocalizer
TA: 0:15 PM: ISO Voxel size: 5.0×5.0×5.0 mmRel. SNR: 1.00  : flct
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 2.56 ms
  TE: 1.44 ms
  Filter: Distortion Corr.(2D)
  Coil elements: BC
Contrast - Common
  TR: 2.56 ms
  TE: 1.44 ms
Resolution - Common
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  Base resolution: 96
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 100 %
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 480 mm
  FoV phase: 87.5 %
  Slice thickness: 5 mm
  TR: 2.56 ms
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.0 A25.0 H97.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Table position: H
  Table position: 97 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: On
  Range start: H
  Range start: 100 mm
  Total FoV: H >> F
  Total FoV: 700 mm
  Slices: 1
  Slice thickness: 5 mm
  Dist. factor: 100 %
  FoV read: 480 mm
  FoV phase: 87.5 %
  Perform CTM adjustments: On
  Table Speed: 46 mm/s
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 97 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Perform CTM adjustments: On
  Adjustment Tolerance: Maximum
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Img. Scale Cor.: 1.000
Sequence - Part 1
  Dimension: 2D
  Bandwidth: 801.282051 Hz/Px
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR T2
TA: 0:49 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 1/2
Properties
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  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 1400.0 ms
  TE: 84 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 1400.0 ms
  TE: 84 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: 5/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 1400.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 1400.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: On
  Composing Function: Angio
  Normalize: None
  Series Description:
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.8 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 192
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR T2
TA: 0:49 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 300 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 300 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×6.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/3
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 72 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 72 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
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Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
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  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
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  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 231 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV phase: 87.5 %
  Phase resolution: 80 %
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.6 ms
  Bandwidth: 814 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 179
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/3
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 220 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 220 mm
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\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 3/3
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 440 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 440 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2 SPAIR
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×6.0 mmPAT: 2 Rel. SNR: 1.00  : h  | Substep: 1/3
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Contrast - Common
  TR: 1500.0 ms
  TE: 72 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - AutoAlign
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjustments
  B0 Shim mode: Abdomen
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Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.8 ms
  Bandwidth: 698 Hz/Px
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\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2 SPAIR
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 2/3
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 220 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 220 mm
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System - Adjustments
  B0 Shim mode: Standard
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\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2 SPAIR
TA: 0:54 PM: ISO Voxel size: 1.6×1.6×6.0 mmPAT: 3 Rel. SNR: 1.00  : h  | Substep: 3/3
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 440 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 440 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\SAG T2 KIDNEY
TA: 1:00 PM: ISO Voxel size: 1.3×1.3×5.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  TE: 82 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 2000.0 ms
  TE: 82 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 320 mm
  FoV phase: 75.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 977 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 154
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR PRE
TA: 0:16 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 2.96 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 55 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reordering Shift 3D: 0
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 3
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 323 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.7 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.96 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR PRE
TA: 0:16 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 F275.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
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Geometry - Common
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  Position: L16.4 P26.6 F275.0 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 F275.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 275 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 275 mm
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System - Adjust Volume
  Position: L16.4 P26.6 F275.0 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX IN-OPP BH
TA: 0:43 PM: ISO Voxel size: 0.8×0.8×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 20 %
  Position: L16.7 P7.3 H61.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 170.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1,2;SP3,4
Contrast - Common
  TR: 170.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 60 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 82 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 20 %
  Position: L16.7 P7.3 H61.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 5.0 mm
  TR: 170.0 ms
  Multi-slice mode: Interleaved
  Series: Interl. in B.-h.
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L16.7 P7.3 H61.4 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Q-parallel F/H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 61 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 5.0 mm
  Dist. factor: 20 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 61 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 170.0 ms
  Concatenations: 2
  Segments: 1
Physio - Cardiac
  Tagging: None
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  FoV read: 400 mm
  FoV phase: 81.3 %
  Phase resolution: 82 %
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 60 deg
  Measurements: 1
  Contrasts: 2
  TR: 170.0 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 2
  Flow comp. 1: No
  Readout mode: Bipolar
  Multi-slice mode: Interleaved
  Bandwidth 1: 1090 Hz/Px
  Bandwidth 2: 1090 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Optimized
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX PRE AP
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.8 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX PRE AP
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR MRCP BH
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX T2 SPACE
TA: 3:42 PM: ISO Voxel size: 1.0×1.0×1.0 mmPAT: 3 Rel. SNR: 1.00  : spcR
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 75 %
  Slice oversampling: 22.2 %
  Slices per slab: 144
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1200 ms
  TE: 100 ms
  Averages: 1.4
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP5-7
Contrast - Common
  TR: 1200 ms
  TE: 100 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 135 deg
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.4
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 91 %
  Slice resolution: 60 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 22.2 %
  Slices per slab: 144
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 1200 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Sagittal: L >> R
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 250 mm
  A >> P: 250 mm
  F >> H: 144 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 1200 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 91 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.8 ms
  Adiabatic-mode: Off
  Bandwidth: 592 Hz/Px
Sequence - Part 2
  Echo train duration: 300 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: Constant
  Turbo factor: 110
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\MRU DYN TEST
TA: 2.3 s PM: ISO Voxel size: 2.2×2.2×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: Off
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R3.9 A10.9 H0.2 mm
  Orientation: C > T-1.6
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 32
  FoV read: 420 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2.63 ms
  TE: 0.69 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 2.63 ms
  TE: 0.69 ms
  Flip angle: 25.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 13
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 420 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 60 %
  Slice resolution: 50 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R3.9 A10.9 H0.2 mm
  Orientation: C > T-1.6
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 32
  FoV read: 420 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 2.63 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R3.9 A10.9 H0.2 mm
  Orientation: C > T-1.6
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  MSMA: C - T - S
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System - Adjust Volume
  Position: R3.9 A10.9 H0.2 mm
  Orientation: C > T-1.6
  Rotation: 0.00 deg
  R >> L: 342 mm
  F >> H: 420 mm
  A >> P: 96 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 25.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 0.9 s
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Inline - MIP
  MIP-Sag: Off
  MIP-Cor: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 25.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.63 ms
  TE: 0.69 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Strong
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 1000 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\MRU DYN
TA: 5:27 PM: ISO Voxel size: 2.2×2.2×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl
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Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 144
  Pause after meas.: 0.0 s
  Multiple series: Off
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System - Miscellaneous
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  Coil Select Mode: Off - All
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Inline - Common
  View sharing: Off
  Flip angle: 25.0 deg
  Measurements: 144
  Pause after meas.: 0.0 s
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Inline - Inline
  Subtract: Off
  Measurements: 144
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Inline - Soft Tissue
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  Measurements: 144
  Pause after meas.: 0.0 s
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Inline - MapIt
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  Measurements: 144
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\MRA ABD MASK
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×1.1 mmPAT: 3 Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  TR: 3.05 ms
  TE: 1.09 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.05 ms
  TE: 1.09 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  Base resolution: 384
  Phase resolution: 80 %
  Slice resolution: 61 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  TR: 3.05 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
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  MSMA: S - C - T
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.05 ms
  Segments: 1
Angio - Common
  Flip angle: 25 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\CARE BOLUS
TA: 1:30 PM: FIX Voxel size: 1.6×1.6×40.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  TR: 52.79 ms
  TE: 1.56 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 52.79 ms
  TE: 1.56 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 90
  Pause after meas.: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  Base resolution: 256
  Phase resolution: 73 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
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  Slice thickness: 40 mm
  TR: 52.79 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: Parallel A/P
  Gap: 5.0 mm
  Thickness: 50 mm
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System - Miscellaneous
  Positioning mode: FIX
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  Coronal: P >> A
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Physio - Signal1
  1st Signal/Mode: None
  TR: 52.79 ms
  Segments: 9
Angio - Common
  Flip angle: 25 deg
  Measurements: 90
  Pause after meas.: 0.0 s
Angio - Inline
  Subtract: Off
  Measurements: 90
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 370 Hz/Px
Sequence - Part 2
  Segments: 9
  RF pulse type: Low SAR
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\MRA SOURCE 1
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×1.1 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
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  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  TR: 3.05 ms
  TE: 1.09 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.05 ms
  TE: 1.09 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  Base resolution: 384
  Phase resolution: 80 %
  Slice resolution: 61 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  TR: 3.05 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P20.0 H0.0 mm
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
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  Coronal: A >> P
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  Coil Select Mode: Off - All
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.05 ms
  Segments: 1
Angio - Common
  Flip angle: 25 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\MRA SOURCE 2
TA: 0:17 PM: ISO Voxel size: 1.0×1.0×1.1 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX POST
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
Properties
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  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
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  Time to center: 8.8 s
Inline - Inline
  Subtract: Off
  Measurements: 1
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Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
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Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX POST
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR POST
TA: 0:16 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 2.96 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 55 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reordering Shift 3D: 0
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 3
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Geometry - Common
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  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 323 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
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  Time to center: 8.7 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.96 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\COR POST
TA: 0:16 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 F275.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
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Geometry - Common
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  Position: L16.4 P26.6 F275.0 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 F275.0 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 275 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 275 mm
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System - Adjust Volume
  Position: L16.4 P26.6 F275.0 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX TRUFISP
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 1/2
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Angio
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 363 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - Composing
  Inline Composing: On
  Composing Function: Angio
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX TRUFISP
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi  | Substep: 2/2
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Geometry - AutoAlign
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\SAG 3D POST
TA: 0:15 PM: ISO Voxel size: 1.0×1.0×2.5 mmPAT: 4 Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 300 mm
  FoV phase: 75.0 %
  Slice thickness: 2.5 mm
  TR: 3.37 ms
  TE: 1.26 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.37 ms
  TE: 1.26 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 58
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 300 mm
  FoV phase: 75.0 %
  Slice thickness: 2.5 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 300 mm
  FoV phase: 75.0 %
  Slice thickness: 2.5 mm
  TR: 3.37 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Sagittal
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: F >> H
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 225 mm
  F >> H: 300 mm
  R >> L: 240 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.2 s
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.37 ms
  TE: 1.26 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 530 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX POST 10mins
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 1/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
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Geometry - Common
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
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Geometry - AutoAlign
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  Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: H
  Table position: 0 mm
  Inline Composing: On
  Normalize: None
  Composing Function: Adaptive
System - Miscellaneous
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L10.1 P17.4 H0.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 8.8 s
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Inline - Composing
  Inline Composing: On
  Composing Function: Adaptive
  Normalize: None
  Series Description:
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Inline - MapIt
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  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
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\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\AX POST 10mins
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl  | Substep: 2/2
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 F250.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
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Geometry - Common
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  Position: L10.1 P17.4 F250.1 mm
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 F250.1 mm
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: On
  Table position: F
  Table position: 250 mm
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System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 250 mm
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System - Adjust Volume
  Position: L10.1 P17.4 F250.1 mm
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRU\ADULT\DYN ART GOLDEN ANGLE
TA: 2:18 PM: ISO Voxel size: 1.8×1.8×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 27.3 %
  Slices per slab: 88
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.77 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.77 ms
  TE: 1.65 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Radial views: 600
  Slice resolution: 61 %
  Slice partial Fourier: 6/8
  Trajectory: Radial
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
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  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 27.3 %
  Slices per slab: 88
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.77 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L18.8 A16.3 F114.9
  L: 18.8 mm
  A: 16.3 mm
  F: 114.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 115 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 115 mm
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 456 mm
  R >> L: 456 mm
  F >> H: 264 mm
  Reset: Off
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 12.0 deg
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  Time to center: 69.0 s
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Inline - Composing
  Inline Composing: Off
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.77 ms
  TE: 1.65 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 490 Hz/Px
Sequence - Part 2
  Simulated motion: Off
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Special
  Radial view sharing: Golden angle
  Temporal resolution: 34
  # Subframe intervals: 2
  Subframe interval: 1
  Start 1: 0.0 s
  Duration 1: 70.4 s
  Temporal spacing 1: 7.8 s
  Outer angular coverage: 98.4 %
  Inner radius: 25.0 %
  Adapt temp. resolution: Off
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