PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\UMC_3T_01_26_2017
  ABDOMEN
    ABD NON-DOT
      BREATH HOLD
        3PL LOC
        COR PRE
        COR T2
        AX T2
        AX T2 SPAIR
        AX DWI
        AX 3D DIXON
        HISTO
        AX PRE
        Care Bolus
        AX ARTERIAL
        AX VENOUS
        AX MRCP BH
        COR MRCP BH
        AX DELAYED
        COR POST BH
        AX TRUFISP
        CS_MRCP_RUN LAST

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\3PL LOC
TA: 0:17 PM: ISO Voxel size: 0.8×0.8×8.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.1 ms
  TE: 2.45 ms
  Averages: 1
  Concatenations: 27
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 6.1 ms
  TE: 2.45 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.1 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 27
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 15
  Slice thickness: 8.0 mm
  Dist. factor: 10 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.1 ms
  Concatenations: 27
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 430 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 27
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.1 ms
  TE: 2.45 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 450 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\COR PRE
TA: 0:17 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 50.0 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 97.2 %
  Slice thickness: 3.0 mm
  TR: 3.50 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.50 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 58
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 97.2 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 50.0 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 97.2 %
  Slice thickness: 3.0 mm
  TR: 3.50 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 164 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 164 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 389 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.4 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.50 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\COR T2
TA: 0:53 PM: ISO Voxel size: 1.3×1.3×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  TE: 82 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 1500.0 ms
  TE: 82 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
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  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 710 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 224
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX T2
TA: 0:59 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 74 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 74 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 320
  Phase resolution: 60 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 38
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
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  Concatenations: 3
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
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  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjustments
  B0 Shim mode: Cardiac
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 251 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV phase: 87.5 %
  Phase resolution: 60 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 781 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 168
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX T2 SPAIR
TA: 0:59 PM: ISO Voxel size: 1.3×1.3×6.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 38
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 77 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 77 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - Common
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  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.84 ms
  Bandwidth: 679 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX DWI
TA: 2:18 PM: ISO Voxel size: 1.7×1.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : epir
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L8.6 P22.5 F0.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 11510 ms
  TE: 50.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2;SP1,2
Contrast - Common
  TR: 11510 ms
  TE: 50.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 220 ms
  IR scheme: Sequential
  Fat suppr.: None
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L8.6 P22.5 F0.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 11510 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L8.6 P22.5 F0.2 mm
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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System - Adjust Volume
  Position: L8.6 P22.5 F0.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 333 mm
  R >> L: 425 mm
  F >> H: 264 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 10.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 11510 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 4
  b-value 2: 5
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 10
Diff - Body
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 4
  b-value 2: 5
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: On
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 10
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.55 ms
  Bandwidth: 2170 Hz/Px
Sequence - Part 2
  EPI factor: 90
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX 3D DIXON
TA: 0:18 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  TR: 4.30 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 4.30 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Flip angle: 9.0 deg
  Fat suppr.: None
  Lines Per Shot: 58
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 78.1 %
  Slice thickness: 3.0 mm
  TR: 4.30 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L3.0 P33.1 F61.1
  L: 3.0 mm
  P: 33.1 mm
  F: 61.1 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: Parallel F/H
  Gap: 10.0 mm
  Thickness: 60 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 61 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 61 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjust Volume
  Position: L3.0 P33.1 F61.1 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 329 mm
  R >> L: 420 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 10.1 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 4.30 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Off
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: In phase
  Multi-slice mode: Sequential
  Bandwidth 1: 1120 Hz/Px
  Bandwidth 2: 1120 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\HISTO
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
Contrast
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  TM: 10 ms
  Averages: 1
  Flip angle: 90 deg
  Water suppr.: None
  Measurements: 5
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Save uncombined: Off
  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Sequence - Common
  Preparation scans: 0
  Delta frequency: -1.8 ppm
  Phase cycling: Auto
  Bandwidth: 1200 Hz
  Acquisition duration: 853 ms
  Remove oversampling: On

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX PRE
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 35 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 166 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 166 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 390 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
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  Time to center: 9.4 s
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Inline - MapIt
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  Contrasts: 1
  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 500 Hz/Px
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Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\Care Bolus
TA: 1:16 PM: FIX Voxel size: 1.8×1.8×20.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  TR: 68.77 ms
  TE: 1.52 ms
  Averages: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 68.77 ms
  TE: 1.52 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 100
  Pause after meas.: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  Base resolution: 192
  Phase resolution: 77 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 20 mm
  TR: 68.77 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: Parallel R/L
  Gap: 10.0 mm
  Thickness: 50 mm
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System - Miscellaneous
  Positioning mode: FIX
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  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - Coil Memory
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 68.77 ms
  Segments: 13
Angio - Common
  Flip angle: 30 deg
  Measurements: 100
  Pause after meas.: 0.0 s
Angio - Inline
  Subtract: Off
  Measurements: 100
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  Segments: 13
  RF pulse type: Low SAR
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX ARTERIAL
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
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  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 35 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 390 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 500 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX VENOUS
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX MRCP BH
TA: 1:02 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1850.0 ms
  TE: 782 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1850.0 ms
  TE: 782 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1850.0 ms
  Multi-slice mode: Single shot
  Series: Interl. in B.-h.
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1850.0 ms
  Concatenations: 3
Physio - Cardiac
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\COR MRCP BH
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX DELAYED
TA: 0:17 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 35 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 90.6 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 166 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 166 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L1.1 A15.2 F165.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 390 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.4 s
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 500 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\COR POST BH
TA: 0:17 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 50.0 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 97.2 %
  Slice thickness: 3.0 mm
  TR: 3.50 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.50 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 58
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 97.2 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 4
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Geometry - Common
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  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 50.0 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 97.2 %
  Slice thickness: 3.0 mm
  TR: 3.50 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 164 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 164 mm
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System - Adjust Volume
  Position: L2.0 A3.4 F164.4 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 389 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.50 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\AX TRUFISP
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 363 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\BREATH HOLD\CS_MRCP_RUN LAST
TA: 0:20 PM: ISO Voxel size: 1.0×1.0×1.1 mmPAT: 3 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
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Routine
  Slab group: 1
  Slabs: 1
  Position: R2.6 P2.5 F95.3 mm
  Orientation: C > S9.5 > T5.5
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 166.7 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  TR: 1700 ms
  TE: 466 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: BO1-3;SP1,2
Contrast - Common
  TR: 1700 ms
  TE: 466 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 120 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  Base resolution: 384
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: R2.6 P2.5 F95.3 mm
  Orientation: C > S9.5 > T5.5
  Phase enc. dir.: R >> L
  Slice oversampling: 166.7 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 1.10 mm
  TR: 1700 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: R2.6 P2.5 F95.3 mm
  Orientation: C > S9.5 > T5.5
  Phase enc. dir.: R >> L
  Initial Position: R2.6 P2.5 F95.3
  R: 2.6 mm
  P: 2.5 mm
  F: 95.3 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: C > S
  C > S: 9.5
  > T: 5.5
Geometry - Saturation
  Sat. region: 1
  Thickness: 100 mm
  Position: R198.9 A38.4 F0.1 mm
  Orientation: S > C-10.9
  Sat. region: 2
  Thickness: 100 mm
  Position: L217.3 P33.8 F0.2 mm
  Orientation: S > C-8.8
  Sat. region: 3
  Thickness: 110 mm
  Position: R13.1 P3.1 H123.6 mm
  Orientation: T > C-5.7 > S0.3
  Sat. region: 4
  Thickness: 110 mm
  Position: R12.0 A30.3 F268.4 mm
  Orientation: T > C-4.0 > S0.1
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: Parallel A/P
  Gap: 5 mm
  Thickness: 50 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 95 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 95 mm
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - AutoCoilSelect
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System - Adjust Volume
  Position: R2.6 P2.5 F95.3 mm
  Orientation: C > S9.5 > T5.5
  Rotation: 0.00 deg
  R >> L: 400 mm
  F >> H: 400 mm
  A >> P: 106 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 1700 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - MIP
  MIP-Sag: Off
  MIP-Cor: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.36 ms
  Adiabatic-mode: Off
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Echo train duration: 907 ms
  RF pulse type: Low SAR
  Gradient mode: Fast
  Excitation: Slab-sel.
  Flip angle mode: Constant
  Turbo factor: 207
Sequence - Special
  Ext. Reordering Mode: None
  Contrast Ambiguity: 4
  RF ScalingFactor: 1.50
  Scan Stop By Motion: Off
  Recon Mode: Coupled
  GPU Mode: CPU
  Compressed Sensing: On
  Sampling Factor: 0.035
  Mask Generation: Poisson-Disk
  Regularization Param.: 0.0010
  Iterations: 20
  CS Advanced: On
Sequence - Assistant
  Allowed delay: 180 s
