PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\UMC_3T_01_26_2017
  ABDOMEN
    ABD NON-DOT
      FREE BREATHE
        3PL LOC
        sCOR PRE
        COR T2
        AX T2
        AX T2 SPAIR
        AX IN-PHASE
        AX OPP-PHASE
        AX_STARVIBE_pre
        AX DWI
        HISTO
        DYN ART GOLDEN ANGLE
        AX_STARVIBE_VENOUS
        AX MRCP 
        COR MRCP BH
        AX_STARVIBE_DELAY
        sCOR POST
        AX TRUFISP
        t1_vibe_fs_tra_p4_bh_320
        Raw Data Transfer

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\3PL LOC
TA: 0:17 PM: ISO Voxel size: 0.8×0.8×8.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.1 ms
  TE: 2.45 ms
  Averages: 1
  Concatenations: 27
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 6.1 ms
  TE: 2.45 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.1 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 27
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 15
  Slice thickness: 8.0 mm
  Dist. factor: 10 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.1 ms
  Concatenations: 27
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 430 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 27
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.1 ms
  TE: 2.45 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 450 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\sCOR PRE
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 6 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 2.93 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 6
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  Transversal: F >> H
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 339 mm
  F >> H: 420 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.7 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.93 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\COR T2
TA: 0:53 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  TE: 81 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 1500.0 ms
  TE: 81 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: 5/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.68 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 192
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX T2
TA: 0:54 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 75 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 75 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 384
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
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  Concatenations: 4
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
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  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 231 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 4
Physio - Cardiac
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  FoV phase: 87.5 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.96 ms
  Bandwidth: 814 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX T2 SPAIR
TA: 0:54 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 75 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 75 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.96 ms
  Bandwidth: 685 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX IN-PHASE
TA: 1:54 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  TE: 2.42 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP6-8
Contrast - Common
  TR: 1600.0 ms
  TE: 2.42 ms
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
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  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 1
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: F >> H
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System - Adjust Volume
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  A >> P: 325 mm
  R >> L: 400 mm
  F >> H: 251 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1600.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 400 mm
  FoV phase: 81.3 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  TR: 1600.0 ms
  TE: 2.42 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 6.1 ms
  Bandwidth: 170 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 146
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX OPP-PHASE
TA: 1:54 PM: ISO Voxel size: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfl
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 81.3 %
  Slice thickness: 6.0 mm
  TR: 1600.0 ms
  TE: 3.54 ms
  Averages: 2
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP6-8
Contrast - Common
  TR: 1600.0 ms
  TE: 3.54 ms
  Magn. preparation: Non-sel. IR
  TI: 800 ms
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
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Geometry - Navigator
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Inline - MapIt
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  TE: 3.54 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 7 ms
  Bandwidth: 180 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX_STARVIBE_pre
TA: 1:29 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.4 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.83 ms
  TE: 1.4 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Radial views: 500
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
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  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Off - All
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System - Adjust Volume
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  A >> P: 380 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 44.4 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.83 ms
  TE: 1.4 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 830 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX DWI
TA: 2:18 PM: ISO Voxel size: 1.7×1.7×6.0 mmPAT: 2 Rel. SNR: 1.00  : epir
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L8.6 P22.5 F0.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 11510 ms
  TE: 50.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2;SP1,2
Contrast - Common
  TR: 11510 ms
  TE: 50.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 220 ms
  IR scheme: Sequential
  Fat suppr.: None
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 10 %
  Position: L8.6 P22.5 F0.2 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 425 mm
  FoV phase: 78.1 %
  Slice thickness: 6.0 mm
  TR: 11510 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L8.6 P22.5 F0.2 mm
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L8.6 P22.5 F0.2 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 333 mm
  R >> L: 425 mm
  F >> H: 264 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 10.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 11510 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 4
  b-value 2: 5
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 10
Diff - Body
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 4
  b-value 2: 5
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: On
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 10
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.55 ms
  Bandwidth: 2170 Hz/Px
Sequence - Part 2
  EPI factor: 90
  RF pulse type: Normal
  Gradient mode: Fast*

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\HISTO
TA: 0:15 PM: REF VoI: 30 ×30 ×30  mmRel. SNR: 1.00  : histo
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI R >> L: 30 mm
  VoI F >> H: 30 mm
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  Averages: 1
  Filter: None
  Coil elements: BO1-3;SP2,3
Contrast
  TR: 3000 ms
  TE 1: 12 ms
  TE 2: 24 ms
  TE 3: 36 ms
  TE 4: 48 ms
  TE 5: 72 ms
  TM: 10 ms
  Averages: 1
  Flip angle: 90 deg
  Water suppr.: None
  Measurements: 5
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
Resolution - Common
  Prescan Normalize: Off
  Vector size: 1024
Geometry - Common
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0 deg
  VoI R >> L: 30 mm
  VoI A >> P: 30 mm
  VoI F >> H: 30 mm
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
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  Save uncombined: Off
  Save single averages: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Abdomen
  B1 Shim mode: TrueForm
  Adj. water suppr.: Off
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 30 mm
  R >> L: 30 mm
  F >> H: 30 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Sequence - Common
  Preparation scans: 0
  Delta frequency: -1.8 ppm
  Phase cycling: Auto
  Bandwidth: 1200 Hz
  Acquisition duration: 853 ms
  Remove oversampling: On

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\DYN ART GOLDEN ANGLE
TA: 2:18 PM: ISO Voxel size: 1.8×1.8×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 27.3 %
  Slices per slab: 88
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.77 ms
  TE: 1.65 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.77 ms
  TE: 1.65 ms
  Flip angle: 12.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Radial views: 600
  Slice resolution: 61 %
  Slice partial Fourier: 6/8
  Trajectory: Radial
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 27.3 %
  Slices per slab: 88
  FoV read: 456 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.77 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L18.8 A16.3 F114.9
  L: 18.8 mm
  A: 16.3 mm
  F: 114.9 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 115 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 115 mm
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  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L18.8 A16.3 F114.9 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 456 mm
  R >> L: 456 mm
  F >> H: 264 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  Flip angle: 12.0 deg
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  Time to center: 69.0 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 12.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.77 ms
  TE: 1.65 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 490 Hz/Px
Sequence - Part 2
  Simulated motion: Off
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Special
  Radial view sharing: Golden angle
  Temporal resolution: 34
  # Subframe intervals: 2
  Subframe interval: 1
  Start 1: 0.0 s
  Duration 1: 70.4 s
  Temporal spacing 1: 7.8 s
  Outer angular coverage: 98.4 %
  Inner radius: 25.0 %
  Adapt temp. resolution: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX_STARVIBE_VENOUS
TA: 1:29 PM: ISO Voxel size: 1.3×1.3×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.4 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.83 ms
  TE: 1.4 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Radial views: 500
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
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Geometry - Common
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  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 380 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
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  Time to center: 44.4 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.83 ms
  TE: 1.4 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 830 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX MRCP
TA: 0:46 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1820.0 ms
  TE: 782 ms
  Averages: 1
  Concatenations: 3
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1820.0 ms
  TE: 782 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 0 %
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  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1820.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
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  A >> P: 300 mm
  R >> L: 300 mm
  F >> H: 175 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1820.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.2 ms
  Bandwidth: 148 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 160 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\COR MRCP BH
TA: 4.5 s PM: ISO Voxel size: 0.8×0.8×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  TE: 747 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 4500.0 ms
  TE: 747 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: 7/8
  Interpolation: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 50.0 mm
  TR: 4500.0 ms
  Multi-slice mode: Single shot
  Series: Descending
  Concatenations: 1
Geometry - AutoAlign
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  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Fat sat.
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 300 mm
  F >> H: 300 mm
  A >> P: 50 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
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Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 10.1 ms
  Bandwidth: 150 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX_STARVIBE_DELAY
TA: 2:01 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  TE: 1.48 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.83 ms
  TE: 1.48 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Radial views: 680
  Slice resolution: 60 %
  Slice partial Fourier: 7/8
  Trajectory: Radial
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 2.83 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  Coil Combine Mode: Sum of Squares
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  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 380 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 60.4 s
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Inline - MapIt
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  TE: 1.48 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Off
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 820 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\sCOR POST
TA: 0:12 PM: ISO Voxel size: 1.5×1.5×3.0 mmPAT: 6 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 2.93 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 51
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 6
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Geometry - Common
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  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 420 mm
  FoV phase: 80.6 %
  Slice thickness: 3.0 mm
  TR: 2.93 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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System - Miscellaneous
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 339 mm
  F >> H: 420 mm
  A >> P: 288 mm
  Reset: Off
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Inline - Common
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  Time to center: 8.7 s
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Inline - MapIt
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  TR: 2.93 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\AX TRUFISP
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 363 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\t1_vibe_fs_tra_p4_bh_320
TA: 1:40 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3.04 ms
  TE: 1.2 ms
  Averages: 7
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.04 ms
  TE: 1.2 ms
  Flip angle: 9.0 deg
  Fat suppr.: SPAIR
  Lines Per Shot: 47
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 7
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 380 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
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  Slice oversampling: 44.4 %
  Slices per slab: 72
  FoV read: 380 mm
  FoV phase: 81.3 %
  Slice thickness: 3.0 mm
  TR: 3.04 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
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Geometry - Saturation
  Fat suppr.: SPAIR
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System - Miscellaneous
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  Coil Select Mode: Default
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System - Adjust Volume
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  A >> P: 309 mm
  R >> L: 380 mm
  F >> H: 216 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.1 s
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Inline - MapIt
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  TR: 3.04 ms
  TE: 1.2 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: Min. TE
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\ABDOMEN\ABD NON-DOT\FREE BREATHE\Raw Data Transfer
TA: 0.0 s PM: REF Rel. SNR: 1.00  :
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Routine
  AutoAlign: ---
  Filter: None
  Coil elements: BC
Contrast
Resolution - Common
  Prescan Normalize: Off
Geometry - AutoAlign
  AutoAlign: ---
  Initial Position: Isocenter
  L: 0 mm
  P: 0 mm
  H: 0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
System - Miscellaneous
  Positioning mode: REF
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  Transversal: F >> H
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Sequence - Special
  Click to open   >>>: Off
  YarraLink ver 0.1: Off
  Info at http://yarra.rocks: Off
Sequence - Assistant
  Mode: Off
