PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\UMC_3T_01_26_2017
  MRA BODY
    MRA PELVIS
      MRA PELVIS
        3PL LOC
        COR PRE
        COR T2
        AX T2
        AX T2 SPAIR
        SAG T2
        AX PRE
        MRA PELVIS MASK
        Care Bolus
        MRA SOURCE 1
        MRA SOURCE 2
        AX VENOUS
        COR POST
        AX TRUFISP
        AX DELAYED
        3D DYN TWIST

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\3PL LOC
TA: 0:17 PM: ISO Voxel size: 0.8×0.8×8.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.1 ms
  TE: 2.45 ms
  Averages: 1
  Concatenations: 27
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP1-4
Contrast - Common
  TR: 6.1 ms
  TE: 2.45 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  Base resolution: 256
  Phase resolution: 70 %
  Phase partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 5
  Dist. factor: 150 %
  Position: L0.0 P0.0 H50.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 7
  Dist. factor: 100 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 3
  Slices: 15
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 430 mm
  FoV phase: 100.0 %
  Slice thickness: 8.0 mm
  TR: 6.1 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 27
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 15
  Slice thickness: 8.0 mm
  Dist. factor: 10 %
  FoV read: 430 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 6.1 ms
  Concatenations: 27
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 430 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
Physio - PACE
  Resp. control: Off
  Concatenations: 27
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 6.1 ms
  TE: 2.45 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 450 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\COR PRE
TA: 0:18 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 91.7 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  TE: 1.20 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 2.96 ms
  TE: 1.20 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 56
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 91.7 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 55 %
  Phase partial Fourier: Off
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reordering Shift 3D: 0
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Cor
  Total PAT factor: 3
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 33.3 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 91.7 %
  Slice thickness: 3.0 mm
  TR: 2.96 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
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System - Miscellaneous
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 367 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.8 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 2.96 ms
  TE: 1.20 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 600 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel. PE
  RF spoiling: On
  Incr. Gradient spoiling: Off
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\COR T2
TA: 0:53 PM: ISO Voxel size: 0.8×0.8×7.0 mmPAT: 3 Rel. SNR: 1.00  : h
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  TE: 81 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 1500.0 ms
  TE: 81 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 256
  Phase resolution: 75 %
  Phase partial Fourier: 5/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
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  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 1500.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Matrix Optimization: Off
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV read: 400 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.68 ms
  Bandwidth: 698 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 192
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 10 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\AX T2
TA: 0:54 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 75 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 75 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  Base resolution: 384
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 36
  Reference scan mode: Integrated
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Geometry - Common
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  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
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  Concatenations: 4
Geometry - AutoAlign
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  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
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  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 350 mm
  R >> L: 400 mm
  F >> H: 231 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 4
Physio - Cardiac
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  FoV phase: 87.5 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.96 ms
  Bandwidth: 814 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 269
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\AX T2 SPAIR
TA: 0:54 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 10 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 400 mm
  FoV phase: 87.5 %
  Slice thickness: 6.0 mm
  TR: 1500.0 ms
  TE: 75 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 1500.0 ms
  TE: 75 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 170 deg
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
  Water suppr.: None
  Restore magn.: Off
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Geometry - Common
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  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Weak
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Geometry - Navigator
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
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Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.96 ms
  Bandwidth: 685 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\SAG T2
TA: 1:00 PM: ISO Voxel size: 1.3×1.3×5.0 mmPAT: 3 Rel. SNR: 1.00  : h
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 25 %
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  TE: 82 ms
  Averages: 1
  Concatenations: 4
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP3-6
Contrast - Common
  TR: 2000.0 ms
  TE: 82 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: 5/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 42
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 10 %
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 320 mm
  FoV phase: 75.0 %
  Slice thickness: 5.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Single shot
  Series: Interleaved
  Concatenations: 4
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L15.6 P2.1 H0.0 mm
  Orientation: Sagittal
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Sagittal: L >> R
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 4
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 320 mm
  FoV phase: 75.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 4
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 3.72 ms
  Bandwidth: 977 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  Turbo factor: 154
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\AX PRE
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 8 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.8 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\MRA PELVIS MASK
TA: 0:16 PM: ISO Voxel size: 1.1×1.1×1.1 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 430 mm
  FoV phase: 87.5 %
  Slice thickness: 1.10 mm
  TR: 3.01 ms
  TE: 1.07 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.01 ms
  TE: 1.07 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 430 mm
  FoV phase: 87.5 %
  Slice thickness: 1.10 mm
  Base resolution: 384
  Phase resolution: 82 %
  Slice resolution: 63 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
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  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 430 mm
  FoV phase: 87.5 %
  Slice thickness: 1.10 mm
  TR: 3.01 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
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System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.01 ms
  Segments: 1
Angio - Common
  Flip angle: 25 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Motion Correction: None
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\Care Bolus
TA: 1:16 PM: FIX Voxel size: 1.8×1.8×40.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  TR: 68.77 ms
  TE: 1.52 ms
  Averages: 1
  Filter: Distortion Corr.(2D)
  Coil elements: BO1-3;SP1-3
Contrast - Common
  TR: 68.77 ms
  TE: 1.52 ms
  Magn. preparation: None
  Flip angle: 30 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 100
  Pause after meas.: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  Base resolution: 192
  Phase resolution: 77 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 40 mm
  TR: 68.77 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: Parallel A/P
  Gap: 10.0 mm
  Thickness: 50 mm
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System - Miscellaneous
  Positioning mode: FIX
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  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
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Physio - Signal1
  1st Signal/Mode: None
  TR: 68.77 ms
  Segments: 13
Angio - Common
  Flip angle: 30 deg
  Measurements: 100
  Pause after meas.: 0.0 s
Angio - Inline
  Subtract: Off
  Measurements: 100
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 400 Hz/Px
Sequence - Part 2
  Segments: 13
  RF pulse type: Low SAR
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 20 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\MRA SOURCE 1
TA: 0:16 PM: ISO Voxel size: 1.1×1.1×1.1 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 430 mm
  FoV phase: 87.5 %
  Slice thickness: 1.10 mm
  TR: 3.01 ms
  TE: 1.07 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.01 ms
  TE: 1.07 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 430 mm
  FoV phase: 87.5 %
  Slice thickness: 1.10 mm
  Base resolution: 384
  Phase resolution: 82 %
  Slice resolution: 63 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 0.0 %
  Slices per slab: 112
  FoV read: 430 mm
  FoV phase: 87.5 %
  Slice thickness: 1.10 mm
  TR: 3.01 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P20.0 H0.0 mm
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
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System - Miscellaneous
  Positioning mode: ISO
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  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
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  Coil Select Mode: Off - All
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.01 ms
  Segments: 1
Angio - Common
  Flip angle: 25 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 1.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\MRA SOURCE 2
TA: 0:16 PM: ISO Voxel size: 1.1×1.1×1.1 mmPAT: 3 Rel. SNR: 1.00  : fl
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\AX VENOUS
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Saturation
  Fat suppr.: Q-fat sat.
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 8 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
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System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\COR POST
TA: 0:19 PM: ISO Voxel size: 1.4×1.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 20 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.37 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP4-7
Contrast - Common
  TR: 3.37 ms
  TE: 1.23 ms
  Flip angle: 10.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
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Resolution - Common
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 288
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Ref. lines 3D: 24
  Reordering Shift 3D: 0
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Geometry - Common
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  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 400 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3.37 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L16.4 P26.6 H0.0 mm
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 400 mm
  F >> H: 400 mm
  A >> P: 288 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 10.0 deg
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  Time to center: 10.3 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.37 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Centric
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 690 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\AX TRUFISP
TA: 0:16 PM: ISO Voxel size: 1.0×1.0×6.0 mmPAT: 2 Rel. SNR: 1.00  : tfi
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 20 %
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  TE: 1.33 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2,3
Contrast - Common
  TR: 2.94 ms
  TE: 1.33 ms
  TD: 0 ms
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  Base resolution: 192
  Phase resolution: 93 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 400 mm
  FoV phase: 90.6 %
  Slice thickness: 6.0 mm
  TR: 2.94 ms
  Multi-slice mode: Sequential
  Series: Interleaved
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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System - Miscellaneous
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  Transversal: H >> F
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 363 mm
  R >> L: 400 mm
  F >> H: 270 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2.94 ms
  Segments: 1
Physio - PACE
  Resp. control: Off
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 1532 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slice-sel.
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 40 deg

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\AX DELAYED
TA: 0:16 PM: ISO Voxel size: 1.2×1.2×3.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  TE: 1.23 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 3.13 ms
  TE: 1.23 ms
  Flip angle: 9.0 deg
  Fat suppr.: Q-fat sat.
  Lines Per Shot: 54
  Water suppr.: None
  Dixon: Off
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  Base resolution: 352
  Phase resolution: 80 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 24
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice oversampling: 25.0 %
  Slices per slab: 96
  FoV read: 430 mm
  FoV phase: 79.5 %
  Slice thickness: 3.0 mm
  TR: 3.13 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L10.1 P17.4 H8.5 mm
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 8 mm
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  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Off - All
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System - Adjust Volume
  Position: L10.1 P17.4 H8.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 343 mm
  R >> L: 430 mm
  F >> H: 288 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.230225 MHz
  Correction factor: 1
  Gain: Low
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Physio - PACE
  Resp. control: Breath-hold
  Concatenations: 1
Inline - Common
  View sharing: Off
  Flip angle: 9.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 8.8 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.13 ms
  TE: 1.23 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Weak
  Contrasts: 1
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 510 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\UMC_3T_01_26_2017\MRA BODY\MRA PELVIS\MRA PELVIS\3D DYN TWIST
TA: 1:44 PM: ISO Voxel size: 1.1×1.1×1.5 mmPAT: 2 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 10.0 %
  Slices per slab: 80
  FoV read: 430 mm
  FoV phase: 93.8 %
  Slice thickness: 1.50 mm
  TR: 2.66 ms
  TE: 0.96 ms
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: BO1-3;SP2-4
Contrast - Common
  TR: 2.66 ms
  TE: 0.96 ms
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Reconstruction: Magnitude
  Measurements: 25
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Multiple series: Off
Resolution - Common
  FoV read: 430 mm
  FoV phase: 93.8 %
  Slice thickness: 1.50 mm
  Base resolution: 384
  Phase resolution: 70 %
  Slice resolution: 50 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  View sharing: TWIST
  Central region A: 17 %
  Sampling density B: 20 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 10.0 %
  Slices per slab: 80
  FoV read: 430 mm
  FoV phase: 93.8 %
  Slice thickness: 1.50 mm
  TR: 2.66 ms
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Transversal: H >> F
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Angio - Common
  View sharing: TWIST
  Central region A: 17 %
  Sampling density B: 20 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 25 deg
  Virt. temporal resolution: 1.77 s
  Measurements: 25
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Burn time-to-center: Off
  Temporal interpolation: 2
  Time to center: 9.9 s
Angio - Inline
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  Measurements: 25
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: On
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Sequence - Part 1
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Optimization: Min. TE TR
  Bandwidth: 770 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
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