PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  BRAIN
    BRN MS
      B5 - BRN MS
        AAHScout
        AX DWI
        SAG 3D FLAIR
        AX WM NULL
        AX GRE
        AX T1
        SAG T1
        AX T2
        SAG T1 SPACE POST FS
        AX T1 FS POST
        AX FLAIR

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AAHScout
TA: 0:14 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  TE: 1.37 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3.15 ms
  TE: 1.37 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 6.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.15 ms
  TE: 1.37 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX DWI
TA: 1:17 PM: REF Voxel size: 1.4×1.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 5400 ms
  TE: 73.0 ms
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 5400 ms
  TE: 73.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 160
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: Off
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 5400 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5400 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 1.04 ms
  Bandwidth: 1042 Hz/Px
Sequence - Part 2
  EPI factor: 160
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\SAG 3D FLAIR
TA: 5:42 PM: REF Voxel size: 1.0×1.0×1.0 mmPAT: 2 Rel. SNR: 1.00  : spcir
Properties
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  Load images to graphic segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 176
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 5000 ms
  TE: 398 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 5000 ms
  TE: 398 ms
  MTC: Off
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 95 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 176
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 5000 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
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Geometry - Saturation
  Fat suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 250 mm
  F >> H: 250 mm
  R >> L: 176 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 5000 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 250 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.46 ms
  Adiabatic-mode: Off
  Bandwidth: 781 Hz/Px
Sequence - Part 2
  Echo train duration: 886 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T2 var
  Turbo factor: 284
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX WM NULL
TA: 5:52 PM: ISO Voxel size: 0.6×0.6×1.2 mmPAT: 2 Rel. SNR: 1.00  : tfl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: L2.5 A7.0 F0.5 mm
  Orientation: T > C-6.7 > S-2.1
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 10 %
  Slice oversampling: 22.2 %
  Slices per slab: 144
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.20 mm
  TR: 4000.0 ms
  TE: 3.69 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4000.0 ms
  TE: 3.69 ms
  Magn. preparation: Non-sel. IR
  TI: 500 ms
  Flip angle: 7 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.20 mm
  Base resolution: 224
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
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Resolution - Filter Image
  Image Filter: On
  ! Intensity: Sharp
  Edge Enhancement: 5
  Smoothing: 4
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: L2.5 A7.0 F0.5 mm
  Orientation: T > C-6.7 > S-2.1
  Phase enc. dir.: R >> L
  Slice oversampling: 22.2 %
  Slices per slab: 144
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.20 mm
  TR: 4000.0 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L2.5 A7.0 F0.5 mm
  Orientation: T > C-6.7 > S-2.1
  Phase enc. dir.: R >> L
  Initial Position: L2.5 A7.0 F0.5
  L: 2.5 mm
  A: 7.0 mm
  F: 0.5 mm
  Initial Rotation: 88.60 deg
  Initial Orientation: T > C
  T > C: -6.7
  > S: -2.1
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  Sagittal: R >> L
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  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L2.5 A7.0 F0.5 mm
  Orientation: T > C-6.7 > S-2.1
  Rotation: 88.60 deg
  R >> L: 256 mm
  A >> P: 256 mm
  F >> H: 173 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4000.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 500 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 256 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 7 deg
  Measurements: 1
  TR: 4000.0 ms
  TE: 3.69 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Radial
  Asymmetric echo: Off
  Flow comp.: No
  Multi-slice mode: Sequential
  Echo spacing: 7.6 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 220
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX GRE
TA: 1:56 PM: FIX Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 870.0 ms
  TE: 19.90 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 870.0 ms
  TE: 19.90 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 870.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 4.0 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 870.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 870.0 ms
  TE: 19.90 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Slice/Read
  Multi-slice mode: Interleaved
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX T1
TA: 2:12 PM: FIX Voxel size: 0.4×0.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rs
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 550.0 ms
  TE: 7.6 ms
  Averages: 2
  Concatenations: 3
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 550.0 ms
  TE: 7.6 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
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  TR: 550.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
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System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
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Physio - Signal1
  1st Signal/Mode: None
  TR: 550.0 ms
  Concatenations: 3
Physio - Cardiac
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  Phase resolution: 80 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Slice
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 7.63 ms
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 39
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 4
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 130 deg
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\SAG T1
TA: 1:54 PM: REF Voxel size: 0.9×0.9×3.5 mmPAT: 3 Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 2000.0 ms
  TE: 8.6 ms
  Averages: 1
  Concatenations: 3
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 2000.0 ms
  TE: 8.6 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 900 ms
  Flip angle: 140 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 28
  Reference scan mode: Integrated
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Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 2000.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
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System - Miscellaneous
  Positioning mode: REF
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  Sagittal: R >> L
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  AutoAlign: ---
  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 900 ms
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.58 ms
  Bandwidth: 260 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 18
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 6
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX T2
TA: 1:24 PM: FIX Voxel size: 0.3×0.3×4.0 mmPAT: 2 Rel. SNR: 1.00  : tse_rr
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 20 %
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 4.0 mm
  TR: 3800.0 ms
  TE: 93.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3800.0 ms
  TE: 93.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 4.0 mm
  Base resolution: 384
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 26
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 4.0 mm
  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 90.6 %
System - Miscellaneous
  Positioning mode: FIX
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  Sagittal: L >> R
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
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  FoV phase: 90.6 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.33 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 10
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\SAG T1 SPACE POST FS
TA: 6:36 PM: ISO Voxel size: 0.5×0.5×0.9 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: L0.0 A16.5 F5.6 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 40 %
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 205 mm
  FoV phase: 118.8 %
  Slice thickness: 0.95 mm
  TR: 680 ms
  TE: 19.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 680 ms
  TE: 19.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 205 mm
  FoV phase: 118.8 %
  Slice thickness: 0.95 mm
  Base resolution: 192
  Phase resolution: 129 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Accel. factor 3D: 2
  Ref. lines 3D: 50
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.0 A16.5 F5.6 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 45.5 %
  Slices per slab: 176
  FoV read: 205 mm
  FoV phase: 118.8 %
  Slice thickness: 0.95 mm
  TR: 680 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.0 A16.5 F5.6 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
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  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: SPAIR
  Fat sat. mode: Strong
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 6 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 6 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  AutoAlign: Head > Brain
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.0 A16.5 F5.6 mm
  Orientation: Sagittal
  Rotation: 90.00 deg
  F >> H: 205 mm
  A >> P: 244 mm
  R >> L: 168 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 680 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: SPAIR
  Dark blood: Off
  FoV read: 205 mm
  FoV phase: 118.8 %
  Phase resolution: 129 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 3.72 ms
  Adiabatic-mode: Off
  Bandwidth: 704 Hz/Px
Sequence - Part 2
  Echo train duration: 164 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 39
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX T1 FS POST
TA: 1:12 PM: FIX Voxel size: 0.7×0.7×3.5 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 373.0 ms
  TE: 2.49 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 373.0 ms
  TE: 2.49 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 373.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
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  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 159 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 373.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 373.0 ms
  TE: 2.49 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 360 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN MS\B5 - BRN MS\AX FLAIR
TA: 4:32 PM: FIX Voxel size: 0.7×0.7×4.0 mmPAT: Off Rel. SNR: 1.00  : tirW
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 60
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  TE: 84.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 84.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 96.9 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: None
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Geometry - Common
  Slice group: 1
  Slices: 60
  Dist. factor: 0 %
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  FoV phase: 96.9 %
  Slice thickness: 4.0 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 60
  Slice thickness: 4.0 mm
  Dist. factor: 0 %
  FoV read: 220 mm
  FoV phase: 96.9 %
System - Miscellaneous
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  Coil Combine Mode: Sum of Squares
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System - Adjust Volume
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  R >> L: 214 mm
  A >> P: 220 mm
  F >> H: 240 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 96.9 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.36 ms
  Bandwidth: 289 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 14
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: On
  VAT: 0 %
  Red. EC sensitivity: Off
  Turbo factor: 16
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