PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  ENT PROTOCOLS
    NECK
      E10 - PARATHYROID
        localizer
        COR STIR
        AX T2 DIXON FS
        iShim_b50_800d
        No iShim_b50_800d
        DYN TWIST DIXON NECK
        AX DIXON FAST
        AX T1 FS FLASH +-C
        dyn_vibe-twist_dixon_OLD

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\localizer
TA: 0:11 PM: ISO Voxel size: 0.6×0.6×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 2
  Dist. factor: 150 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 38 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.8 ms
  TE: 3.69 ms
  Averages: 1
  Concatenations: 8
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 7.8 ms
  TE: 3.69 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice group: 2
  Slices: 3
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 2
  Dist. factor: 150 %
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 300 mm
  FoV phase: 100.0 %
  Slice thickness: 6.0 mm
  TR: 7.8 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 8
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P18.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 2
  Slice thickness: 6.0 mm
  Dist. factor: 150 %
  FoV read: 300 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259700 MHz
  Correction factor: 1
  Gain: High
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7.8 ms
  Concatenations: 8
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 300 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
Physio - PACE
  Resp. control: Off
  Concatenations: 8
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 7.8 ms
  TE: 3.69 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 320 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\COR STIR
TA: 3:46 PM: ISO Voxel size: 0.8×0.8×3.0 mmPAT: 2 Rel. SNR: 1.00  : tirR_rr
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 80 %
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  TE: 47.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D)
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 3500.0 ms
  TE: 47.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 220 ms
  Flip angle: 160 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 30
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 17 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.0 mm
  Dist. factor: 17 %
  FoV read: 240 mm
  FoV phase: 100.0 %
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 90.00 deg
  F >> H: 240 mm
  R >> L: 240 mm
  A >> P: 116 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 220 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 240 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.4 ms
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 31
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 7
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 150 deg
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\AX T2 DIXON FS
TA: 4:01 PM: ISO Voxel size: 0.8×0.8×3.3 mmPAT: 2 Rel. SNR: 1.00  : tse
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 17 %
  Position: L10.9 P22.5 F8.0 mm
  Orientation: T > C15.9
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 19 %
  FoV read: 200 mm
  FoV phase: 75.0 %
  Slice thickness: 3.3 mm
  TR: 3800.0 ms
  TE: 103.0 ms
  Averages: 4
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: FS;HE3,4;NE1,2;SP1
Contrast - Common
  TR: 3800.0 ms
  TE: 103.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 160 deg
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: On
  Restore magn.: Off
Contrast - Dynamic
  Averages: 4
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 200 mm
  FoV phase: 75.0 %
  Slice thickness: 3.3 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Allowed
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 17 %
  Position: L10.9 P22.5 F8.0 mm
  Orientation: T > C15.9
  Phase enc. dir.: A >> P
  FoV read: 200 mm
  FoV phase: 75.0 %
  Slice thickness: 3.3 mm
  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L10.9 P22.5 F8.0 mm
  Orientation: T > C15.9
  Phase enc. dir.: A >> P
  Initial Position: L10.9 P22.5 F8.0
  L: 10.9 mm
  P: 22.5 mm
  F: 8.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 15.9
  > S: 0.0
Geometry - Saturation
  Fat sat. mode: Strong
  Water suppr.: None
  Dixon: On
  Fast Dixon: On
  Restore magn.: Off
  Special sat.: Parallel F/H
  Gap: 10 mm
  Thickness: 60 mm
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 8 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 8 mm
  MSMA: S - C - T
  Sagittal: R >> L
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System - Adjust Volume
  Position: L10.9 P22.5 F8.0 mm
  Orientation: T > C15.9
  Rotation: 0.00 deg
  A >> P: 150 mm
  R >> L: 200 mm
  F >> H: 174 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: None
  Dark blood: Off
  FoV read: 200 mm
  FoV phase: 75.0 %
  Phase resolution: 100 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
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Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Reduce Motion Sens.: Off
  Asymmetric echo: Strong
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Echo spacing: 9.3 ms
  Bandwidth: 814 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 5
  Phase correction: Automatic
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  Red. EC sensitivity: Off
  Turbo factor: 23
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 120 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\iShim_b50_800d
TA: 4:04 PM: ISO Voxel size: 1.0×1.0×3.5 mmPAT: 2 Rel. SNR: 1.00  : epse
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Routine
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: L1.1 P21.0 F12.7 mm
  Orientation: T > C20.3
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 7000 ms
  TE: 67.0 ms
  Concatenations: 1
  Filter: Raw filter, Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: NE1,2
Contrast - Common
  TR: 7000 ms
  TE: 67.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Water excit. normal
  Fat sat. mode: Strong
  Binomial SSG: Monopolar
  Binomial scheme: 121
  Refoc duration: 8960 us
  Optimize Binomial BWTP: On
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 136
  Phase resolution: 100 %
  Phase partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 42
  Reference scan mode: GRE/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 45
  Dist. factor: 0 %
  Position: L1.1 P21.0 F12.7 mm
  Orientation: T > C20.3
  Phase enc. dir.: A >> P
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 7000 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.1 P21.0 F12.7 mm
  Orientation: T > C20.3
  Phase enc. dir.: A >> P
  Initial Position: L1.1 P21.0 F12.7
  L: 1.1 mm
  P: 21.0 mm
  F: 12.7 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 20.3
  > S: 0.0
Geometry - Saturation
  Fat suppr.: Water excit. normal
  Fat sat. mode: Strong
  Binomial SSG: Monopolar
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 13 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 13 mm
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  Transversal: F >> H
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  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: iShim
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 3.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 7000 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 3
  b-value 2: 24
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Synthetic images: Off
  Plain images: Off
  Noise level: 20
Diff - Body
  Diffusion mode: 3D Diagonal
  Diff. directions: 1
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 50 s/mm²
  b-value 2: 800 s/mm²
  b-value 1: 3
  b-value 2: 24
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 20
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.67 ms
  Bandwidth: 1750 Hz/Px
Sequence - Part 2
  EPI factor: 136
  RF pulse type: Low SAR
  Gradient mode: Fast
  RF Optimization: Auto
  Background suppression: On
Sequence - Special
  iShim mode: Freq. + Grad.
  ADC Extraction: Product
  iShim window: On
  iShim window L >> R: 160 mm
  iShim window A >> P: 260 mm
  iShim Distor. correction: On

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\No iShim_b50_800d
TA: 3:26 PM: ISO Voxel size: 1.0×1.0×3.5 mmPAT: 2 Rel. SNR: 1.00  : epse
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Geometry - Navigator
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L1.1 P21.0 F12.7 mm
  Orientation: T > C20.3
  Rotation: 0.00 deg
  A >> P: 260 mm
  R >> L: 260 mm
  F >> H: 158 mm
  Reset: Off
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Sequence - Special
  iShim mode: Off
  ADC Extraction: Product

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\DYN TWIST DIXON NECK
TA: 3:13 PM: ISO Voxel size: 1.3×1.3×2.3 mmPAT: 4 Rel. SNR: 1.00  : fldyn
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.8 P5.5 H1.4 mm
  Orientation: T > C-0.3
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 34 %
  Slice oversampling: 46.7 %
  Slices per slab: 60
  FoV read: 210 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  TR: 3.78 ms
  TE 1: 1.23 ms
  TE 2: 2.40 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE3,4;NE1,2
Contrast - Common
  TR: 3.78 ms
  TE 1: 1.23 ms
  TE 2: 2.40 ms
  Flip angle: 10.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 50
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Pause after meas. 40: 0.0 s
  Pause after meas. 41: 0.0 s
  Pause after meas. 42: 0.0 s
  Pause after meas. 43: 0.0 s
  Pause after meas. 44: 0.0 s
  Pause after meas. 45: 0.0 s
  Pause after meas. 46: 0.0 s
  Pause after meas. 47: 0.0 s
  Pause after meas. 48: 0.0 s
  Pause after meas. 49: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 210 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  Base resolution: 160
  Phase resolution: 80 %
  Slice resolution: 59 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 42
  Accel. factor 3D: 2
  Ref. lines 3D: 42
  Reference scan mode: GRE/separate
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L3.8 P5.5 H1.4 mm
  Orientation: T > C-0.3
  Phase enc. dir.: A >> P
  Slice oversampling: 46.7 %
  Slices per slab: 60
  FoV read: 210 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  TR: 3.78 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L3.8 P5.5 H1.4 mm
  Orientation: T > C-0.3
  Phase enc. dir.: A >> P
  Initial Position: L3.8 P5.5 H1.4
  L: 3.8 mm
  P: 5.5 mm
  H: 1.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: -0.3
  > S: 0.0
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 1 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 1 mm
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  Transversal: H >> F
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
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System - Adjust Volume
  Position: L3.8 P5.5 H1.4 mm
  Orientation: T > C-0.3
  Rotation: 0.00 deg
  A >> P: 210 mm
  R >> L: 210 mm
  F >> H: 138 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259700 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
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Inline - Common
  View sharing: TWIST
  Central region A: 20 %
  Sampling density B: 33 %
  Dynamic recon mode: Forward share
  Flip angle: 10.0 deg
  Temporal resolution: 3.65148 s
  Measurements: 50
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Pause after meas. 40: 0.0 s
  Pause after meas. 41: 0.0 s
  Pause after meas. 42: 0.0 s
  Pause after meas. 43: 0.0 s
  Pause after meas. 44: 0.0 s
  Pause after meas. 45: 0.0 s
  Pause after meas. 46: 0.0 s
  Pause after meas. 47: 0.0 s
  Pause after meas. 48: 0.0 s
  Pause after meas. 49: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  Compress Acquisition: Off
  Time to center: 11.4 s
Inline - Inline
  Subtract: Off
  Measurements: 50
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
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  Measurements: 50
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Pause after meas. 30: 0.0 s
  Pause after meas. 31: 0.0 s
  Pause after meas. 32: 0.0 s
  Pause after meas. 33: 0.0 s
  Pause after meas. 34: 0.0 s
  Pause after meas. 35: 0.0 s
  Pause after meas. 36: 0.0 s
  Pause after meas. 37: 0.0 s
  Pause after meas. 38: 0.0 s
  Pause after meas. 39: 0.0 s
  Pause after meas. 40: 0.0 s
  Pause after meas. 41: 0.0 s
  Pause after meas. 42: 0.0 s
  Pause after meas. 43: 0.0 s
  Pause after meas. 44: 0.0 s
  Pause after meas. 45: 0.0 s
  Pause after meas. 46: 0.0 s
  Pause after meas. 47: 0.0 s
  Pause after meas. 48: 0.0 s
  Pause after meas. 49: 0.0 s
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 10.0 deg
  Measurements: 50
  Contrasts: 2
  TR: 3.78 ms
  TE 1: 1.23 ms
  TE 2: 2.40 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth 1: 1080 Hz/Px
  Bandwidth 2: 1010 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Special
  MDixon Mode: LPCA Off
  Dixon Mode: Normal
  Liver Segmentation: Off
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 12.0 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\AX DIXON FAST
TA: 1:39 PM: FIX Voxel size: 0.7×0.7×2.3 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 45.5 %
  Slices per slab: 88
  FoV read: 225 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  TR: 4.48 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Averages: 3
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize, Image Filter
  Coil elements: FS;HE3,4;NE1,2;SP1
Contrast - Common
  TR: 4.48 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
  Flip angle: 17.0 deg
  Fat suppr.: None
  Lines Per Shot: 128
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 225 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Trajectory: Cartesian
  View sharing: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 30
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  POCS: Off
Geometry - Common
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  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Phase enc. dir.: A >> P
  Slice oversampling: 45.5 %
  Slices per slab: 88
  FoV read: 225 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  TR: 4.48 ms
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Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Phase enc. dir.: A >> P
  Initial Position: L8.9 P26.1 F7.1
  L: 8.9 mm
  P: 26.1 mm
  F: 7.1 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 12.7
  > S: 0.0
Geometry - Saturation
  Sat. region: 1
  Thickness: 80 mm
  Position: L0.0 P38.5 F189.0 mm
  Orientation: T > C11.5
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: FIX
  Table position: H
  Table position: 0 mm
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Rotation: 0.00 deg
  A >> P: 225 mm
  R >> L: 225 mm
  F >> H: 203 mm
  Reset: Off
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Inline - Common
  View sharing: Off
  Flip angle: 17.0 deg
  Measurements: 1
  Burn time-to-center: Off
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 50.1 s
Inline - Inline
  Subtract: Off
  Measurements: 1
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Inline - Soft Tissue
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  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 17.0 deg
  Measurements: 1
  Contrasts: 2
  TR: 4.48 ms
  TE 1: 1.23 ms
  TE 2: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: Opp/In
  Multi-slice mode: Sequential
  Bandwidth 1: 1160 Hz/Px
  Bandwidth 2: 1010 Hz/Px
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Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\AX T1 FS FLASH +-C
TA: 3:09 PM: ISO Voxel size: 0.4×0.4×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 13 %
  Position: L13.8 P40.5 H42.4 mm
  Orientation: T > C-13.4 > S1.3
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 31 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 350.0 ms
  TE: 2.46 ms
  Averages: 4
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: SP2,3
Contrast - Common
  TR: 350.0 ms
  TE: 2.46 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 4
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 256
  Phase resolution: 68 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 13 %
  Position: L13.8 P40.5 H42.4 mm
  Orientation: T > C-13.4 > S1.3
  Phase enc. dir.: A >> P
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 350.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L13.8 P40.5 H42.4 mm
  Orientation: T > C-13.4 > S1.3
  Phase enc. dir.: A >> P
  Initial Position: L13.8 P40.5 H42.4
  L: 13.8 mm
  P: 40.5 mm
  H: 42.4 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: -13.4
  > S: 1.3
Geometry - Saturation
  Saturation mode: Quick
  Sat. region: 1
  Thickness: 80 mm
  Position: L0.0 A61.5 H23.7 mm
  Orientation: C > T21.1
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 42 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 3.0 mm
  Dist. factor: 13 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 42 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Matrix Optimization: Off
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L13.8 P40.5 H42.4 mm
  Orientation: T > C-13.4 > S1.3
  Rotation: 0.00 deg
  A >> P: 180 mm
  R >> L: 180 mm
  F >> H: 102 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259700 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 350.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 68 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 350.0 ms
  TE: 2.46 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 310 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 65 deg
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\ENT PROTOCOLS\NECK\E10 - PARATHYROID\dyn_vibe-twist_dixon_OLD
TA: 2:16 PM: FIX Voxel size: 1.3×1.3×2.3 mmPAT: 4 Rel. SNR: 1.00  : fldyn
Properties
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 42.9 %
  Slices per slab: 56
  FoV read: 208 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  TR: 4.17 ms
  TE 1: 1.28 ms
  TE 2: 2.51 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize, Image Filter
  Coil elements: FS;HE3,4;NE1,2;SP1
Contrast - Common
  TR: 4.17 ms
  TE 1: 1.28 ms
  TE 2: 2.51 ms
  Flip angle: 9.0 deg
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 22
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 208 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  Base resolution: 160
  Phase resolution: 90 %
  Slice resolution: 70 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Trajectory: Cartesian
  View sharing: TWIST
  Central region A: 30 %
  Sampling density B: 33 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 2
  Ref. lines 3D: 30
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Body Tra
  Total PAT factor: 4
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Phase enc. dir.: A >> P
  Slice oversampling: 42.9 %
  Slices per slab: 56
  FoV read: 208 mm
  FoV phase: 100.0 %
  Slice thickness: 2.3 mm
  TR: 4.17 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Phase enc. dir.: A >> P
  Initial Position: L8.9 P26.1 F7.1
  L: 8.9 mm
  P: 26.1 mm
  F: 7.1 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: T > C
  T > C: 12.7
  > S: 0.0
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Dixon: On
  Dixon evaluation: Off
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: FIX
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
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  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: L8.9 P26.1 F7.1 mm
  Orientation: T > C12.7
  Rotation: 0.00 deg
  A >> P: 208 mm
  R >> L: 208 mm
  F >> H: 129 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259700 MHz
  Correction factor: 1
  Gain: Low
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Inline - Common
  View sharing: TWIST
  Central region A: 30 %
  Sampling density B: 33 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 9.0 deg
  Temporal resolution: 5.82549 s
  Measurements: 22
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  3D centric reordering: Off
  Time to center: 9.5 s
Inline - Inline
  Subtract: Off
  Measurements: 22
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Inline - Soft Tissue
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  Measurements: 22
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 9.0 deg
  Measurements: 22
  Contrasts: 2
  TR: 4.17 ms
  TE 1: 1.28 ms
  TE 2: 2.51 ms
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Weak
  Contrasts: 2
  Readout mode: Bipolar
  Optimization: Opp/In
  Multi-slice mode: Sequential
  Bandwidth 1: 920 Hz/Px
  Bandwidth 2: 920 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s
